MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\RSMS5G\Drivers\AgilentE8267D.mdd
DriverType: MATLAB interface object
InstrumentType: Vector Signal Generator
InstrumentManufacturer: Agilent
InstrumentModel: E8267D
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Amplitude
    Type: InstrumentCommand
    ConfigureCommand: :pow
    QueryCommand: :pow?
    PermissibleType: Double none
    DefaultValue: -130
    ReadOnly: never
    Description: Sets or queries the amplitude. The units are dBm when doing a set. This is the same as pressing the front panel Amplitude key.

  Property CwFrequency
    Type: InstrumentCommand
    ConfigureCommand: :freq
    QueryCommand: :freq?
    PermissibleType: Double none
    DefaultValue: 20e9
    ReadOnly: never
    Description: Sets or queries the CW frequency. The units are Hz when doing a set. This is the same as pressing the front panel Frequency key.

  Property Data
    Type: InstrumentCommand
    ConfigureCommand: rad:cust:data
    QueryCommand: rad:cust:data?
    PermissibleType: String enum [pn9=pn9, pn11=pn11, pn15=pn15, pn20=pn20, pn23=pn23, fix4=fix4, ext=ext, p4=p4, p8=p8, p16=p16, p32=p32, p64=p64]
    PermissibleType: String none
    DefaultValue: pn23
    ReadOnly: never
    Description: Sets or queries the data source for the custom real time i/q baseband mode. This is the same as pressing the screen data key.
      To load a file, provide the filename surrounded by double quotes as a string.
      To load a pram file, provide "pram filename" as a string without the double quotes.

  Property TriggerSource
    Type: InstrumentCommand
    ConfigureCommand: :RAD:CUST:TRIG
    QueryCommand: :RAD:CUST:TRIG?
    PermissibleType: String enum [ext=ext, bus=bus, key=key]
    DefaultValue: ext
    ReadOnly: never
    Description: Sets or queries the trigger source. This is the same as pressing the trigger source key and selecting one of the first three items.

  Property TriggerType
    Type: InstrumentCommand
    ConfigureCommand: :RAD:CUST:TRIG:TYPE
    QueryCommand: :RAD:CUST:TRIG:TYPE?
    PermissibleType: String enum [cont=cont, sing=sing, gate=gate]
    DefaultValue: cont
    ReadOnly: never
    Description: Sets or queries the trigger type for data transmissions. This is the same as pressing the pattern trigger key.

  Method GoToLocal
    Type: InstrumentCommand
    Line Command=":syst:comm:gtl" Output="false"
    Description: Sorry, cannot implement this in visa due to the visa reply.
      Sets the instrument to local mode. The local or remote state cannot be queried. This is a write only function. This is the same as pressing the front panel Local key.

  Method Preset
    Type: InstrumentCommand
    Line Command=":syst:pres" Output="false"
    Description: Presets the instrument. This is a write only function. This is the same as pressing the front panel Preset key.

  Method Recall
    Type: InstrumentCommand
    Line Command="*rcl <register>,<sequence>" Output="false"
    Input: register
    Input: sequence
    Description: Recalls a saved instrument state. The recall state cannot be queried. This is a write only function. This is the same as pressing the front panel Recall key.

  Method TriggerCommand
    Type: InstrumentCommand
    Line Command="*trg" Output="false"
    Description: Triggers the instrument. This is a write only function.
