MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\RSMS5G\Drivers\HP8648SigGen.mdd
DriverType: MATLAB interface object
InstrumentType: Function Generator
InstrumentManufacturer: Agilent
InstrumentModel: E4438
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
  Code:
    function init(obj)
    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interface=get(obj,'interface');
    set(interface,'InputBufferSize',1e6);
    set(interface,'Timeout',10);
    set(interface,'ByteOrder','bigEndian');
    fclose(interface);

ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property iGenALCAutoAttenState
    Type: InstrumentCommand
    ConfigureCommand: :POW:ATT:AUTO
    QueryCommand: :POW:ATT:AUTO?
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets the ALC auto attenuation state.

  Property iGenALCPowerSearchMode
    Type: InstrumentCommand
    ConfigureCommand: :POW:ALC:SEAR:REF
    QueryCommand: :POW:ALC:SEAR:REF?
    PermissibleType: String enum [Fixed=FIX, Modulation=MOD, RMS=RMS]
    ReadOnly: never

  Property iGenFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      propertyValue = str2double(query(IFace, ':FREQ?'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':FREQ ',num2str(round(propertyValue)),' HZ'])
    PermissibleType: Double bounded [Max="6.0E9" Min="100000.0"]
    DefaultValue: 1e9
    ReadOnly: never
    Description: This property sets or queries the output frequency in Hertz

  Property iGenPowLevel
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      propertyValue = str2double(query(IFace, ':POW?'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':POW ',num2str(propertyValue, '%.1f'),' DBM'])
    PermissibleType: Double bounded [Max="10.0" Min="-136.0"]
    DefaultValue: -80
    ReadOnly: never
    Description: This sets or queries the sig gen output power level in dBm.

  Property iGenRFState
    Type: InstrumentCommand
    ConfigureCommand: :OUTP
    QueryCommand: :OUTP?
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: Off
    ReadOnly: never
    Description: This property queries or sets the RF output state (On or Off)

  Method iGenPreset
    Type: InstrumentCommand
    Line Command="*RST" Output="false"

  Method iGenRecallState
    Type: InstrumentCommand
    Line Command="*rcl <register>,<sequence>" Output="false"
    Input: register
    Input: sequence
