MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006b\work\IQ_Analyzer_v3.mdd
DriverType: MATLAB interface object
InstrumentType: Vector Analyzer
InstrumentManufacturer: Agilent Technologies Inc.
InstrumentModel: E4440A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
  Code:
    function init(obj)
    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interface=get(obj,'interface');
    set(interface,'InputBufferSize',1e6);
    set(interface,'Timeout',10);
    set(interface,'ByteOrder','bigEndian');
    fclose(interface);

ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property ADCRange
    Type: InstrumentCommand
    ConfigureCommand: ADC:RANG
    QueryCommand: ADC:RANG?
    PermissibleType: String enum [AutoRange=AUTO, Bypass=NONE]
    DefaultValue: AUTO
    ReadOnly: never

  Property ApplyAmpCorr
    Type: InstrumentCommand
    ConfigureCommand: CORR:CSET:ALL
    QueryCommand: CORR:CSET:ALL?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never

  Property AvgMode
    Type: InstrumentCommand
    ConfigureCommand: AVER:TCON
    QueryCommand: AVER:TCON?
    PermissibleType: String enum [Exponential=EXP, Repeat=REP]
    DefaultValue: EXP
    ReadOnly: never

  Property AVGTYPE
    Type: InstrumentCommand
    ConfigureCommand: AVER:TYPE
    QueryCommand: AVER:TYPE?
    PermissibleType: String enum [Log-Pwr=LOG, RMS=RMS, Volts=SCAL, Max=MAX, Min=MIN]
    DefaultValue: Log-Pwr
    ReadOnly: never

  Property BaseACQtime
    Type: InstrumentCommand
    ConfigureCommand: :WAV:SWE:TIME
    QueryCommand: :WAV:SWE:TIME?
    PermissibleType: Double bounded [Max="100.0" Min="1.0E-7"]
    DefaultValue: 1.0E-7
    ReadOnly: never
    Description: Set the measurement acquisition time. It is used to specify the length of
      the time capture record.

      Factory Preset: 2.0 ms
      100.0 ms, for Basic Mode (PSA)
      10.0 ms, for NADC, PDC

      Range: 100 ns to 100 s

      Default Unit: seconds

      Remarks: To use this command for E4406A, the appropriate mode
      should be selected with INSTrument:SELect.
      For PSA you must be in the Basic, Analog Modulation,
      cdmaOne, cdma2000, 1xEV-DO, W-CDMA, GSM,
      EDGE, NADC, or PDC mode to use this command. Use
      INSTrument:SELect to set the mode.

  Property BaseAutoPwrRng
    Type: InstrumentCommand
    ConfigureCommand: POW:RANG:AUTO
    QueryCommand: POW:RANG:AUTO?
    PermissibleType: String enum [Off=OFF, On=ON]
    DefaultValue: off
    ReadOnly: never
    Description: Sets the RF port auto ranging. Only usable in Basic Mode

  Property BaseCFREQ
    Type: InstrumentCommand
    ConfigureCommand: FREQ:CENT
    QueryCommand: FREQ:CENT?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Sets the center frequency when analyzer is in Base Mode

  Property BaseSPAN
    Type: InstrumentCommand
    ConfigureCommand: SPEC:FREQ:SPAN
    QueryCommand: SPEC:FREQ:SPAN?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: sets the analyzer Span while in Base Mode.

  Property BaseWNDW
    Type: InstrumentCommand
    ConfigureCommand: SPEC:FFT:WIND
    QueryCommand: SPEC:FFT:WIND?
    PermissibleType: String enum [Flat=FLAT, Blackman-Haris=BH4T, Blackman=BLAC, Gaussian=GAUS, Hamming=HAMM, Hanning=HANN, Kaiser-Bessel70=KB70, Kaiser-Bessel90=KB90, KAiser-Bessel110=KB110, Uniform=UNIF]
    DefaultValue: Flat
    ReadOnly: never
    Description: Sets the window type when the analyzer is Base Mode

  Property CarrierTrackState
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property DANLMethod
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property FFTWindow
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property FilterType
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property FREF
    Type: InstrumentCommand
    ConfigureCommand: ROSC:EXT:FREQ
    QueryCommand: ROSC:EXT:FREQ?
    PermissibleType: Double bounded [Max="3.0E7" Min="1000000.0"]
    DefaultValue: 1000000.0
    ReadOnly: never
    Description: sets the external reference frequency input argument is in hertz

  Property FREFMODE
    Type: InstrumentCommand
    ConfigureCommand: ROSC:SOUR
    QueryCommand: ROSC:SOUR?
    PermissibleType: String enum [Internal=INT, External=EXT]
    DefaultValue: Internal
    ReadOnly: never
    Description: Sets the frequency reference to either internal or external

  Property IFPATH
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property iGenAnnotation
    Type: InstrumentCommand
    ConfigureCommand: DISP:ENAB
    QueryCommand: DISP:ENAB?
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: On
    ReadOnly: never
    Description: Turns the scrren annotation on or off

  Property iGenAtten
    Type: InstrumentCommand
    ConfigureCommand: :POW:ATT
    QueryCommand: :POW:ATT?
    PermissibleType: Double bounded [Max="70.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets or queries the input attenuation in dB.

  Property iGenAttenChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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iFace = get(obj, 'interface');
      propertyValue = str2double(query(iFace, ':POW:ATT?'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':POW:ATT ',num2str(propertyValue)]);

      SetAtten = get(obj, 'iGenAtten');
      if SetAtten ~= propertyValue;
        error('SA:Property:Atten:SettingIncorrect', 'The attenuation has not been set as requested');
      end
    PermissibleType: Double bounded [Max="70.0" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the input attenuation in dB.
      The set portion of this property checks the attenuation value after it is set to ensure that it was set properly. If it was not then an error is raised.

  Property iGenAutoCal
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      temp = deblank(query(IFace, 'CAL:AUTO?'));
      if strncmpi(temp,'PART',4)|| strncmpi(temp, 'ALERT', 4)
        propertyValue = 'Alert';
      elseif strncmpi(temp, 'ON', 2)
        propertyValue = 'On';
      else
        propertyValue = 'Off';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, ['CAL:AUTO ',propertyValue]);
    PermissibleType: String enum [On=ON, Off=OFF, Alert=PART, Partial=PART]
    DefaultValue: On
    ReadOnly: never
    Description: This property sets or queries the auto cal feature on the PXA.
      Off = no auto calibrations will occur
      Partial = Auto Align, Partial disables the full automatic alignment and the maintenance of warranted operation for the benefit of improved measurement throughput. Accuracy is retained for the Resolution Bandwidth filters and the IF Passband which is critical to FFT accuracy, demodulation, and many measurement applications.
      On = full auto alignments

      Allowed inputs:
      On = auto calibration is on, E4440 will run alignments whenever necessary.
      Off = 
      Alert = same as Partial
      Partial = this is only available on the PXA for the E4440 this sets the auto cal to alert.

      Partial is returned as alert so that E4440 and PXA look the same from a measurment standpoint.

  Property iGenAutoCalChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenAutoCal');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, ['CAL:AUTO ',propertyValue]);

      % check to make sure the property is set as requested.
      SetAutoCal = get(obj, 'iGenAutoCal');
      if strncmpi(propertyValue, 'PART', 4);
        propertyValue = 'Alert';
      end
      if ~strncmpi(SetAutoCal,propertyValue,2);
        error('SA:Property:AutoCal:SettingIncorrect', 'The auto calibration feature has not been set as requested');
      end
    PermissibleType: String enum [On=ON, Off=OFF, Alert=PART, Partial=PART]
    DefaultValue: On
    ReadOnly: never
    Description: This property sets or queries the auto cal feature on the PXA.
      Off = no auto calibrations will occur
      Partial = Auto Align, Partial disables the full automatic alignment and the maintenance of warranted operation for the benefit of improved measurement throughput. Accuracy is retained for the Resolution Bandwidth filters and the IF Passband which is critical to FFT accuracy, demodulation, and many measurement applications.

      Allowed inputs:
      On = auto calibration is on, PXA will run alignments whenever necessary.
      Off = no auto align
      Alert = same as Partial
      Partial = this is only available on the PXA for the E4440 this sets the auto cal to alert.

      The set portion of this property checks the auto cal setting after it is set to ensure that it was set properly. If it was not then an error is raised. 

      Partial is returned as alert so that E4440 and PXA look the same from a measurment standpoint.

  Property iGenByteOrder
    Type: InstrumentCommand
    ConfigureCommand: FORM:BORD
    QueryCommand: FORM:BORD?
    PermissibleType: String enum [Normal=NORM, Swapped=SWAP]
    DefaultValue: Normal
    ReadOnly: never
    Description: sets the byte order of the analyzer.
      Use Normal for Motorola processors
      Use Swapped for PCs

  Property iGenCenterFreq
    Type: InstrumentCommand
    ConfigureCommand: :FREQ:CENT
    QueryCommand: :FREQ:CENT?
    PermissibleType: Double bounded [Max="2.699999999E10" Min="-7.9999995E7"]
    DefaultValue: 13.26e9
    ReadOnly: never
    Description: sets or queries the center frequency.

  Property iGenCenterFreqChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenCenterFreq');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':FREQ:CENT ',num2str(propertyValue)]);

      SetCF = get(obj, 'iGenCenterFreq');
      % Check to make sure set CF is within +/- 1 Hz of the desired value
      if ~WithinTol(SetCF, propertyValue, 1, true)
        error('SA:Property:CenterFreq:SettingIncorrect', 'The center frequency has not been set as requested');
      end
    PermissibleType: Double bounded [Max="2.699999999E10" Min="-7.9999995E7"]
    DefaultValue: 13.26e9
    ReadOnly: never
    Description: sets or queries the center frequency.

      if setting this property it is checked to make sure it has been set properly.
      If the setting is not set as requested an error is raised.

  Property iGenCFStepSize
    Type: InstrumentCommand
    ConfigureCommand: FREQ:CENT:STEP
    QueryCommand: FREQ:CENT:STEP?
    PermissibleType: Double bounded [Max="2.7E10" Min="-2.7E10"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: sets or queries the center frequency step size

  Property iGenCFStepSizeChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      propertyValue = str2double(query(IFace, 'FREQ:CENT:STEP?'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, ['FREQ:CENT:STEP ',num2str(propertyValue)]);

      % Check that the setting is within +/- 1 Hz of the desired setting.
      % The PXA does not allow fraction of Hz in step size.
      SetCFStepSize = get(obj, 'iGenCFStepSize');
      if ~WithinTol(SetCFStepSize,propertyValue,1,true);
        error('SA:Property:CFStepSize:SettingIncorrect',...
            'The center frequency step size has not been set as requested');
      end
    PermissibleType: Double bounded [Max="2.7E10" Min="-2.7E10"]
    DefaultValue: 1
    ReadOnly: never
    Description: sets or queries the center frequency step size
      The set portion of this property checks the center frequency step size value after it is set
      to ensure that it was set properly. If it was not then an error is raised.

  Property iGenDataFormat
    Type: InstrumentCommand
    ConfigureCommand: FORM
    QueryCommand: FORM?
    PermissibleType: String enum [ASCII=ASC,8, INT 32=INT,32, REAL 32=REAL,32, REAL 64=REAL,64]
    DefaultValue: ASCII
    ReadOnly: never
    Description: Sets or queries the data format.

      Allowed inputs are:
      ASCII
      INT 32
      REAL 32
      REAL 64

  Property iGenDataFormatChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenDataFormat');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, ['FORM ',propertyValue]);

      SetFormat = deblank(query(iFace, 'FORM?'));
      if strcmpi(propertyValue(1:4),'REAL')
        N = 7;
      else
        N = 3;
      end
      if ~strncmpi(SetFormat,propertyValue,N);
        error('SA:Property:DataFormat:SettingIncorrect', 'The data format has not been set as requested');
      end
    PermissibleType: String enum [ASCII=ASC,8, INT 32=INT,32, REAL 32=REAL,32, REAL 64=REAL,64]
    DefaultValue: ASC
    ReadOnly: never
    Description: Sets or queries the data format.
      The set portion of this property checks the attenuation value after it is set to ensure that it was set properly. If it was not then an error is raised.

      Allowed inputs are:
      ASCII
      INT 32
      REAL 32
      REAL 64

  Property iGenDetector
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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iFace = get(obj, 'interface');
      temp = query(iFace, 'DET?')
      SetDet = temp(1:3)
      switch SetDet
        case 'AVE'
          AverType = query(iFace, 'AVER:TYPE?')
          if strncmpi(AverType, 'RMS', 3)
            propertyValue = 'RMS';
          elseif strncmpi(AverType, 'LOG', 3)
            propertyValue = 'Log Average';
          elseif strncmpi(AverType, 'SCAL', 3)
            propertyValue = 'Volt Average';
          else
            propertyValue = {};
          end
        case 'NOR'
          propertyValue = 'Normal';
        case 'POS'
          propertyValue = 'Positive';
        case 'NEG'
          propertyValue = 'Negative';
        case 'SAM'
          propertyValue = 'Sample';
        otherwise
          propertyValue = {};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');

      if strncmpi(propertyValue, 'AVE', 3)
        fprintf(iFace, ['DET ',propertyValue(1:5)]);
        fprintf(iFace, propertyValue(7:end));
      else
        fprintf(iFace, ['DET ',propertyValue]);
      end
    PermissibleType: String enum [Log Average=AVER; AVER:TYPE LOG, Negative=NEG, Positive=POS, Normal=NORM, Sample=SAMP, RMS=AVER; AVER:TYPE RMS, Volt Average=AVER; AVER:TYPE SCAL]
    DefaultValue: Normal
    ReadOnly: never
    Description: Sets or queries the detector type. Will set for all traces on the PXA.

      Acceptable inputs are:
      Average = video averaging
      Negative = negative peak
      Positive = positive peak
      Normal
      Sample
      RMS = RMS averaging
      QuasiPeak = Quasi-Peak

  Property iGenDetectorChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenDetector');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');

      if strncmpi(propertyValue, 'AVE', 3)
        fprintf(iFace, ['DET ',propertyValue(1:5)]);
        fprintf(iFace, propertyValue(7:end));
      else
        fprintf(iFace, ['DET ',propertyValue]);
      end

      % check it
      SetDet = query(iFace, 'DET?')
      % if an averaging detector find out what kind
      if strncmpi(SetDet, 'AVE', 3)
        AverType = query(iFace, 'AVER:TYPE?');
      end
      % check to make sure desired detector matches actual setting.
      if strncmpi(propertyValue(1:3),'AVER',3)
        if ~strncmpi(AverType(end-3:end-1), propertyValue(end-2:end),3)
          error('SA:Property:Detector:SettingIncorrect', 'The detector has not been set as requested ');
        end
      else
        if ~strncmpi(propertyValue, SetDet, 3)
          error('SA:Property:Detector:SettingIncorrect', 'The detector has not been set as requested ');
        end
      end
    PermissibleType: String enum [Log Average=AVER; AVER:TYPE LOG, Negative=NEG, Positive=POS, Normal=NORM, Sample=SAMP, RMS=AVER; AVER:TYPE RMS, Volt Average=AVER; AVER:TYPE SCAL]
    DefaultValue: Normal
    ReadOnly: never
    Description: Sets or queries the detector type. Will set for all traces on the PXA.
      The set portion of this property checks the detector type after it is set to ensure that it was set properly. If it was not then an error is raised. 

      Acceptable inputs are:
      Average = video averaging
      Negative = negative peak
      Positive = positive peak
      Normal
      Sample
      RMS = RMS averaging
      QuasiPeak = Quasi-Peak

  Property iGenHasGPS
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 0;
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    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: always
    Description: indicates whether or not SA is GPS capable.

  Property iGenHostID
    Type: InstrumentCommand
    QueryCommand: SYST:HID?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property iGenInstDescID
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      out = get(IFace, 'RemoteHost');
      idx = findstr(out, '.');
      propertyValue = ['Agilent N9030A PXA IP',out(idx(end):end)];
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    PermissibleType: String none
    ReadOnly: always

  Property iGenIntPreamp
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      AmpOn = str2double(query(IFace, ':POW:GAIN?'));
      if AmpOn
        propertyValue = 'On';
      else
        propertyValue = 'Off';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':POW:GAIN ',propertyValue]);
      fprintf(IFace, ':POW:GAIN:BAND FULL');
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: Off
    ReadOnly: never
    Description: Sets or queries the status of the internal pre-amp. The PXA allows for Full or low band only to be turned on.
      This command wil turn on the full band preamp. If only the low band is desired used the function iGenPreampBand.

  Property iGenIntPreampChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenIntPreamp');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':POW:GAIN ',propertyValue]);
      fprintf(IFace, ':POW:GAIN:BAND FULL');

      SetPreamp = str2double(query(IFace, ':POW:GAIN?'));
      if SetPreamp ~= str2double(propertyValue);
        error('SA:Property:IntPreamp:SettingIncorrect', 'The preamp state has not been set as requested');
      end
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: Off
    ReadOnly: never
    Description: Sets or queries the status of the internal pre-amp.
      If setting the state of the preamp the setting is checked and if it is not set as desired
      an error is raised.

  Property iGenMeasMode
    Type: InstrumentCommand
    ConfigureCommand: :INST:SEL
    QueryCommand: :INST:SEL?
    PermissibleType: String enum [Spectrum Analyzer=SA, Basic=BASIC, W-CDMA=WCDMA, CDMA 2000=CDMA2K, GSM Edge=EDGEGSM, Phase Noise=PNOISE, CDMA 1xEVDO=CDMA1XEV, Noise Figure=NFIGURE, TDS CDMA=TDSCDMA, Combined WLAN=CWLAN, WiMAX OFDMA=WIMAXOFDMA, Combined Fixed WiMAX=CWIMAXOFDM, VXA=VSA, 89601 VSA=VSA89601, LTE=LTE, iDEN=IDEN, Fixed WiMAX OFDM=WIMAXFIXED, LTE TDD=LTETDD, EMI Receiver=EMI, Bluetooth=BT, Analog Demod=ADEMOD, DVB-T=DVB, DTMB=DTMB, Digital Cable TV=DCATV, ISDB-T=ISDBT, CMMB=CMMB, Remote Language Compatability=RLC, SCPI Language Compatability=SCPILC, Sequence Analyzer=SEQAN]
    DefaultValue: Spectrum Analyzer
    ReadOnly: never
    Description: Sets or queries the E4440 Measurement mode. Not all modes are available on all E4440s.
      Use iGenMeasModesInstalled to determine what modes are available for the E4440 that
      is currently connected.

  Property iGenMeasModeChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenMeasMode');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface')
      fprintf(iFace, [':INST:SEL ',propertyValue]);

      % read mode and make sure it was set correctly
      SetMode = deblank(query(iFace, ':INST:SEL?'));
      if ~strcmpi(SetMode, propertyValue)
        error('SA:Property:MeasMode:SettingIncorrect', 'The measurement mode has not been set as requested ');
      end
    PermissibleType: String enum [Spectrum Analyzer=SA, Basic=BASIC, W-CDMA=WCDMA, CDMA 2000=CDMA2K, GSM Edge=EDGEGSM, Phase Noise=PNOISE, CDMA 1xEVDO=CDMA1XEV, Noise Figure=NFIGURE, TDS CDMA=TDSCDMA, Combined WLAN=CWLAN, WiMAX OFDMA=WIMAXOFDMA, Combined Fixed WiMAX=CWIMAXOFDM, VXA=VSA, 89601 VSA=VSA89601, LTE=LTE, iDEN=IDEN, Fixed WiMAX OFDM=WIMAXFIXED, LTE TDD=LTETDD, EMI Receiver=EMI, Bluetooth=BT, Analog Demod=ADEMOD, DVB-T=DVB, DTMB=DTMB, Digital Cable TV=DCATV, ISDB-T=ISDBT, CMMB=CMMB, Remote Language Compatability=RLC, SCPI Language Compatability=SCPILC, Sequence Analyzer=SEQAN]
    DefaultValue: Spectrum Analyzer
    ReadOnly: never
    Description: Sets or queries the E4440 Measurement mode. Not all modes are available on all E4440s.
      Use iGenMeasModesInstalled to determine what modes are available for the E4440 that
      is currently connected. 
      The set portion of this property will check to make sure the mode has been set as desired.
      If it has not been an error will be raised.

  Property iGenOneDBcompPt
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interface = get(obj, 'interface');
      CF = str2double(query(interface, ':FREQ:CENT?'));
      if CF > 20e6 && CF <= 40e6
        propertyValue = -3;
      elseif CF > 40e6 && CF <= 200e6
        propertyValue = 1;
      elseif CF > 200e6 && CF <= 3.6e9
        propertyValue = 3;
      elseif CF > 3.6e9 && CF <= 16e9
        propertyValue = 1;
      elseif CF > 16e9 && CF <= 26.5e9
        propertyValue = -1;
      else
        propertyValue = [];
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property iGenOperationComplete
    Type: InstrumentCommand
    QueryCommand: *OPC?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Operation Complete
      *OPC
      *OPC?
      The *OPC command sets bit 0 in the standard event status register to
      “1” when pending operations have finished. It does not hold off
      subsequent operations.
      The *OPC? query stops new commands from being processed until the
      current processing is complete. Then it returns a “1”, and the program
      continues. This query can be used to synchronize events of other
      instruments on the external bus.
      The instrument does not wait for completion of all processes for these
      commands. The processes that are monitored are identified in the
      STATus:OPERation resgister. These include:
      For example, if you want to verify the completion of both calibration
      and waiting for trigger set :STAT:OPER:ENAB 33 and monitor any
      changes.
      Key Type: There is no equivalent front-panel key.

      PSA Process    STATus:OPER     Byte Value
                     Register Bit

      Calibrating          0                1
      Sweeping             3                8
      MEASuring            4                16
      (not in all modes)
      Waiting for trigger  5                32

  Property iGenPreampMax
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interface = get(obj, 'interface');
      SAOptions = query(interface, 'SYST:OPT?');
      if ~isempty(findstr(SAOptions, 'P26'))
        propertyValue = 26.5e9; % 26.5 GHz
      elseif ~isempty(findstr(SAOptions, 'P08'))
        propertyValue = 8.4e9; % 8.4 GHz
      elseif ~isempty(findstr(SAOptions, 'P13'))
        propertyValue = 13.6e9; % 13.6 GHz
      elseif ~isempty(findstr(SAOptions, 'P03'))
        propertyValue = 3.6e9; % 3 GHz
      elseif ~isempty(findstr(SAOptions, 'P43'))
        propertyValue = 43e9; % 43 GHz
      elseif ~isempty(findstr(SAOptions, 'P44'))
        propertyValue = 44e9; % 44 GHz
      elseif ~isempty(findstr(SAOptions, 'P50'))
        propertyValue = 50e9; % 50 GHz
      else
        propertyValue = 0; % no Preamp
      end
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    PermissibleType: Double bounded [Max="5.0E10" Min="0.0"]
    DefaultValue: 0
    ReadOnly: always
    Description: This property is read only and can be used to query the maximum
      freqeuncy the preamp will work up to. If no preamp is present this
      property will return 0.

  Property iGenRBW
    Type: InstrumentCommand
    ConfigureCommand: :BAND
    QueryCommand: :BAND?
    PermissibleType: Double bounded [Max="8000000.0" Min="1.0"]
    DefaultValue: 3e6
    ReadOnly: never
    Description: Sets or queries the resolution bandwidth.

  Property iGenRBWChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenRBW');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':BAND ',num2str(propertyValue)]);

      SetRBW = get(obj, 'iGenRBW');
      if ~WithinTol(SetRBW, propertyValue, 1, true)
        error('SA:Property:RBW:SettingIncorrect', 'The RBW has not been set as requested ');
      end
    PermissibleType: Double bounded [Max="8000000.0" Min="1.0"]
    DefaultValue: 3e6
    ReadOnly: never
    Description: Sets or queries the resolution bandwidth.

      This should not be used unless setting the RBW to known available values. 1 3 10 30 100 300 ... up to 1000000 then in 1 MHz steps to 8 MHz 
      except for 7 MHz.

      If Setting the property the setting is checked to make sure the instrument has been set properly.
      If it is not set properly an error is raised. Not all RBW are available so if a strange value is desired this will return an error. 
      Use iGenRBW instead.

  Property iGenRefLevel
    Type: InstrumentCommand
    ConfigureCommand: :DISP:WIND:TRAC:Y:RLEV
    QueryCommand: :DISP:WIND:TRAC:Y:RLEV?
    PermissibleType: Double bounded [Max="30.0" Min="-170.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: This property sets or queries the reference level.
      Possible reference levels are dependent on the attenuation setting.

  Property iGenRefLevelChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenRefLevel');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':DISP:WIND:TRAC:Y:RLEV ',num2str(propertyValue)]);

      SetRefLevel = get(obj, 'iGenRefLevel');
      if ~WithinTol(SetRefLevel, propertyValue, .01, true)
        error('SA:Property:RefLevel:SettingIncorrect','The reference level has not been set as requested');
      end
    PermissibleType: Double bounded [Max="30.0" Min="-170.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: This property sets or queries the reference level.
      Possible reference levels are dependent on the attenuation setting.

      The set command will check the reference level to make sure it has been set as requested.
      If it has not been then an error will be raised.

  Property iGenScalePerDiv
    Type: InstrumentCommand
    ConfigureCommand: :DISP:WIND:TRAC:Y:PDIV
    QueryCommand: :DISP:WIND:TRAC:Y:PDIV?
    PermissibleType: Double bounded [Max="20.0" Min="0.1"]
    DefaultValue: 0.1
    ReadOnly: never
    Description: Sets or queries the logarithmic units per vertical graticule division on the display.

  Property iGenScalePerDivChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenScalePerDiv');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':DISP:WIND:TRAC:Y:PDIV ',num2str(propertyValue)]);

      % check the setting
      SetScale = get(obj, 'iGenScalePerDiv');
      if propertyValue >= 1
        TolVal = 1;
      else
        TolVal = .1;
      end
      if ~WithinTol(SetScale, propertyValue, TolVal, true)
        error('SA:Property:ScalePerDiv:SettingIncorrect','The Y scale per division has not been set as requested');
      end
    PermissibleType: Double bounded [Max="20.0" Min="0.1"]
    DefaultValue: 10
    ReadOnly: never
    Description: Sets or queries the logarithmic units per vertical graticule division on the display.

      When setting the y scale units the setting is checked to make sure it was set properly.
      If it has not been then an error is raised.

  Property iGenScaleType
    Type: InstrumentCommand
    ConfigureCommand: :DISP:WIND:TRAC:Y:SPAC
    QueryCommand: :DISP:WIND:TRAC:Y:SPAC?
    PermissibleType: String enum [Linear=LIN, Log=LOG]
    DefaultValue: Log
    ReadOnly: never
    Description: Sets or queries the vertical scale type for the display.

      Allowed inputs are:
      Linear
      Log

  Property iGenScaleTypeChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenScaleType');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':DISP:WIND:TRAC:Y:SPAC ',propertyValue]);

      SetScaleType = query(IFace, ':DISP:WIND:TRAC:Y:SPAC?');
      if ~strncmpi(SetScaleType, propertyValue, 3)
        error('SA:Property:ScaleType:SettingIncorrect','The Y scale type has not been set as requested');
      end
    PermissibleType: String enum [Linear=LIN, Log=LOG]
    DefaultValue: Log
    ReadOnly: never
    Description: Sets or queries the vertical scale type for the display.

      Allowed inputs are:
      Linear
      Log

      When setting the scale type the setting is checked to make sure it has been set properly.
      If this is not the case an error is raised.

  Property iGenSpan
    Type: InstrumentCommand
    ConfigureCommand: :FREQ:SPAN
    QueryCommand: :FREQ:SPAN?
    PermissibleType: Double bounded [Max="2.7E10" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the frequency span.

  Property iGenSpanChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj,'iGenSpan');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':FREQ:SPAN ',num2str(propertyValue)]);

      SetSpan = get(obj, 'iGenSpan');
      % Check to make sure set CF is within +/- 1 hz of the desired value
      if ~WithinTol(SetSpan, propertyValue, 1, true)
        error('SA:Property:Span:SettingIncorrect', 'The span frequency has not been set as requested');
      end
    PermissibleType: Double bounded [Max="2.7E10" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: This property sets or queries the frequency span.

      The set command checks the setting to make sure it was set as desired.
      If it has not been then an error is raised.

  Property iGenStartFreq
    Type: InstrumentCommand
    ConfigureCommand: :FREQ:STAR
    QueryCommand: :FREQ:STAR?
    PermissibleType: Double bounded [Max="2.699999999E10" Min="-8.0E7"]
    DefaultValue: -8.0E7
    ReadOnly: never
    Description: Sets or queries the start frequency

  Property iGenStartFreqChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenStartFreq');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':FREQ:STAR ',num2str(propertyValue)]);

      SetStartFreq = get(obj, 'iGenStartFreq');
      % Check to make sure set CF is within +/- 1 Hz of the desired value
      if ~WithinTol(SetStartFreq, propertyValue, 1, true)
        error('SA:Property:StartFreq:SettingIncorrect', 'The start frequency has not been set as requested');
      end
    PermissibleType: Double bounded [Max="2.699999999E10" Min="-8.0E7"]
    DefaultValue: 0
    ReadOnly: never
    Description: This property sets or queries the start frequency.

      When setting this property an error will be raised if the start freqeuncy is not set a s requested.

  Property iGenStopFreq
    Type: InstrumentCommand
    ConfigureCommand: :FREQ:STOP
    QueryCommand: :FREQ:STOP?
    PermissibleType: Double bounded [Max="2.7E10" Min="-7.999999E7"]
    DefaultValue: 10e6
    ReadOnly: never
    Description: Sets or queries the stop frequency

  Property iGenStopFreqChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenStopFreq');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':FREQ:STOP ',num2str(propertyValue)]);

      SetStopFreq = get(obj, 'iGenStopFreq');
      % Check to make sure set stop freq is within +/- 1 Hz of the desired value
      if ~WithinTol(SetStopFreq, propertyValue, 1, true)
        error('SA:Property:StopFreq:SettingIncorrect', 'The stop frequency has not been set as requested');
      end
    PermissibleType: Double bounded [Max="2.7E10" Min="-7.999999E7"]
    DefaultValue: 10e6
    ReadOnly: never
    Description: Sets or queries the stop frequency.

      When setting the stop freqeuncy it is checked to make sure it was set as requested.
      If this is not the case then an error is raised.

  Property iGenSweepMode
    Type: InstrumentCommand
    ConfigureCommand: :INIT:CONT
    QueryCommand: :INIT:CONT?
    PermissibleType: String enum [Continuous=1, Single=0]
    DefaultValue: Continuous
    ReadOnly: never
    Description: Sets or queries the sweep mode.

      acceptable inputs are:
      Continuous
      Single

  Property iGenSweepModeChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenSweepMode');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':INIT:CONT ',propertyValue]);

      SetSweepMode = str2double(query(IFace, ':INIT:CONT?'));
      if SetSweepMode ~= str2double(propertyValue)
        error('SA:Property:SweepMode:SettingIncorrect','The sweep mode has not been set as requested');
      end
    PermissibleType: String enum [Continuous=1, Single=0]
    DefaultValue: Continuous
    ReadOnly: never
    Description: Sets or queries the sweep mode.

      acceptable inputs are:
      Continuous
      Single

      When setting this property the setting is checked to make sure it was set properly.
      If it is not set properly an error is raised.

  Property iGenSweepPoints
    Type: InstrumentCommand
    ConfigureCommand: :SWE:POIN
    QueryCommand: :SWE:POIN?
    PermissibleType: Double bounded [Max="40001.0" Min="1.0"]
    DefaultValue: 601
    ReadOnly: never
    Description: Sets or queries the number of number of trace points.

  Property iGenSweepPointsChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenSweepPoints');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      % number of points must be integer so round the input
      propertyValue = round(propertyValue);
      fprintf(iFace, [':SWE:POIN ',num2str(propertyValue)]);

      %check the setting
      SetSweepPoints = get(obj, 'iGenSweepPoints');
      if SetSweepPoints ~= propertyValue
        error('SA:Property:SweepPoints:SettingIncorrect', 'The number of sweep points has not been set as requested');
      end
    PermissibleType: Double bounded [Max="400001.0" Min="1.0"]
    DefaultValue: 601
    ReadOnly: never
    Description: Sets or queries the number of number of trace points.

      When setting this property the setting is checked to make sure it was set properly.
      If it is not set properly an error is raised.

  Property iGenSweepsToAvg
    Type: InstrumentCommand
    ConfigureCommand: :AVER:COUN
    QueryCommand: :AVER:COUN?
    PermissibleType: Double bounded [Max="10000.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the number of sweeps over which to video average.

  Property iGenSweepsToAvgChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenSweepsToAvg');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      % Number of sweeps must be an integer so round the input
      propertyValue = round(propertyValue);
      fprintf(iFace, [':AVER:COUN ',num2str(propertyValue)]);

      % check the setting
      SetSweepsToAvg = get(obj, 'iGenSweepsToAvg');
      if SetSweepsToAvg ~= propertyValue
        error('SA:Property:SweepsToAvg:SettingIncorrect', 'The number of sweeps to average has not been set as requested');
      end
    PermissibleType: Double bounded [Max="10000.0" Min="1.0"]
    DefaultValue: 1
    ReadOnly: never
    Description: Sets or queries the number of sweeps over which to video average.

      When setting this property the setting is checked to make sure it was set properly.
      If it is not set properly an error is raised.

  Property iGenSweepTime
    Type: InstrumentCommand
    ConfigureCommand: :SWE:TIME
    QueryCommand: :SWE:TIME?
    PermissibleType: Double bounded [Max="6000.0" Min="1.0E-6"]
    DefaultValue: .01
    ReadOnly: never
    Description: Sets or queries the trace sweep time.

      When setting the sweep time it is checked to make sure that it was set properly.
      If it is not set properly an error is raised.

  Property iGenSweepTimeChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenSweepTime');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':SWE:TIME ',num2str(propertyValue)]);

      SetST = get(obj, 'iGenSweepTime');
      % Check to make sure set CF is within +/- .01% of the desired value
      if ~WithinTol(SetST, propertyValue, 0.01)
        error('SA:Property:SweepTime:SettingIncorrect', 'The sweep time has not been set as requested');
      end
    PermissibleType: Double bounded [Max="6000.0" Min="1.0E-6"]
    DefaultValue: .01
    ReadOnly: never
    Description: Sets or queries the trace sweep time.

      When setting the sweep time it is checked to make sure that it was set properly.
      If it is not set properly an error is raised.

  Property iGenSystemTime
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      propertyValue = str2double(query(IFace, ':SYST:TIME?'));
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: This property reads the system time from the spectrum analyzer.

  Property iGenTrigDelay
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:DEL
    QueryCommand: :TRIG:DEL?
    PermissibleType: Double bounded [Max="0.5" Min="-0.15"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the trigger delay.

  Property iGenTrigDelayChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenTrigDelay');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':TRIG:DEL ',num2str(propertyValue)]);

      % check the setting
      SetTrigDelay = get(obj, 'iGenTrigDelay');
      if ~WithinTol(SetTrigDelay, propertyValue, 0.0001)
        error('SA:Property:TrigDelay:SettingIncorrect', 'The trigger delay has not been set as requested');
      end
    PermissibleType: Double bounded [Max="0.5" Min="-0.15"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the trigger delay.

      When setting the sweep time it is checked to make sure that it was set properly.
      If it is not set properly an error is raised.

  Property iGenTrigDelayState
    Type: InstrumentCommand
    ConfigureCommand: TRIG:DEL:STAT
    QueryCommand: TRIG:DEL:STAT?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never
    Description: sets or queries the trigger delay state

  Property iGenTrigLevel
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:VID:LEV
    QueryCommand: :TRIG:VID:LEV?
    PermissibleType: Double bounded [Max="30.0" Min="-170.0"]
    DefaultValue: -10
    ReadOnly: never
    Description: Sets or queries the trigger level for video trigger.

  Property iGenTrigLevelChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenTrigLevel');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':TRIG:VID:LEV ',num2str(propertyValue)]);

      % check the setting
      SetTrigLevel = get(obj, 'iGenTrigLevel');
      if ~WithinTol(SetTrigLevel, propertyValue, 0.1, true)
        error('SA:Property:TrigLevel:SettingIncorrect', 'The video trigger level has not been set as requested');
      end
    PermissibleType: Double bounded [Max="30.0" Min="-170.0"]
    DefaultValue: -10
    ReadOnly: never
    Description: Sets or queries the video trigger level.

      When setting the sweep time it is checked to make sure that it was set properly.
      If it is not set properly an error is raised.

  Property iGenTrigSlope
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:SLOP
    QueryCommand: :TRIG:SLOP?
    PermissibleType: String enum [Positive=POS, Negative=NEG]
    DefaultValue: Positive
    ReadOnly: never
    Description: Sets or queries the trigger slope.

  Property iGenTrigSlopeChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenTrigSlope');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':TRIG:SLOP ',propertyValue]);

      SetTrigSlope = deblank(query(IFace, ':TRIG:SLOP?'));
      if ~strcmpi(SetTrigSlope, propertyValue)
        error('SA:Property:TrigSlope:SettingIncorrect','The trigger slope has not been set as requested');
      end
    PermissibleType: String enum [Positive=POS, Negative=NEG]
    DefaultValue: Positive
    ReadOnly: never
    Description: Sets or queries the trigger slope.

      When setting this property the setting is checked to make sure it was set properly.
      If it is not set properly an error is raised.

  Property iGenTrigSource
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:SOUR
    QueryCommand: :TRIG:SOUR?
    PermissibleType: String enum [Free Run=IMM, Video=VID, Line=LINE, External 1=EXT1, External 2=EXT2, RF Burst=RFB]
    DefaultValue: Free Run
    ReadOnly: never
    Description: Sets or queries the trigger source

  Property iGenTrigSourceChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenTrigSource');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':TRIG:SOUR ',propertyValue]);

      % Check the setting
      SetTrigSource = deblank(query(IFace, ':TRIG:SOUR?'));
      if ~strcmpi(SetTrigSource, propertyValue)
        error('SA:Property:TrigSource:SettingIncorrect','The trigger source has not been set as requested');
      end
    PermissibleType: String enum [Free Run=IMM, Video=VID, Line=LINE, External 1=EXT1, External 2=EXT2, RF Burst=RFB]
    DefaultValue: Free Run
    ReadOnly: never
    Description: Sets or queries the trigger source.

      When setting this property the setting is checked to make sure it was set properly.
      If it is not set properly an error is raised.

  Property iGenVBW
    Type: InstrumentCommand
    ConfigureCommand: :BAND:VID
    QueryCommand: :BAND:VID?
    PermissibleType: Double bounded [Max="5.0E7" Min="1.0"]
    DefaultValue: 3e6
    ReadOnly: never
    Description: Sets or queries the video bandwidth.

  Property iGenVBWChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenVBW');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':BAND:VID ',num2str(propertyValue)]);

      % check the setting to within +/- 1 Hz of requested setting
      SetVBW = get(obj, 'iGenVBW');
      if ~WithinTol(SetVBW, propertyValue, 1, true)
        error('SA:Property:VBW:SettingIncorrect', 'The video bandwidth has not been set as requested');
      end
    PermissibleType: Double bounded [Max="5.0E7" Min="1.0"]
    DefaultValue: 3e6
    ReadOnly: never
    Description: Sets or queries the video bandwidth.

      When setting the sweep time it is checked to make sure that it was set properly.
      If it is not set properly an error is raised.

      This should be used cautiously when setting VBW to non standard values. While
      the min and max values are set, not all values in between are available.

  Property iGenVideoAvg
    Type: InstrumentCommand
    ConfigureCommand: :AVER
    QueryCommand: :AVER?
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: Off
    ReadOnly: never
    Description: Sets or queries the trace averaging mode.
      This command should be used with iGenSweepsToAvg to set the number of sweeps
      to average when turning on video averaging.

  Property iGenVideoAvgChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenVideoAvg');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      fprintf(IFace, [':AVER ',propertyValue]);

      SetVidAvg = str2double(query(IFace, ':AVER?'));
      if SetVidAvg ~= str2double(propertyValue)
        error('SA:Property:VideoAvg:SettingIncorrect','Video averaging has not been set as requested');
      end
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: Off
    ReadOnly: never
    Description: Sets or queries the trace averaging mode.
      This command should be used with iGenSweepsToAvg to set the number of sweeps
      to average when turning on video averaging.

      When setting this property the setting is checked to make sure it was set properly.
      If it is not set properly an error is raised.

  Property iGenYUnits
    Type: InstrumentCommand
    ConfigureCommand: :UNIT:POW
    QueryCommand: :UNIT:POW?
    PermissibleType: String enum [dBm=DBM, dBmV=DBMV, dBuV=DBUV, V=V, W=W, dBmA=DBMA, dBuA=DBUA, dBuVm=DBUVM, dBuAm=DBUAM, dBpt=DBPT, dBg=DBG, Amp=A]
    DefaultValue: dbm
    ReadOnly: never
    Description: Sets or queries the Y axis units.
      Allowed inputs are:
      dbm
      dbmv
      dbuv
      V
      W
      dbma
      dbua
      dbuvm
      dbuam
      dbpt
      dbg

  Property iGenYUnitsChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenYUnits');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iFace = get(obj, 'interface');
      fprintf(iFace, [':UNIT:POW ',propertyValue]);

      SetUnits = get(obj, 'iGenYUnits');
      if ~strcmpi(SetUnits,propertyValue);
        error('SA:Property:YUnits:SettingIncorrect', 'The Y axis units have not been set as requested');
      end
    PermissibleType: String enum [dBm=DBM, dBmV=DBMV, dBuV=DBUV, V=V, W=W, dBmA=DBMA, dBuA=DBUA, dBuVm=DBUVM, dBuAm=DBUAM, dBpt=DBPT, dBg=DBG, Amp=A]
    DefaultValue: dbm
    ReadOnly: never
    Description: Sets or queries the Y axis units.
      The set portion of this property checks the attenuation value after it is set to ensure that it was set properly. If it was not then an error is raised.
      Allowed inputs are:
      dbm
      dbmv
      dbuv
      V
      W
      dbma
      dbua
      dbuvm
      dbuam
      dbpt
      dbg

  Property IPandHostName
    Type: InstrumentCommand
    ConfigureCommand: SYST:COMM:LAN:IP
    QueryCommand: SYST:COMM:LAN:IP?
    PermissibleType: String none
    ReadOnly: never
    Description: used to query or set the IP and Host names of the analyzer

  Property iSpecNoiseFloorExt
    Type: InstrumentCommand
    ConfigureCommand: :CORR:NOIS:FLO
    QueryCommand: :CORR:NOIS:FLO?
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: On
    ReadOnly: never
    Description: This property sets or queries the state of the Noise floor extension feature on the PXA

  Property iSpecNoiseFloorExtChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iSpecNoiseFloorExt');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');

      fprintf(IFace, [':CORR:NOIS:FLO ',propertyValue]);

      % Check the setting
      SetNFEState = str2double(query(IFace, ':CORR:NOIS:FLO?'));
      temp = str2double(propertyValue);
      if temp ~= SetNFEState
        error('SA:Property:NoiseFloorExt:SettingIncorrect',...
          'NFE has not been set as requested');
      end
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: On
    ReadOnly: never
    Description: This function sets or queries the noise floor extension state on the PXA.
      When setting the state it is checked and an error is raised if it is not set properly.

  Property iSpecPreselPath
    Type: InstrumentCommand
    ConfigureCommand: :POW:MW:PATH
    QueryCommand: :POW:MW:PATH?
    PermissibleType: String enum [Standard=STD, Low Noise=LNP, Presel Bypass=MPB]
    DefaultValue: Standard
    ReadOnly: never
    Description: This property sets or queries the microwave preseletor path.
      When the μW Preselector is bypassed, the user has better flatness, but will be subject to spurs from out
      of band interfering signals. When the Low Noise Path is enabled, the analyzer automatically switches
      around certain circuitry in the high frequency bands which can contribute to noise, when it is appropriate
      based on other analyzer settings.
      For most applications, the preset state is Standard Path, which gives the best remote-control throughput,
      minimizes acoustic noise from switching and minimizes the risk of wear out in the hardware switches.
      For applications that utilize the wideband IF paths, the preset state is the μW Preselector Bypass path, if
      option MPB is present. This is because, when using a wideband IF such as the 140 MHz IF, the μW
      Preselector’s bandwidth can be narrower than the available IF bandwidth, causing degraded amplitude
      flatness and phase linearity, so it is desirable to bypass the preselector in the default case.

      Allowed Inputs:
      Standard
      Low Noise
      Presel Bypass

  Property iSpecPreselPathChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iSpecPreselPath');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');

      fprintf(IFace, [':POW:MW:PATH ',propertyValue]);

      % check the setting
      SetuWPath = deblank(query(IFace, ':POW:MW:PATH?'));
      if ~strcmpi(SetuWPath, propertyValue)
        error('SA:Property:PreselPath:SettingIncorrect',...
          'The microwave preselector path has not been set as reqeusted');
      end
    PermissibleType: String enum [Standard=STD, Low Noise=LNP, Presel Bypass=MPB]
    DefaultValue: Standard
    ReadOnly: never
    Description: This property sets or queries the microwave preseletor path.
      When the μW Preselector is bypassed, the user has better flatness, but will be subject to spurs from out
      of band interfering signals. When the Low Noise Path is enabled, the analyzer automatically switches
      around certain circuitry in the high frequency bands which can contribute to noise, when it is appropriate
      based on other analyzer settings.
      For most applications, the preset state is Standard Path, which gives the best remote-control throughput,
      minimizes acoustic noise from switching and minimizes the risk of wear out in the hardware switches.
      For applications that utilize the wideband IF paths, the preset state is the μW Preselector Bypass path, if
      option MPB is present. This is because, when using a wideband IF such as the 140 MHz IF, the μW
      Preselector’s bandwidth can be narrower than the available IF bandwidth, causing degraded amplitude
      flatness and phase linearity, so it is desirable to bypass the preselector in the default case.

      Allowed Inputs:
      Standard
      Low Noise
      Presel Bypass

      When setting this property the setting is checked and if it is not correct an error is raised.

  Property LLO
    Type: InstrumentCommand
    ConfigureCommand: SYST:KLOCK
    QueryCommand: SYST:KLOCK?
    PermissibleType: String enum [Off=OFF, On=ON]
    DefaultValue: off
    ReadOnly: never
    Description: used to query or set the local lockout of the analyzer

  Property LOPhNoiseOpt
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property LOPhNoiseOptAuto
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property MeasMethod
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property MeasType
    Type: InstrumentCommand
    ConfigureCommand: CONF
    QueryCommand: CONF?
    PermissibleType: String enum [Spectrum=SPEC, Waveform=WAV, Monitor Spectrum=MON, Spot Freq Meas=SPF, Log Plot Meas=LPL]
    DefaultValue: Spectrum
    ReadOnly: never
    Description: queries or sets the measuremnt type must be in either basic or phase noise modes.

  Property MeasView
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property NumOptions
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 22;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property PreADCBPF
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property qBaseBYTEORD
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property qBaseCONFIG
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property qBaseFFTLen
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property qBaseNumType
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property qCALSTATUS
    Type: InstrumentCommand
    QueryCommand: STAT:QUES:CAL:COND?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: queries the state of the cal align status to see if one is needed.

  Property qMeasScalars
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property qMODECAT
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interface = get(obj, 'interface');
      PossibleModes = {'SA', 'BASIC', 'CDMA', 'CDMA1XEV', 'CDMA2K', 'EDGEGSM', 'LINK',...
        'NADC', 'NFIGURE', 'PDC', 'PNOISE', 'TDSCDMA', 'WCDMA'};
      AvailableModes = query(interface, 'INST:CAT?');
      propertyValue = [];
      for ii = 1:length(PossibleModes)
        if ~isempty(findstr(AvailableModes, PossibleModes{ii}))
          propertyValue = [propertyValue ii];
        end
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: returns an integer array indicating what modes are available on the SA in use.
      1 = Spectrum Analysis
      2 = Basic
      3 = CDMAOne
      4 = CDMA1xEV-DO
      5 = CDMA2000
      6 = EDGE with GSM 
      7 = 89600 VSA Link software
      8 = NADC
      9 = Noise Figure
      10 = PDC
      11 = Phase Noise
      12 = TD-SCDMA
      13 = W-CDMA for 3GPP

  Property qONTIME
    Type: InstrumentCommand
    QueryCommand: SYST:PON:ETIM?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: queries how long the analyzer has been on.

  Property qPOWERONTYPE
    Type: InstrumentCommand
    QueryCommand: SYST:PON:TYPE?
    PermissibleType: String none
    ReadOnly: always

  Property qPRESETTYPE
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interface = get(obj, 'interface');
      temp = query(interface, 'SYST:PRES:TYPE?');
      if strncmpi(temp, 'MODE', 3)
        propertyValue = 'Mode';
      elseif strncmpi(temp, 'FACT', 3)
        propertyValue = 'Factory';
      elseif strncmpi(temp, 'USER', 3)
        propertyValue = 'User';
      else
        % Some sort of Visa Error
        propertyValue = [];
      end
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    PermissibleType: String none
    ReadOnly: always

  Property qSCPIVERSION
    Type: InstrumentCommand
    QueryCommand: SYST:VERS?
    PermissibleType: String none
    ReadOnly: always

  Property qSTATOPERREG
    Type: InstrumentCommand
    QueryCommand: STAT:OPER:COND?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property qUNCAL
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interface = get(obj, 'interface');
      temp = str2double(query(interface, 'STAT:QUES:INT:UNC:COND?'));
      if temp > 0
        propertyValue = 1;
      else
        propertyValue = 0;
      end
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    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: always

  Property RFCPL
    Type: InstrumentCommand
    ConfigureCommand: :INP:COUP
    QueryCommand: :INP:COUP?
    PermissibleType: String enum [ac=AC, dc=DC]
    DefaultValue: ac
    ReadOnly: never
    Description: Sets or gets the RF input coupling.


      2.8.2 RF Coupling
      Specifies alternating current (AC) or direct current (DC) coupling at the analyzer RF input
      port. Selecting AC coupling switches in a blocking capacitor that blocks any DC voltage
      present at the analyzer input. This decreases the input frequency range of the analyzer,
      but prevents damage to the input circuitry of the analyzer if there is a DC voltage present
      at the RF input.
      In AC coupling mode, signals less than 20 MHz are not calibrated. You must switch to DC
      coupling to see calibrated frequencies of less than 20 MHz. Note that the message
      DC Coupled will be displayed on the analyzer when DC is selected.
      Some amplitude specifications apply only when coupling is set to DC. Refer to the
      appropriate amplitude specifications and characteristics for your analyzer.
      CAUTION When operating in DC coupled mode, ensure protection of the input mixer by
      limiting the input level to within 200 mV of 0 Vdc. In AC or DC coupling, limit
      the input RF power to +30 dBm..
      Key Path: Input/Output
      Dependencies/
      Couplings: In external mixing mode, input port and RF coupling selection are not
      available. Not available on 40 GHz or 50 GHz analyzers.
      State Saved: Saved in Instrument State
      Factory Preset: AC
      Remote Command:
      :INPut:COUPling AC|DC
      :INPut:COUPling?
      Example: INP:COUP DC

  Property SAAttnAuto
    Type: InstrumentCommand
    ConfigureCommand: :POW:ATT:AUTO
    QueryCommand: :POW:ATT:AUTO?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Sets or queries the attenuation auto mode
      This will not work in all modes

      [:SENSe]:POWer[:RF]:ATTenuation:AUTO OFF|ON|0|1
      [:SENSe]:POWer[:RF]:ATTenuation:AUTO?
      Remote Command Notes: . The Reference Level setting may be affected when the
      Attenuation is changed. See Ref Level.
      Example:. POW:ATT 30
      POW:ATT?
      POW:ATT:AUTO ON
      POW:ATT:AUTO?

  Property SABlank
    Type: InstrumentCommand
    ConfigureCommand: :DISP:ENAB
    QueryCommand: :DISP:ENAB?
    PermissibleType: String enum [Off=OFF, On=ON]
    DefaultValue: Off
    ReadOnly: never
    Description: Turns the display on/off. If enable is set to off, the display will appear to blank. This can
      make the measurement run faster since the instrument does not have to update the
      display after every data acquisition. There is often no need to update the display
      information when using remote operation.
      • Sending SYSTem:PRESet or *TST commands will turn it on. *RST will not.
      Key Path: None, no front-panel control.
      State Saved: Not saved in instrument state.

  Property SADate
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      interface = get(obj, 'Interface');

      date = query(interface, ':SYST:DATE?');

      month_tab = {'Jan','Feb','Mar','Apr','May','Jun',...
                   'Jul','Aug','Sep','Oct','Nov','Dec'}

      coma_idx = find(date == ',');

      year = date(coma_idx(1)-4:coma_idx(1)-1);
      month = date(coma_idx(1)+1:coma_idx(2)-1);
      month = month_tab{str2double(month)}
      day = date(coma_idx(2)+1:end-1);
      propertyValue = [month ' ' day ', ' year];
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    PermissibleType: String none
    ReadOnly: never
    Description: THIS COMMAND HAS NOT BEEN TESTED!

      Gets the instrument date

      4.9.3.5 Set Date
      Allows you to set the date of the real-time clock. Enter the date in the YYYYMMDD format.
      Key Path: System, Time/Date
      State Saved: Survives Preset and power cycle, but not saved in Instrument State nor
      restored by System, Restore Sys Defaults.
      SCPI Status Bits/
      OPC Dependencies: None
      Factory
      Default: Not affected by “Restore Sys Defaults.”
      Terminators: Unitless
      Range: Year (YYYY): 1970 to 2029
      Month (MM):01 to 12
      Day: 01 to 30 or 31 (depending on the month)
      Remote Command:
      :SYSTem:DATE <year>,<month>,<day>
      :SYSTem:DATE?
      Example: SYST:DATE 2000,12,24 Sets the date to December 24, 2000

  Property SADetAuto
    Type: InstrumentCommand
    ConfigureCommand: :DET:AUTO
    QueryCommand: :DET:AUTO?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Sets or queries the detector type auto mode.

      See the SpecDet property for more info.

  Property SAInput
    Type: InstrumentCommand
    ConfigureCommand: :FEED
    QueryCommand: :FEED?
    PermissibleType: String enum [AmpRef=AREF, RFport=RF]
    DefaultValue: AmpRef
    ReadOnly: never
    Description: Sets or queries the input signal path

      2.8.1 Input Port
      Brings up a menu of input signal sources, the most common one being the front panel RF
      Input port.
      Key Path: Input/Output
      State Saved: Saved in Instrument State
      Factory Preset: RF
      Remote Command:
      [:SENSe]:FEED RF|AREFerence|EMIXer
      [:SENSe]:FEED?
      Example: FEED AREF selects the 50 MHz amplitude reference as the signal input.
      2.8.1.1 RF
      Selects the front panel RF Input port to be the analyzer signal input.
      Key Path: Input/Output, Input Port
      Remote Command:
      See “Input Port” on page 157
      Example: FEED AREF selects the 50 MHz amplitude reference as the signal input.
      2.8.1.2 Amptd Ref
      Selects the 50 MHz, –25 dBm internal amplitude reference as the input signal.
      Key Path: Input/Output, Input Port
      Remote Command:
      See “Input Port” on page 157
      Example: FEED AREF selects the 50 MHz amplitude reference as the signal input.

  Property SAPeakExc
    Type: InstrumentCommand
    ConfigureCommand: :CALC:MARK:PEAK:EXC
    QueryCommand: :CALC:MARK:PEAK:EXC?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the peak excursion value

      4.1.8.1 Peak Excursn
      Sets the minimum amplitude variation of signals that the marker can identify as a
      separate peak. For example, if a peak excursion value of 10 dB is selected, the marker Next
      Peak function moves only to peaks that rise more than 10 dB above the Peak Threshold and
      then fall back down by at least the Peak Excursn. This criteria applies to all traces. This
      function applies to Next Peak, Next Peak Left, and Next Peak Right. If Peak Search is set to
      Param, it also applies to Peak Search.
      Key Path: Peak Search, Search Param
      Dependencies/
      Couplings: This function is not available when Y-Axis is set to Frequency instead of
      Amplitude.
      State Saved: Saved in instrument state.
      Factory Preset: 6.0 dB
      Factory
      Default: 6.0 dB
      Terminators: dB
      Default Terminator: dB
      Resolution/
      Rounding/
      Truncation: 0.01 dB
      Knob Increment: 1 dB
      Step Key
      Increment: 1 dB
      Range: 0.0 dB to 100 dB
      Remote Command:
      :CALCulate:MARKer[1]|2|3|4:PEAK:EXCursion <rel_amplitude>
      :CALCulate:MARKer[1]|2|3|4:PEAK:EXCursion?
      Remote Command Notes: CALC:MARK:PEAK:SEAR:MODE must be set to PARameter
      ig you want Peak Search to take advantage of the threshold excursion.
      Example: :CALC:MARK:PEAK:EXC 30 DB sets the minimum peak excursion
      requirement to 30 dB.
      See the full example for the CALC:MARK:PEAK:SEAR:MODE command
      below.

  Property SAPeakThresh
    Type: InstrumentCommand
    ConfigureCommand: :CALC:MARK:PEAK:THR
    QueryCommand: :CALC:MARK:PEAK:THR?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the peak threshold value

      4.1.8.2 Pk Threshold
      Specifies the minimum signal level for the analyzer internal peak identification routine to
      recognize as a peak. To be considered a peak, a signal must rise above the Peak Threshold
      value by at least the value specified in Peak Excursn, then fall back down by at least the
      Peak Excursn. This applies to all traces and all windows. Press ESC or select another active
      function to hide the threshold line. Applies to Next Peak, Next Peak Left, and Next Peak Right.
      If Peak Search is set to Param, it also applies to Peak Search.
      Key Path: Peak Search, Search Param
      Dependencies/
      Couplings: This function is not available when Y-Axis is set to Frequency instead of
      Amplitude.
      State Saved: Saved in instrument state.
      Factory Preset: –90 dBm
      Terminators: dBmV, dBμV, dBμΑ, V, W, A
      Default Terminator: dBm
      Resolution/
      Rounding/
      Truncation: .001 dBm
      Knob Increment: amp scale = LOG: 1 % of dB/div or 0.01 (the larger of the two)
      amp scale = LIN: 0.1 dBm
      Step Key
      Increment: amp scale = LOG: dB/div
      amp scale = LIN:
      Range: From the current reference level to the bottom of the display range
      Remote Command:
      :CALCulate:MARKer[1]|2|3|4:PEAK:THReshold <ampl>
      :CALCulate:MARKer[1]|2|3|4:PEAK:THReshold?
      Remote Command Notes: CALC:MARK:PEAK:SEAR:MODE must be set to PARameter if
      you want peak search to take advantage of the threshold excursion.
      Example: :CALC:MARK:PEAK:THR -60 dBm sets the threshold to -60 dBm.
      See the full example for the CALC:MARK:PEAK:SEAR:MODE command
      below.

  Property SAPresetType
    Type: InstrumentCommand
    ConfigureCommand: :SYST:PRES:TYPE
    QueryCommand: :SYST:PRES:TYPE?
    PermissibleType: String enum [factory=FACT, user=USER, mode=MODE]
    DefaultValue: mode
    ReadOnly: never
    Description: Sets or queries the instrument preset mode.

      4.9.2.2 Preset Type
      Enables you to select what type of preset will be initiated when you press the green Preset
      key or send the remote command, using SYST:PRES. Choose between Factory, Mode, or
      User defined presets.
      Key Path: System, Power On/Preset
      State Saved: Survives Preset and power cycle, but is not saved in Instrument State.
      SCPI Status Bits/
      OPC Dependencies: None
      Preset: Does not change the Preset Type.
      Factory
      Default: Mode
      Remote Command:
      :SYSTem:PRESet:TYPE FACTory|USER|MODE
      :SYSTem:PRESet:TYPE?
      Remote Command Notes: SYSTem:PRESet:USER:SAVE defines the user preset.
      Example: SYST:PRES:TYPE FACT defines the type of preset as the factory preset.

  Property SARBWAuto
    Type: InstrumentCommand
    ConfigureCommand: :BAND:AUTO
    QueryCommand: :BAND:AUTO?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Sets or queries the resolution bandwidth auto mode

      See SpecRBW for more details

  Property SATime
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      interface = get(obj, 'Interface');

      time = query(interface, ':SYST:TIME?');

      coma_idx = find(time == ',');

      hour = time(1:coma_idx(1)-1);
      minute = time(coma_idx(1)+1:coma_idx(2)-1);
      sec = time(coma_idx(2)+1:end-1);

      propertyValue = [hour 'h ' minute 'm ' sec 's'];
    SetMCode:
      tyName, propertyValue)
      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
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property SATitle
    Type: InstrumentCommand
    ConfigureCommand: :DISP:ANN:TITL:DATA
    QueryCommand: :DISP:ANN:TITL:DATA?
    PermissibleType: String none
    DefaultValue: No title
    ReadOnly: never
    Description: Sets or Queries the display title

      2.5.5 Title
      Displays menu keys that enable you to change or clear a title on your display.
      Key Path: Display
      2.5.5.1 Change Title
      Allows you to write a title across the top of the display. Press Change Title to access the
      Alpha Editor Menus that contain available characters and symbols. You may also use the
      numeric keypad to enter numbers. Press Enter or Return to complete the entry. Press ESC to
      cancel the entry and preserve your existing title.
      The display title will remain until you press Change Title again, or you recall a trace or
      state, or a
      Factory Preset is performed. A title can also be cleared by pressing Title, Clear Title.
      Pressing this key cancels any active function.
      Key Path: Display, Title
      State Saved: Saved in instrument state.
      Remote Command:
      :DISPlay:ANNotation:TITLe:DATA <string>
      :DISPlay:ANNotation:TITLe:DATA?
      Example: DISP:ANN:TITL:DATA “This Is My Title”

  Property SAVBWAuto
    Type: InstrumentCommand
    ConfigureCommand: :BAND:VID:AUTO
    QueryCommand: :BAND:VID:AUTO?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Sets or queries the resolution bandwidth auto mode

      See Spec VBW for more info

  Property SpotOffset
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property TRIGAUTOSTATE
    Type: InstrumentCommand
    ConfigureCommand: TRIG:AUTO:STAT
    QueryCommand: TRIG:AUTO:STAT?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets or queries the auto trigger.

  Property TRIGAUTOTIME
    Type: InstrumentCommand
    ConfigureCommand: TRIG:AUTO
    QueryCommand: TRIG:AUTO?
    PermissibleType: Double bounded [Max="1000.0" Min="0.1"]
    DefaultValue: 0.1
    ReadOnly: never
    Description: Sets or queries the auto trigger time

  Method BaseADCRange
    Type: InstrumentCommand

  Method BaseAVG
    Type: InstrumentCommand

  Method BaseAvgSetup
    Type: InstrumentCommand

  Method BaseCOMPRESSDATA
    Type: InstrumentCommand

  Method BaseDispEnable
    Type: InstrumentCommand

  Method BaseFormat
    Type: InstrumentCommand

  Method BasePRBW
    Type: InstrumentCommand

  Method BasePreFFTfilt
    Type: InstrumentCommand

  Method BaseRBW
    Type: InstrumentCommand

  Method BaseSpecData
    Type: InstrumentCommand

  Method BaseSPECPARAMS
    Type: InstrumentCommand

  Method BaseWAVEPARAMS
    Type: InstrumentCommand

  Method iGenAttenVals
    MCode:
      function AvailableAttenVals = iGenAttenVals(obj)
      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AvailableAttenVals = [0:2:70];
    Description: Returns Vector with all allowable Attenuation values

  Method iGenAutoCouple
    MCode:
      function iGenAutoCouple(obj, WhichParm, AutoCplFlag, RaiseError, ChkResult)
      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
      % Set optional inputs to false if they don't exist
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      interface = get(obj, 'interface');
      InputValid = true;
      switch WhichParm
        case 0 % Input Attenuation
          s = 'POW:ATT';
        case 1 % RBW
          s = 'BWID';
        case 2 %VBW
          s = 'BWID:VID';
        case 3 % Sweep time
          s = 'SWE:TIME';
        case 4 % Detector Mode
          s = 'DET';
        case 5 % average type
          s = 'AVER:TYPE';
        otherwise
          % warning input parm is invalid
          InputValid = false;
      end
      if InputValid
        fprintf(interface, [s, ':AUTO ', num2str(AutoCplFlag)]);
        if ChkResult && RaiseError %Check to make sure it was set correctly
          out = str2double(query(interface, [s, ':AUTO?']));
          if out ~= AutoCplFlag
            error('SA:Function:AutoCouple:SettingIncorrect',...
              'The requested setting was not set as requested');
          end
        end
      else
        if RaiseError
          error('SA:Function:AutoCouple:InvalidInput',...
            'The input parameter to set the auto couple feature was invalid');
        end
      end
    Description: Sets the coupled status of the parameter designated by WhichParm to
      the state designated by AutoCplFlag (1 = on, 0 = off)

      WhichParm = 0 --> Attenuation
      WhichParm = 1 --> RBW
      WhichParm = 2 --> VBW
      WhichParm = 3 --> Sweep Time
      WhichParm = 4 --> Detector
      WhichParm = 5 --> Video Average Type

      If the optional input, RaiseError, = 1 then the auto couple state will be 
      checked after it is set and an error will be raised. The default for this variable is false.

  Method iGenAutoCoupleAll
    MCode:
      function iGenAutoCoupleAll(obj, AutoCplFlag, RaiseError, ChkResult)
      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
      % Set optional inputs to false if they don't exist
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      % Set auto couple state for all parameters
      interface = get(obj, 'interface');
      if AutoCplFlag == true
        fprintf(interface, 'COUP ALL');
      else
        for ii = 1:6
          invoke(obj, 'iGenAutoCouple', ii-1, 0, RaiseError);
        end
      end

      % if ChkResult and RaiseError = true check the setting and raise error if
      % they are not correct
      if ChkResult && RaiseError
        for ii = 1:6
          State = invoke(obj, 'iGenQAutoCouple', ii-1, RaiseError);
          if State ~= AutoCplFlag
            error('SA:Function:AutoCoupleAll:SettingIncorrect',...
              ['The requested setting for couple parameter',num2str(ii-1),...
              ' was not set as requested']);
          end
        end
      end
    Description: if AutoCplFlag = 1 then all parameters are auto coupled
      if AutoCplFlag = 0 then auto coupling of all parameters is turnd off.

      If RaiseError = true and ChkResult = true then the coupled state of all 
      parameters are checked and an error is raised if any of them are not set properly.

  Method iGenCalNow
    MCode:
      function iGenCalNow(obj, RaiseError)
      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
      % set RaiseError to false if it does not exist
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      % get interface object
      interface=get(obj,'interface');

      % set timeout such that alignment has plenty of time.
      set(interface,'Timeout',80);

      % Perform alignment and wai for it to complete
      out = str2double(query(interface, 'CAL?;*WAI'));

      % check to make sure alignment completed properly
      if RaiseError
        if out ~= 0
          error('SA:Function:CalNow:AlignFailed', 'The alignment failed');
        end
      end

      % Reset Timeout
      set(interface, 'Timeout', 10);
    Description: This function forces the analyzer to do an alignment.

      if RaiseError = true then an error will be raised if alignment is unsuccessful.

  Method iGenCFToMarker
    MCode:
      function iGenCFToMarker(obj, MkrOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');
      if MkrOrd > 0 && MkrOrd <= 12
          fprintf(interface, ['CALC:MARK',num2str(MkrOrd),':CENT']);
      else
        if RaiseError
          error('SA:Function:CFToMarker:InvalidInput',...
            'The input marker number is out of range. The center frequency has not been changed');
        end
      end
    Description: This function sets the center frequency to the marker position.
      Which marker is specified by MkrOrd.
      If RaiseError = true this function will capture errors and report them.

  Method iGenDANL
    MCode:
      function Val = iGenDANL(obj, PreampOn, Freq, RaiseError)
      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
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');
      % Determine if NFE and LNP are enabled.
      NFEOn = str2double(query(interface, ':CORR:NOIS:FLO?'));
      temp = deblank(query(interface, ':POW:MW:PATH?'));
      if strcmpi(temp, 'LNP')
        LNPOn = true;
      else
        LNPOn = false;
      end

      if ~PreampOn
        if ~NFEOn
          if ~LNPOn
            DANLVect = [-100 -152 -156 -158 -157 -155 -154 -153 -150 -152 -151 -147 -145 -140 -149];
          elseif LNPOn
            DANLVect = [-100 -152 -156 -158 -157 -155 -154 -153 -156 -157 -157 -155 -153 -152 -154];
          end
          if Freq >= 3 && Freq < 9e3
            Val = DANLVect(1);
          elseif Freq >= 9e3 && Freq < 100e3
            Val = DANLVect(2);
          elseif Freq >= 100e3 && Freq < 1e6
            Val = DANLVect(3);
          elseif Freq >= 1e6 && Freq < 10e6
            Val = DANLVect(4);
          elseif Freq >= 10e6 && Freq < 1.20e9
            Val = DANLVect(5);
          elseif Freq >= 1.20e9 && Freq < 2.1e9
            Val = DANLVect(6);
          elseif Freq >= 2.1e9 && Freq < 3e9
            Val = DANLVect(7);
          elseif Freq >= 3e9 && Freq < 3.6e9
            Val = DANLVect(8);
          elseif Freq >= 3.6e9 && Freq < 4.2e9
            Val = DANLVect(9);
          elseif Freq >= 4.2e9 && Freq < 8.4e9
            Val = DANLVect(10);
          elseif Freq >= 8.4e9 && Freq <= 13.6e9
            Val = DANLVect(11);
          elseif Freq >= 13.6e9 && Freq <= 16.9e9
            Val = DANLVect(12);
          elseif Freq >= 16.9e9 && Freq <= 20e9
            Val = DANLVect(13);
          elseif Freq >= 20e9 && Freq <= 26.5e9
            Val = DANLVect(14);
          else
            % Freq Out of Range
            Val = DANLVect(15);
          end
        else %NFE is on
          if ~LNPOn
            DANLVect = [-162 -158 -157 -152 -145 -155];
          elseif LNPOn
            DANLVect = [-162 -160 -161 -158 -155 -159];
          end
          if Freq < 3.6e9
            Val = DANLVect(1);
          elseif Freq >= 3.6e9 && Freq < 8.3e9
            Val = DANLVect(2);
          elseif Freq >= 8.3e9 && Freq < 13.6e9
            Val = DANLVect(3);
          elseif Freq >= 13.6e9 && Freq < 17e9
            Val = DANLVect(4);
          elseif Freq >= 17e9 && Freq < 26.5e9
            Val = DANLVect(5);
          else
            % Freq Out of Range
            Val = DANLVect(6);
          end
        end
      else %preamp is on
        if ~NFEOn
          if Freq >= 100e3 && Freq < 200e3
            Val = -160;
          elseif Freq >= 200e3 && Freq < 500e3
            Val = -163;
          elseif Freq >= 500e3 && Freq < 1e6
            Val = -166;
          elseif Freq >= 1e6 && Freq < 10e6
            Val = -167;
          elseif Freq >= 10e6 && Freq < 2.1e9
            Val = -166;
          elseif Freq >= 2.1e9 && Freq < 3.6e9
            Val = -164;
          elseif Freq >= 3.6e9 && Freq < 8.4e9
            Val = -166;
          elseif Freq >= 8.4e9 && Freq < 13.6e9
            Val = -165;
          elseif Freq >= 13.6e9 && Freq < 16.9e9
            Val = -162;
          elseif Freq >= 16.9e9 && Freq < 20e9
            Val = -161;
          elseif Freq >= 20e9 && Freq <= 26.5e9
            Val = -157;
          else
            % Freq Out of Range
            Val = -161;
          end
        else %NFE is on
          if Freq < 3.6e9
            Val = -172;
          elseif Freq >= 3.6e9 && Freq < 8.3e9
            Val = -172;
          elseif Freq >= 8.3e9 && Freq < 13.6e9
            Val = -170;
          elseif Freq >= 13.6e9 && Freq < 17e9
            Val = -166;
          elseif Freq >= 17e9 && Freq < 26.5e9
            Val = -162;
          else
            % Freq Out of Range
            Val = -165;
          end
        end
      end
    Description: Gets the DANL value based on frequency and whether or not preamp is on.

  Method iGenDeltaMarker
    MCode:
      function iGenDeltaMarker(obj, MkrOrd, DeltaVal, RaiseError, ChkResult)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      interface = get(obj, 'interface');
      if MkrOrd > 0 && MkrOrd <= 12
        % Make sure specified marker is in delta mode
        fprintf(interface, [':CALC:MARK',num2str(MkrOrd),':MODE DELT']);

        % Move the delta marker the specified value from the reference marker
        fprintf(interface, [':CALC:MARK',num2str(MkrOrd),':X ',num2str(DeltaVal)]);
      else
        if RaiseError
          error('SA:Function:DeltaMarker:InvalidInput','The specified marker number is out of range');
        end
      end

      % Check to make sure it was set correctly if RaiseError = ChkResult = true.
      if ChkResult && RaiseError
        SetDelta = invoke(obj, 'iGenQMarkerDelta', MkrOrd, RaiseError);
        if ~WithinTol(SetDelta, DeltaVal, .1)
          error('SA:Function:DeltaMarker:SettingIncorrect',...
            'The marker delta has not been set as requested.');
        end
      end
    Description: This sets a delta marker on the screen at the specified frequency difference (or time difference in zero span).
      If RaiseError = true an error is raised if a invlaid input is entered.
      If ChkResult = RaiseError = true the marker delta value is checked to make sure it was set properly. If it was not an error is raised.

      This function works oddly. For best results use iGenMarkerToFreq to move a marker to a reference point and then use this
      function to move the delta marker to the specified delta.

  Method iGenFreqInRange
    MCode:
      function InRange = iGenFreqInRange(obj, WhichFreq, FreqValue, RaiseError)
      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
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      Range = invoke(obj, 'iGenFreqRange', WhichFreq, RaiseError);
      if ~isempty(Range)
        Min = Range(1);
        Max = Range(2);
        if FreqValue >= Min && FreqValue <= Max
          InRange = true;
        else
          InRange = false;
        end
      else
        InRange = false;
      end
    Description: queries the analyzer to determine if the specified frequency value is within the limits of the specified frequency type.
      WhichFreq = 1 --> Center Freq
      WhichFreq = 2 --> Start Freq
      WhichFreq = 3 --> Stop Freq
      WhichFreq = 4 --> Span
      WhichFreq = 5 --> Freq Offset
      WhichFreq = 6 --> RBW
      WhichFreq = 7 --> VBW

      FreqValue is specified in hertz
      If RaiseError = true this functions will raise error to be caught at measurement level

  Method iGenFreqRange
    MCode:
      function Range = iGenFreqRange(obj, WhichFreq, RaiseError)
      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
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface= get(obj, 'interface');
      ValidInput = true;
      switch WhichFreq
        case 1 % Center Freq
          s = ':FREQ:CENT?';
        case 2 % Start Freq
          s = ':FREQ:STAR?';
        case 3 % Stop Freq
          s = ':FREQ:STOP?';
        case 4 % Span
          s = ':FREQ:SPAN?';
        case 5 %Offset
          s = ':FREQ:OFFS?';
        case 6 % RBW
          s = ':BWID?';
        case 7 % VBW
          s = ':BWID:VID?';
        otherwise %invalid input
          % warning invalid input
          ValidInput = false;
          Range = [];
      end
      if ValidInput
        MinFreq = str2double(query(interface, [s, ' MIN']));
        MaxFreq = str2double(query(interface, [s, ' MAX']));
        Range = [MinFreq MaxFreq];
      else
        if RaiseError
          error('SA:Function:FreqRange:InvalidInput',...
            'The input parameter to query the frequency range is invalid');
        end
        Range = [];
      end
    Description: queries the min and max of a the frequency specified by WhichFreq
      WhichFreq = 1 --> Center Freq
      WhichFreq = 2 --> Start Freq
      WhichFreq = 3 --> Stop Freq
      WhichFreq = 4 --> Span
      WhichFreq = 5 --> Freq Offset
      WhichFreq = 6 --> RBW
      WhichFreq = 7 --> VBW

      If RaiseError = true errors will be raised for Visa Read errors or invalid input for WhichFreq.

  Method iGenGetOvrDrvAndAlignRqst
    MCode:
      function [OverLoadFlag, AlignFlag] = iGenGetOvrDrvAndAlignRqst(obj)
      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

      interface=get(obj,'interface');

      % check for alignment
      temp = str2double(query(interface, 'STAT:QUES:CAL:COND?'));
      if temp > 0
        AlignFlag = true;
      else
        AlignFlag = false;
      end

      % check for Overload
      temp1 = str2double(query(interface, 'STAT:QUES:INT:COND?'));
      temp2 = str2double(query(interface, 'STAT:QUES:POW:COND?'));

      IF2OverLoad = bitand(uint16(temp1), uint16(16));
      IF1OverLoad = bitand(uint16(temp2), uint16(64));

      if IF2OverLoad == 16 || IF1OverLoad == 64
        OverLoadFlag = true;
      else
        OverLoadFlag = false;
      end
    Description: Query status registers to determine whether or not an overload has occurred or an alignment is required.
      If RaiseError = true Visa read errors will be captured and reported.

  Method iGenGetTraceDet
    MCode:
      function DetMode = iGenGetTraceDet(obj, TraceOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      IFace = get(obj, 'interface');

      DetModeNames = {'Log Average', 'Negative', 'Positive', 'Normal', 'Sample',...
        'RMS', 'Volt Average'};
      DetModeSCPI = {'LOG', 'NEG', 'POS', 'NORM', 'SAMP', 'RMS', 'SCAL'};

      if TraceOrd >= 1 && TraceOrd <= 6
        SetDetMode = deblank(query(IFace, [':DET:TRAC',num2str(TraceOrd),'?']));
        % if in averaging mode find out what type of averaging.
        if strcmpi(SetDetMode, 'AVER')
          SetDetMode = deblank(query(IFace, 'AVER:TYPE?'));
        end

        % find in the list what the detector mode is
        for ii = 1:7
          if strcmpi(DetModeSCPI{ii}, SetDetMode)
            DetMode = DetModeNames{ii};
            break
          end
        end
      else % invalid trace number
        if RaiseError
          error('SA:Function:GetTraceDet:InvalidInput',...
            'Invalid input, the trace number must be 1 - 6.');
        end
        DetMode = {};
      end
    Description: This special function queries the detector mode of a specific trace. It is only possible to set traces to different detectors on the PXA.

  Method iGenMarker
    MCode:
      function iGenMarker(obj, MkrOrd, TurnMarkerOn, RaiseError, ChkResult)
      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
      % Create RaiseError and/or ChkResult variables if they are not input.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      interface = get(obj, 'interface');

      % Only do selected marker if in range (the PXA allows up to 12 markers).
      if MkrOrd >= 0 && MkrOrd <= 12
        if TurnMarkerOn
          if MkrOrd == 0
            for ii = 1:12
              fprintf(interface, ['CALC:MARK',num2str(ii),':STAT ON']);
            end
          else
            fprintf(interface, ['CALC:MARK',num2str(MkrOrd),':STAT ON']);
          end
        else
          if MkrOrd == 0
            s = ':AOFF';
          else
            s = [num2str(MkrOrd),':STAT OFF'];
          end
          fprintf(interface, ['CALC:MARK', s]);
        end
      else
        if RaiseError
          error('SA:Function:Marker:InvalidInput','The input marker number is out of range');
        end
      end
      % Check the setting and report error is wrong if RaiseError = ChkResult =
      % false.
      ItWorked = true;
      if ChkResult && RaiseError
        if MkrOrd == 0
          for ii = 1:12
            MarkerState = str2double(query(interface, ['CALC:MARK',num2str(ii),':STAT?']));
            if MarkerState ~= TurnMarkerOn
              ItWorked = false;
            end
          end
        else
          MarkerState = str2double(query(interface, ['CALC:MARK',num2str(MkrOrd),':STAT?']));
          if MarkerState ~= TurnMarkerOn
            ItWorked = false;
          end
        end
        if ~ItWorked
          error('SA:Function:Marker:SettingIncorrect',...
            'The marker state has not been set as requested');
        end
      end
    Description: Turns the specified marker on or off
      if 0 is the specified marker then all markers are affected
      MkrOrd = specified marker
      TurnMarkerOn = marker state true = on false = off

      if RaiseError = true an error may be raised should one occur.
      ChkResult = RaiseError = true then the setting will be checked and 
      an error will be raised if it is not correct.

  Method iGenMarkerMode
    MCode:
      function iGenMarkerMode(obj, MkrOrd, MkrMode, RaiseError, ChkResult)
      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
      % Set optional inputs to false if they don't exist
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      interface = get(obj, 'interface');
      ValidInput = true;
      switch MkrMode
        case 0 %off
          ModeStr = ':MODE OFF';
        case 1 %Normal
          ModeStr = ':MODE POS';
        case 2 %Delta
          ModeStr = ':MODE DELT';
        otherwise % invalid input
          % warning invalid input raise flag
          ValidInput = false;
      end
      % only attempt to set the marker if a valid mode and number has been selected
      if ValidInput && MkrOrd > 0 && MkrOrd <= 12
        fprintf(interface, [':CALC:MARK',num2str(MkrOrd),ModeStr]);
      else
        if RaiseError
          if ValidInput
            error('SA:Function:MarkerMode:InvalidInput','The input marker number is out of range');
          else
            error('SA:Function:MarkerMode:InvalidInput','The input marker mode is not valid');
          end
        end
      end

      % If ChkResult = RaiseError = true check the mode setting to make sure it
      % has been set properly.
      if RaiseError && ChkResult
        [SetMode, ~] = invoke(obj, 'iGenQMarkerMode', MkrOrd, RaiseError);
        if SetMode ~= MkrMode
          error('SA:Function:MarkerMode:SettingIncorrect', 'The marker mode has not been set as requested');
        end
      end
    Description: This Function sets the specified marker (MkrOrd) mode designated by MkrMode.
      Modes Are:
      0 = off
      1 = normal
      2 = delta


      There is a difference between marker state and marker mode. A marker may be in a non-off mode,
      but still not be displayed if its state is off.

      If RaiseError = true then errors will be raised for invlaid inputs.
      If ChkREsult = RaiseError = true then an error will be raised if the setting is not set as requested.

  Method iGenMarkerToFreq
    MCode:
      function iGenMarkerToFreq(obj, MkrOrd, FreqVal, RaiseError, ChkResult)
      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
      % Create RaiseError and/or ChkREsult variables if they are not input.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      interface = get(obj, 'interface');
      % check to make sure marker number is in range
      if MkrOrd > 0 && MkrOrd <= 12
        % Make sure specified marker is in Normal mode
        fprintf(interface, [':CALC:MARK',num2str(MkrOrd),':MODE POS']);

        % Move marker to specified frequency
        fprintf(interface, [':CALC:MARK',num2str(MkrOrd),':X ',num2str(FreqVal)]);
      else
        if RaiseError
          error('SA:Function:MarkerToFreq:InvalidInput','The input marker number is out of range');
        end
      end

      % if ChkResult = RaiseError = true then check to see if this was set
      % correctly
      if ChkResult && RaiseError
        MarkerFreq = invoke(obj, 'iGenQMarkerFreq', MkrOrd, RaiseError);
        if ~WithinTol(MarkerFreq, FreqVal, 1, true)
          error('SA:Function:MarkerToFreq:SettingIncorrect','The marker has not been set to the requested frequency');
        end
      end
    Description: Moves Marker to spescified frequency. Only works for markers in normal mode. This function 
      will automatically put the specified marker in normal mode.

      If RaiseError = true then errors will be raised for invlaid inputs.
      If ChkREsult = RaiseError = true then an error will be raised if the setting is not set as requested.

  Method iGenMarkerToPeak
    MCode:
      function iGenMarkerToPeak(obj, MkrOrd, DetMode, RaiseError)
      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
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');
      ValidInput = true;
      switch DetMode
        case 0 % max peak
          str = '';
        case 1 % next highest
          str = ':NEXT';
        case 2 % next Right
          str = ':RIGH';
        case 3 % Next Left
          str = ':LEFT';
        otherwise
          % warning invalid input
          ValidInput = false;
      end
      if ValidInput && MkrOrd >= 1 && MkrOrd <= 12
        fprintf(interface, ['CALC:MARK',num2str(MkrOrd),':MAX',str]);
      else
        if RaiseError
          if ValidInput
            error('SA:Function:MarkerMode:InvalidInput','The input marker number is out of range.');
          else
            error('SA:Function:MarkerMode:InvalidInput','The input marker detector mode is not valid. Must be 0-3.');
          end
        end
      end
    Description: places a marker at the highest peak the next highest peak, the next right peak, or the next left peak

      If RaiseError = true then errors will be raised for invlaid inputs.

  Method iGenNumMarkerModes
    MCode:
      function [NumModes, ModeNames] = iGenNumMarkerModes(obj)
      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NumModes = 4;
      ModeNames = {'Off', 'Normal', 'Delta', 'Fixed'};
    Description: returns the number of available marker modes and the names of those marker modes.

  Method iGenNumTraceModes
    MCode:
      function [NumModes, ModeNames] = iGenNumTraceModes(obj)
      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NumModes = 6;
      ModeNames = {'Clear Write', 'Max Hold', 'Min Hold', 'Average', 'Blank', 'View'};
    Description: returns the number of trace modes and the names of each.

  Method iGenNumTraces
    MCode:
      function [Num, IDs] = iGenNumTraces(obj)
      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Num = 6;
      IDs = {'Trace 1'; 'Trace 2'; 'Trace 3'; 'Trace 4'; 'Trace 5'; 'Trace 6'};
    Description: returns the number of traces and the ID for each

  Method iGenOptionNames
    MCode:
      function [OptionID, OptionNames] = iGenOptionNames(obj)
      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OptionID = {'526', 'B25', 'CR3', 'DP2', 'EP1', 'FSA', 'LFE', 'LNP', 'MPB',...
        'NFE', 'NUL', 'P26', 'PFR', 'RTL', '2FP', '3FP', '4FP'};
      OptionNames = {'Frequency Range, 3Hz to 26.5GHz', 'Analysis Bandwidth, 25MHz', 'Connector Rear, 2nd IF Output',...
        '2GB Deep Capture Memory', 'Enhanced Phase Noise Performance', '2dB Step Attenuator',...
        'Low Frequency Enabled, 3Hz', 'Low Noise Path', 'Microwave Preselector Bypass',...
        'Noise Floor Extension', 'IM Nulling', 'Preamplifier, 26.5GHz', 'Precision Frequency Reference',...
        'Real Time Link', 'Spectrum Analyzer Measurement Application', 'Amplitude Correction and Limit Lines',...
        'TOI and Harmonics'};
    Description: Returns the option ID numbers and their associated names. Indexes are mathced in the two vectors.

  Method iGenPeakTracePnt
    MCode:
      function [freq, amp] = iGenPeakTracePnt(obj, NewTrace)
      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
      % Get the interface object
      interface=get(obj,'interface');

      % get sweep time for use later
      ST = str2double(query(interface, 'SWE:TIME?'));

      % set Time out to 1 minute to account for sweep start delay
      set(interface, 'TimeOut', 60);

      % Tell it the precision
      fprintf(interface,':FORM:DATA REAL,32');

      % Set the analyzer into single sweep mode
      fprintf(interface,':INIT:CONT OFF');

      % Trigger the sweep and wait for it to complete if a new sweep is requested
      if NewTrace
        fprintf(interface,':INIT:IMM');
        if ST > 12
          pause(ST - 2);
        end
        query(interface, '*OPC?');
      end

      % Get the peak data back
      fprintf(interface, ':CALC:MARK:MODE POS');
      fprintf(interface,':CALC:MARK:MAX');
      freq = str2double(query(interface,':CALC:MARK:X?'));
      amp = str2double(query(interface,':CALC:MARK:Y?'));

      % Reset timeout
      set(interface,'Timeout',10);
    Description: This function queries the maximum trace point of the active trace and puts a marker on it.
      It returns the frequency and magnitude of the point.

      NewTrace tells the function to take a new trace before finding the peak.

  Method iGenPreampBand
    MCode:
      function iGenPreampBand(obj, State, Band, RaiseError, ChkResult)
      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% Create RaiseError and/or ChkResult variables if they are not input.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      % set the preamp to the specified state and band
      IFace = get(obj, 'interface');
      fprintf(IFace, [':POW:GAIN ',num2str(State)]);
      if strcmpi(Band, 'Full')
        fprintf(IFace, ':POW:GAIN:BAND FULL');
      elseif strcmpi(Band, 'Low')
        fprintf(IFace, ':POW:GAIN:BAND LOW');
      else %Invalid Input
        if RaiseError
          error('SA:Function:PreampBand:InvalidInput',...
            'The input parameters are not valid. State = 1 or 0, Band = Low or Full.');
        end
      end

      % check the settings and raise an error if incorrect
      if RaiseError && ChkResult
        SetState = str2double(query(IFace, ':POW:GAIN?'));
        SetBand = deblank(query(IFace, ':POW:GAIN:BAND?'));
        if (SetState ~= State) && ~strcmpi(SetBand, Band)
          error('SA:Function:PreampBand:SettingIncorrect',...
            'The preamp has not been set as requested.')
        end
      end
    Description: This function turns the preamp either on (1) or off (0) depending on State input, for the specified band (Low or Full)
      if RaieError = ChkResult = true then the state of the preamp will be checked to make sure it was set properly and an error will be raised if they have not been.

      If wishing to turn on the full preamp iGenIntPreamp can also be used.

  Method iGenPreset
    MCode:
      function iGenPreset(obj)
      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IFace = get(obj, 'interface');
      % do an instrument preset
      fprintf(IFace, '*RST');
      % Turn NFE off since this is not affected by preset
      fprintf(IFace, ':CORR:NOIS:FLO 0')
    Description: This function presets the analyzer. The analyzer will be in single sweep mode after the preset.

  Method iGenQAutoCouple
    MCode:
      function CoupleState = iGenQAutoCouple(obj, WhichParm, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interfaceObj = get(obj, 'interface');

      InputValid = true;
      switch WhichParm
        case 0 % Input Attenuation
          s = 'POW:ATT';
        case 1 % RBW
          s = 'BWID';
        case 2 %VBW
          s = 'BWID:VID';
        case 3 % Sweep time
          s = 'SWE:TIME';
        case 4 % Detector Mode
          s = 'DET';
        case 5 % average type
          s = 'AVER:TYPE';
        otherwise
          % warning input parm is invalid
          InputValid = false;
      end

      if InputValid
        CoupleState = str2double(query(interfaceObj, [s, ':AUTO?']));
      else
        if RaiseError
          error('SA:Function:QAutoCouple:InvalidInput',...
            'Input argument, WhichParm, is invalid');
        end
        CoupleState = [];
      end
    Description: Queries the auto couple state of the input parameter designated by WhichParm.

      WhichParm = 0 --> Attenuation
      WhichParm = 1 --> RBW
      WhichParm = 2 --> VBW
      WhichParm = 3 --> Sweep Time
      WhichParm = 4 --> Detector
      WhichParm = 5 --> Video Average Type

      If RaiseError = true an error will be raised if there is an error.

  Method iGenQFreq
    MCode:
      function FreqVal = iGenQFreq(obj, WhichFreq, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interfaceObj = get(obj, 'interface');

      % Look up which SCPI command to use.
      ValidInput = true;
      switch WhichFreq
        case 1 % Center Freq
          s = ':FREQ:CENT?';
        case 2 % Start Freq
          s = ':FREQ:STAR?';
        case 3 % Stop Freq
          s = ':FREQ:STOP?';
        case 4 % Span
          s = ':FREQ:SPAN?';
        case 5 %Offset
          s = ':FREQ:OFFS?';
        case 6 % RBW
          s = ':BWID?';
        case 7 % VBW
          s = ':BWID:VID?';
        otherwise %invalid input
          % warning invalid input
          ValidInput = false;
      end

      % if valid input query the relevant frequency value.
      if ValidInput
        FreqVal = str2double(query(interfaceObj, s));
      else
        if RaiseError
          error('SA:Function:QFreq:InvalidInput', 'Entered value for WhichFreq is invalid');
        end
        FreqVal = [];
      end
    Description: This function queries the freqeuncy designated by WhichFreq. 

      Allowed inputs are:
      1 = Center Frequency
      2 = Start Frequency
      3 = Stop Frequency
      4 = Span
      5 = CF Offset
      6 = RBW
      7 = VBW

      If RaiseError = true an error will be raised if the input is not valid.
      If not true and error occurs then FreqVal will be empty.

  Method iGenQMarkerAmp
    MCode:
      function MarkerAmp = iGenQMarkerAmp(obj, MkrOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');

      if MkrOrd >= 1 && MkrOrd <= 12
        [ModeNum, ~] = invoke(obj, 'iGenQMarkerMode', MkrOrd, RaiseError);
        if ModeNum ~= 0 % make sure its on
          MarkerAmp = str2double(query(interface, [':CALC:MARK', num2str(MkrOrd), ':Y?']));
        else
          if RaiseError
            error('SA:Function:QMarkerAmp:InvalidInput', 'The specified marker must be on to read the amplitude.');
          end
          MarkerAmp = [];
        end
      else
        if RaiseError
          error('SA:Function:QMarkerAmp:InvalidInput','The input marker number is out of range, Must be 1-12.');
        end
        MarkerAmp = [];
      end
    Description: queries the amplitude of the specified marker. If the marker is in delta mode this funciton will read the amplitude delta between the markers.

      If RaiseError = true an error will be raised if there is an error.

      If the marker is not on the empty set is returned or an error is raised (if RaiseError = true).

  Method iGenQMarkerDelta
    MCode:
      function DeltaVal = iGenQMarkerDelta(obj, MkrOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');

      if MkrOrd <= 12 && MkrOrd >= 1
        [ModeNum, ~] = invoke(obj, 'iGenQMarkerMode', MkrOrd, RaiseError);
        if ModeNum == 2 % delta
          DeltaVal = str2double(query(interface, [':CALC:MARK',num2str(MkrOrd),':X?']));
        else
         if RaiseError
            error('SA:Function:QMarkerDelta:WrongMode','The designated marker must be in delta mode to read the delta value.');
          end
          DeltaVal = [];
        end
      else
        if RaiseError
          error('SA:Function:QMarkerDelta:InvalidInput','The input marker number is out of range. Must be 1-12.');
        end
        DeltaVal = [];
      end
    Description: Queries the distance between markers must be in delta mode.

      If RaiseError = true an error will be raised if there is an error.

      If the marker is not on the empty set is returned or an error is raised (if RaiseError = true).

  Method iGenQMarkerFreq
    MCode:
      function Freq = iGenQMarkerFreq(obj, MkrOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');

      if MkrOrd <= 12 && MkrOrd >= 1
        [ModeNum, ~] = invoke(obj, 'iGenQMarkerMode', MkrOrd);
        if ModeNum == 1 % Normal
          Freq = str2double(query(interface, [':CALC:MARK',num2str(MkrOrd),':X?']));
        else
          if RaiseError
            error('SA:Function:QMarkerFreq:WrongMode','The designated marker must be in normal mode to read the freqeuncy value');
          end
          Freq = [];
        end
      else
        if RaiseError
          error('SA:Function:QMarkerFreq:InvalidInput','The input marker number is out of range. Must be 1-12.');
        end
        Freq = [];
      end
    Description: queries the frequncy value of the currnet marker must be in normal mode.

      If RaiseError = true an error will be raised if there is an error.

      If the marker is not in normal mode the empty set is returned or an error is raised (if RaiseError = true).

  Method iGenQMarkerMode
    MCode:
      function [MkrModeNum, MkrModeName] = iGenQMarkerMode(obj, MkrOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');

      if MkrOrd > 0 && MkrOrd <= 12
        % check to see if marker is on. Once Marker is turned on the mode is
        % preserved and never returns to off. On/off can only truly be determined
        % using the STAT command.
        MarkerState = str2double(query(interface, ['CALC:MARK',num2str(MkrOrd),':STAT?']));
        if MarkerState
          temp = deblank(query(interface, [':CALC:MARK',num2str(MkrOrd),':MODE?']));
        else
          temp = 'OFF';
        end
        switch temp
          case 'OFF'
            MkrModeNum = 0;
            MkrModeName = 'Off';
          case 'POS'
            MkrModeNum = 1;
            MkrModeName = 'Normal';
          case 'DELT'
            MkrModeNum = 2;
            MkrModeName = 'Delta';
          case 'FIX'
            MkrModeNum = 3;
            MkrModeName = 'Fixed';
          otherwise %Invalid reply from analyzer
            if RaiseError
              error('SA:Function:QMarkerMode:ReadError','An invalid value was returned from the instrument');
            end
            MkrModeNum = [];
            MkrModeName = {};
        end
      else % MkrOrd not in range
        if RaiseError
          error('SA:Function:QMarkerMode:InvalidInput','The input marker number is out of range, Must be 1-12');
        end
        MkrModeNum = [];
        MkrModeName = {};
      end
    Description: This functions queries the marker mode for the marker designated by MkrOrd.
      It returns both the mode number and the mode name.
      If RaiseError = true an error will be raised if one occurrs, If RaiseError = false
      and an error occurs this function will return an empty set [] for the mode number
      and an empty cell {} for the mode name.

      Modes:
      0 = off
      1 = normal
      2 = delta
      3 = fixed

  Method iGenQMeasModesInstalled
    MCode:
      function [MeasModeName, MeasModeInstrVal] = iGenQMeasModesInstalled(obj)
      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interface = get(obj, 'interface');

      PotentialMeasModes = {'SA', 'BASIC', 'WCDMA', 'CDMA2K', 'EDGEGSM', 'PNOISE',...
        'CDMA1XEV', 'NFIGURE', 'TDSCDMA', 'CWLAN', 'WIMAXOFDMA', 'CWIMAXOFDM','VSA', 'VSA89601',...
        'LTE', 'IDEN', 'WIMAXFIXED', 'LTETDD', 'EMI', 'BT', 'ADEMOD', 'DVB', 'DTMB', 'DCATV',...
        'ISDBT', 'CMMB', 'RLC', 'SCPILC', 'SEQAN'};

      % get mode names from property iGenMeasMode
      out = propinfo(obj, 'iGenMeasMode');
      PotentialModeNames = out.ConstraintValue';

      InstalledModes = query(interface, 'INST:CAT?');
      idx = [];
      for ii = 1:length(PotentialMeasModes)
        if ~isempty(findstr(PotentialMeasModes{ii}, InstalledModes))
          idx = [idx ii];
        end
      end

      MeasModeName = PotentialModeNames(idx);
      MeasModeInstrVal = PotentialMeasModes(idx);
    Description: Queries the analyzer installed measurement modes installed. Names match those in iGenMeasMode Property,

  Method iGenQMkrPntPos
    MCode:
      function PointPosition = iGenQMkrPntPos(obj, MkrOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');

      if MkrOrd <= 12 && MkrOrd >= 1
        [ModeNum, ~] = invoke(obj, 'iGenQMarkerMode', MkrOrd);
        if ModeNum == 1 % Normal
          PointPosition = str2double(query(interface, [':CALC:MARK',num2str(MkrOrd),':X:POS?']));
        elseif ModeNum == 2 % Delta This doesn't work
          RefPoint = str2double(query(interface, [':CALC:MARK',num2str(MkrOrd),':X:POS:STAR?']));
          DeltaPoint = str2double(query(interface, [':CALC:MARK',num2str(MkrOrd),':X:POS:STOP?']));
          PointPosition = [RefPoint DeltaPoint];
        else
          if RaiseError
            error('SA:Function:QMkrPntPos:WrongMode',...
              'The designated marker must be in normal or delta mode to read the point position');
          end
          PointPosition = [];
        end
      else
        if RaiseError
          error('SA:Function:QMkrPntPos:InvalidInput',...
            'The input marker number is out of range. Must be 1-12.');
        end
        PointPosition = [];
      end
    Description: returns the point position of the marker also returns the position of the delta and ref markers if delta mode. 

      This function does not work for Delta mode, as the SCPI commands for finding ref and delta positions do not work as stated in the PXA Manual. The function will return the point position for the delta marker for both the reference and delta marker positions.
      It will work for markers in normal mode.

      If RaiseError = true an error will be raised if the input is not valid.
      If not true and error occurs then PointPosition will be empty.

  Method iGenQOptionsInstalled
    MCode:
      function [AvailOptIDs, AvailOptNames] = iGenQOptionsInstalled(obj)
      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interface = get(obj, 'interface');

      InstalledOpts = query(interface, 'SYST:OPT?');
      [OptionID, OptionNames] = invoke(obj, 'iGenOptionNames');

      idx = [];
      for ii = 1:length(OptionID)
        if ~isempty(findstr(InstalledOpts, OptionID{ii}))
          idx = [idx ii];
        end
      end
      AvailOptIDs = OptionID(idx);
      AvailOptNames = OptionNames(idx);
    Description: Query which options are available on the PXA Currently in use

  Method iGenQTraceMode
    MCode:
      function [ModeNum, ModeName] = iGenQTraceMode(obj, TraceOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      % get number of available traces and trace mode names and interface.
      [NumTraces, ~] = invoke(obj, 'iGenNumTraces');
      [~, ModeNames] = invoke(obj, 'iGenNumTraceModes');
      interface = get(obj, 'interface');

      PotentialTraceModes = {'WRIT', 'MAXH', 'MINH', 'AVER'};

      if TraceOrd >= 1 && TraceOrd <= NumTraces
        TraceOn = str2double(query(interface, [':TRAC',num2str(TraceOrd),':DISP?']));
        if TraceOn
          % determine if in view mode
          UpdateOn = str2double(query(interface, [':TRAC',num2str(TraceOrd),':UPD?']));
          if UpdateOn
            Mode = deblank(query(interface, [':TRAC',num2str(TraceOrd),':TYPE?']));
            for ii = 1:4
              if strcmpi(PotentialTraceModes{ii}, Mode)
                ModeNum = ii-1;
                ModeName = ModeNames{ii};
                break
              end
            end
          else % in view mode
            ModeNum = 5;
            ModeName = ModeNames{6};
          end
        else % Blank Mode
          ModeNum = 4;
          ModeName = ModeNames{5};
        end
      else
        if RaiseError
          error('SA:Function:QTraceMode:InvalidInput',...
            ['The input trace number is invalid. Must be 1-',num2str(NumTraces),'.']);
        end
        ModeNum = [];
        ModeName = {};
      end
    Description: queries the SA for the mode of the specified trace. It returns both the mode number and the mode name.

      Modes
      0 = Clear Write
      1 = Max Hold
      2 = Min Hold
      3 = Average
      4 = Blank
      5 = View

      If RaiseError = true an error will be raised should one occur.

  Method iGenQuerySCPI
    MCode:
      function res=iGenQuerySCPI(obj,cmd)
      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
      interface=get(obj,'interface');

      res=query(interface,cmd);
    Description: Query_SCPI sends an SCPI string to the instrument and returns its response.

      Input parameters: SCPI string
      Output parameters: response string from the instrument

  Method iGenQuickCalNow
    MCode:
      function iGenQuickCalNow(obj, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      IObj = get(obj, 'interface');
      set(IObj,'Timeout',400);
      set(obj, 'iGenAutoCal', 'on');
      out = query(IObj, '*OPC?');
      set(obj, 'iGenAutoCal', 'off');
      set(IObj,'Timeout',10);
    Description: This functions performs a quick cal if possible. If one is not possible it performs a full alignment.
      For the E4440 this is not possible so a full alignment will be performed when this funciton is called.

  Method iGenRefLevelToMarker
    MCode:
      function iGenRefLevelToMarker(obj, MkrOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');
      if MkrOrd >= 1 && MkrOrd <= 12
        fprintf(interface, ['CALC:MARK',num2str(MkrOrd),':RLEV']);
      else
        if RaiseError
           error('SA:Function:MarkerMode:InvalidInput','The input marker mode is not valid. Must be 1-4.');
        end
      end
    Description: sets the reference level to the amplitude of the specified marker

      If RaiseError = true an error will be raised if an invalid input is entered.

  Method iGenSetFreq
    MCode:
      function iGenSetFreq(obj, WhichFreq, FreqValue, RaiseError, ChkResult)
      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
      % Create RaiseError and/or ChkREsult variables if they are not input.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      interface = get(obj, 'interface');

      % Check to make sure freq value is in range
      if invoke(obj, 'iGenFreqInRange', WhichFreq, FreqValue, RaiseError)
        ValidInput = true;
        switch WhichFreq
          case 1 % Center Freq
            s = ':FREQ:CENT ';
          case 2 % Start Freq
            s = ':FREQ:STAR ';
          case 3 % Stop Freq
            s = ':FREQ:STOP ';
          case 4 % Span
            s = ':FREQ:SPAN ';
          case 5 %Offset
            s = ':FREQ:OFFS ';
          case 6 % RBW
            s = ':BWID ';
          case 7 % VBW
            s = ':BWID:VID ';
          otherwise %invalid input
            % warning invalid input
            ValidInput = false;
        end
        if ValidInput
          fprintf(interface, [s, num2str(FreqValue)]);
          Freq = str2double(query(interface, [s(1:end-1),'?']));
          if RaiseError && ChkResult
            if ~WithinTol(Freq, FreqValue, 1, true)
              error('SA:Function:SetFreq:SettingIncorrect',...
                'The Frequency specified by WhichFreq was not set as requested');
            end
          end
        else
          if RaiseError
            error('SA:Function:SetFreq:InvalidInput',...
              'The input parameter, WhichFreq, to set the frequency is invalid');
          end
        end
      else
        % warning specified frequency is not within the allowable range.
        if RaiseError
          error('SA:Function:SetFreq:InvalidInput',...
            'The input parameter, FreqValue, is out of range');
        end
      end
    Description: Sets the specified frequency (WhichFreq) type to the specified value (FreqValue).
      WhichFreq = 1 --> Center Freq
      WhichFreq = 2 --> Start Freq
      WhichFreq = 3 --> Stop Freq
      WhichFreq = 4 --> Span
      WhichFreq = 5 --> Freq Offset
      WhichFreq = 6 --> RBW
      WhichFreq = 7 --> VBW

      FreqValue is specified in hertz
      if RaiseError = true then errors will be raised for invlaid inputs.
      If ChkREsult = RaiseError = true then an error will be raised if the setting is not set as requested.

  Method iGenSetMkrByPnt
    MCode:
      function iGenSetMkrByPnt(obj, MkrOrd, TracePnt, RaiseError, ChkResult)
      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% Set optional inputs to false if they don't exist
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      % Make sure tracePnt is an integer, read the current number of points, and
      % get the interface.
      RoundedTracePnt = round(TracePnt);
      if RoundedTracePnt ~= TracePnt
        if RaiseError
          error('SA:Function:SetMkrByPnt:InvalidInput','The input TracePnt must be an integer.');
        else
          TracePnt = RoundedTracePnt;
        end
      end
      NumPoints = get(obj, 'iGenSweepPoints');
      interface = get(obj, 'interface');

      if TracePnt <= NumPoints
        if MkrOrd <= 12 && MkrOrd >= 1
          [ModeNum, ~] = invoke(obj, 'iGenQMarkerMode', MkrOrd);
          if ModeNum == 1 % Normal
            fprintf(interface, [':CALC:MARK',num2str(MkrOrd),':X:POS ',num2str(TracePnt)]);
          else
            if RaiseError
              error('SA:Function:SetMkrByPnt:WrongMode','The designated marker must be in normal mode.');
            end
          end
        else
          if RaiseError
            error('SA:Function:SetMkrByPnt:InvalidInput','The input marker number is out of range. Must be 1-4.');
          end
        end
      else
        if RaiseError
          error('SA:Function:SetMkrByPnt:InvalidInput',['The input trace point number must be less then the number of sweep points (',...
            num2str(NumPoints),').']);
        end
      end

      % Check the setting if ChkResult = RaiseError = true.
      if ChkResult && RaiseError
        MkrPntPos = invoke(obj, 'iGenQMkrPntPos', MkrOrd, RaiseError);
        if MkrPntPos ~= TracePnt
          error('SA:Function:SetMkrByPnt:SettingIncorrect','The marker has not been set to the requested point');
        end
      end
    Description: sets the position of the specified marker (MkrOrd) in normal mode to the point position specified (TracePnt). 
      TracePnt must be an integer. If it is not an integer and RaiseError = false it will be rounded to the nearest integer.
      If RaiseError = true an error will be raised.

      This function only works on markers in normal mode.

      if RaiseError = true then errors will be raised for invlaid inputs.
      If ChkREsult = RaiseError = true then an error will be raised if the setting is not set as requested.

  Method iGenSetOvrDrvAndAlignRqst
    MCode:
      function iGenSetOvrDrvAndAlignRqst(obj)
      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% Get interface obj
      interface=get(obj,'interface');

      % set decimal representations of status bits
      AlignRqst = 16384;
      OvrDrv = 16; %Second IF Overload
      FstIFOvrDrv = 64; % First IF Overdive
      AllBits = 32767;
      NoBits = 0;

      % SCPI Command headers
      Hdr1 = 'STAT:QUES:CAL:';
      Hdr2 = 'STAT:QUES:INT:';
      % Send commands to Analyzer to set up status registers
      fprintf(interface,[Hdr1, 'PTR ', num2str(AlignRqst)]);
      fprintf(interface,[Hdr1, 'NTR ', num2str(NoBits)]);
      fprintf(interface,[Hdr1, 'ENAB ', num2str(AlignRqst)]);
      fprintf(interface,[Hdr2, 'PTR ', num2str(OvrDrv+FstIFOvrDrv)]);
      fprintf(interface,[Hdr2, 'NTR ', num2str(NoBits)]);
      fprintf(interface,[Hdr2, 'ENAB ', num2str(AllBits)]);

      % Clear questionable integrity register
      ret = str2num(query(interface, 'STAT:QUES:INT?'));
    Description: Sets up the status registers to report both an over-drive condition or an alignment request. No other conditions are monitored. use GetOvrDrvand AlignRqst to query registers.

  Method iGenSetTraceDet
    MCode:
      function iGenSetTraceDet(obj, TraceOrd, DetMode, RaiseError, ChkResult)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      IFace = get(obj, 'interface');

      if TraceOrd >= 1 && TraceOrd <= 6
        switch DetMode
          case 'Log Average'
            fprintf(IFace, [':DET:TRAC',num2str(TraceOrd),' AVER; :AVER:TYPE LOG']);
          case 'Negative'
            fprintf(IFace, [':DET:TRAC',num2str(TraceOrd),' NEG']);
          case 'Positive'
           fprintf(IFace, [':DET:TRAC',num2str(TraceOrd),' POS']);
          case 'Normal'
            fprintf(IFace, [':DET:TRAC',num2str(TraceOrd),' NORM']);
          case 'Sample'
            fprintf(IFace, [':DET:TRAC',num2str(TraceOrd),' SAMP']);
          case 'RMS'
            fprintf(IFace, [':DET:TRAC',num2str(TraceOrd),' AVER; :AVER:TYPE RMS']);
          case 'Volt Average'
            fprintf(IFace, [':DET:TRAC',num2str(TraceOrd),' AVER; :AVER:TYPE SCAL']);
          otherwise
            if RaiseError
              error('SA:Function:SetTraceDet:InvalidInput',...
                'Invalid input, the detector mode is not recognized');
            end
        end
      else
        if RaiseError
          error('SA:Function:SetTraceDet:InvalidInput',...
            'Invalid input, the trace number must be 1 - 6.');
        end
      end
    Description: The PXA has the special ability to set traces to different detector modes. This function is used to set a specific trace to a specifed detector mode. Only one average type can be chosen, however. This means one trace can't be RMS detected while another is log average detected.There is a limit of only three different type of detectors running at once.

      Valid detector mode inputs are (these are the same as allowed inputs for iGenDetector):
      Log Average
      Negative
      Positive
      Normal
      Sample
      RMS
      Volt Average

  Method iGenSpanToMarkerDelta
    MCode:
      function iGenSpanToMarkerDelta(obj, MkrOrd, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interface = get(obj, 'interface');

      if MkrOrd >= 1 && MkrOrd <= 12
        [ModeNum, ~] = invoke(obj, 'iGenQMarkerMode', MkrOrd, RaiseError);
        if ModeNum == 2 % Delta
          fprintf(interface, ['CALC:MARK',num2str(MkrOrd),':SPAN']);
        else
          if RaiseError
            error('SA:Function:SpanToMarkerDelta:MkrWrongMode','The marker must be in Delta mode')
          end
        end
      else
        if RaiseError
          error('SA:Function:SpanToMarkerDelta:InvalidInput','The marker number input is invalid. Must be 1-4.')
        end
      end
    Description: sets the span based on the separation of the delta markers.

      If RaiseError = true then an error will be raised should one occur.

  Method iGenSweepTimeRange
    MCode:
      function Range = iGenSweepTimeRange(obj, qInst, Span)
      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interface = get(obj, 'interface');
      if qInst || ~exist('Span', 'var')
        Span = str2double(query(interface, ':FREQ:SPAN?'));
      end
      if Span == 0
        Range = [.000001 6000];
      else
        Range = [.001 2000];
      end
    Description: Provides the available range of sweep times for the 4440.
      If qInst = true or Span is not input then the E4440 is queried for the current Span.
      This is then used to determine the sweep time range.

      If span is entered then the entered value is used to deteremine the sweep time range.

  Method iGenSwpPntRange
    MCode:
      function Range = iGenSwpPntRange(obj, qInst, Span)
      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Range = [1 40001];
    Description: query the available sweep point range for the e4440

      Sweep Point range is 1 -- 40001 regardless of span so this just returns this range regadless of inputs.

      If span is entered then the entered value is used to deteremine the sweep point range.

  Method iGenTakeSweep
    MCode:
      function iGenTakeSweep(obj)
      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interface=get(obj,'interface');
      % get sweep time for use later
      ST = str2double(query(interface, 'SWE:TIME?'));

      % set Time out to 1 minute to account for sweep start delay
      set(interface, 'TimeOut', 60);

      % Set the analyzer into single sweep mode
      fprintf(interface,':INIT:CONT OFF');

      % Trigger the sweep and wait for it to complete.
      fprintf(interface,':INIT:IMM');
      if ST > 12
        pause(ST - 2);
      end
      query(interface, '*OPC?');

      set(interface, 'TimeOut', 10);
    Description: Tells analyzer to begin a sweep holds actions until sweep is complete. only applies to trace 1

  Method iGenTraceData
    MCode:
      function data=iGenTraceData(obj, TraceOrd, NewTrace, RaiseError)
      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
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      % Get the interface object
      interface=get(obj,'interface');

      if TraceOrd > 0 && TraceOrd <= 6
        % get sweep time for use later
        ST = str2double(query(interface, 'SWE:TIME?'));

        % set Time out to 1 minute to account for sweep start delay
        set(interface, 'TimeOut', 60);

        % Tell it the precision
        fprintf(interface,':FORM:DATA REAL,32');

        % Set the analyzer into single sweep mode
        fprintf(interface,':INIT:CONT OFF');

        % Trigger the sweep and wait for it to complete if a new sweep is requested
        if NewTrace
          fprintf(interface,':INIT:IMM');
          if ST > 12
            pause(ST - 2);
          end
          query(interface, '*OPC?');
        end

        % Get the data back
        fprintf(interface,[':TRACE:DATA? TRACE', num2str(TraceOrd)]);
        data=binblockread(interface,'float');

        % Reset the time out to 10 seconds
        set(interface, 'TimeOut', 10);
      else
        % warning the SA only has three traces. Invalid trace number requested
        if RaiseError
          error('SA:Function:TraceData:InvalidInput',...
            'The PXA only has six traces. The input trace order is invalid')
        else
          data = [];
        end
      end
    Description: This function reads the trace data from the E4440 and returns it as a row vector.

      TraceOrd indicates which trace 1, 2, or 3
      NewTrace is a boolean that indicates whether a new sweep should be performed before recording data
      If RaiseError = true errors will be raised if a Matlab error is raised or an invalid input is entered.

  Method iGenTraceMode
    MCode:
      function iGenTraceMode(obj, TraceOrd, TraceMode, RaiseError, ChkResult)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      [NumTraces, ~] = invoke(obj, 'iGenNumTraces');
      interface = get(obj, 'interface');

      if TraceOrd >= 1 && TraceOrd <= NumTraces
        ValidInput = true;
        switch TraceMode
          case 0 % clear write
            sCmd = [':TRAC',num2str(TraceOrd),':TYPE WRIT'];
          case 1 % Max Hold
            sCmd = [':TRAC',num2str(TraceOrd),':TYPE MAXH'];
          case 2 % Min Hold
            sCmd = [':TRAC',num2str(TraceOrd),':TYPE MINH'];
          case 3
            sCmd = [':TRAC',num2str(TraceOrd),':TYPE AVER'];
          case 4 % blank
            sCmd = [':TRAC',num2str(TraceOrd),':DISP 0'];
          case 5 % view
            sCmd = [':TRAC',num2str(TraceOrd),':UPD 0'];
          otherwise
            % warning invalid input
            ValidInput = false;
        end
        if ValidInput
          if TraceMode >= 0 && TraceMode <= 3
            fprintf(interface, [':TRAC',num2str(TraceOrd),':UPD 1']);
            fprintf(interface, [':TRAC',num2str(TraceOrd),':DISP 1']);
          end
          fprintf(interface, sCmd);
        else
          if RaiseError
            error('SA:Function:TraceMode:InvalidInput',...
              'The input trace mode is invalid');
          end
        end
      else
        if RaiseError
          error('SA:Function:TraceMode:InvalidInput',...
            ['The input trace number is out of range. Must be 1-',num2str(NumTraces),'.']);
        end
      end

      % If ChkResult = RaiseError = true then check the setting and raise an
      % error if it is not correct.
      if RaiseError && ChkResult
        [SetMode, ~] = invoke(obj, 'iGenQTraceMode', TraceOrd, RaiseError);
        if SetMode ~= TraceMode
          error('SA:Function:TraceMode:SettingIncorrect', 'The trace mode has not been set as requested');
        end
      end
    Description: sets the trace mode of the specified trace (TraceOrd)
      TraceModes:
      0 = Clear Write
      1 = Max Hold
      2 = Min Hold
      3 = Average
      4 = Blank
      5 = View

      If RaiseError = true then errors will be raised for invlaid inputs.
      If ChkREsult = RaiseError = true then an error will be raised if the setting is not set as requested.

  Method iGenTrigTraceData
    MCode:
      function [Success, data] = iGenTrigTraceData(obj, TraceOrd, WaitTime, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      % Get the interface object
      interface=get(obj,'interface');
      Fail = false;

      if TraceOrd > 0 && TraceOrd <= 6
        % get sweep time for use later
        ST = str2double(query(interface, 'SWE:TIME?'));
        PauseTime = .001;
        % set Time out to 1 minute to account for sweep start delay
        tTO = ST + WaitTime + 1;

        % Tell it the precision
        fprintf(interface,':FORM:DATA REAL,32');
        Count = 1;

        % Set the analyzer into single sweep mode
        fprintf(interface,':INIT:CONT OFF');
        ClearESR = str2double(query(interface, '*ESR?'));
        Finished = false;

        try
          tStart = tic;
          TotTime = toc(tStart);
          fprintf(interface,':INIT:IMM');
          % tell SA to set Operation complete status register.
          fprintf(interface, '*OPC');
          % poll the status register to determine if sweep has completed. If it
          % does not complete in the alotted time then break out of loop and
          % return that the sweep failed.
          while ~Finished && TotTime <= tTO;
            out = str2double(query(interface, '*ESR?'));
            OpCom = bitand(out, 1);
            if OpCom == 1
              Finished = true;
            end
            TotTime = toc(tStart);
            pause(.01)
          end
          if TotTime > tTO && ~Finished
            Fail = true;
          end
        catch oops
          Fail = true;
        end
        % Get the data back
        if Fail
          data = [];
          Success = false;
        else
          fprintf(interface,[':TRACE:DATA? TRACE', num2str(TraceOrd)]);
          data=binblockread(interface,'float');
          Success = true;
        end
      else
        % warning the SA only has three traces. Invalid trace number requested
        if RaiseError
          error('SA:Function:TrigTraceData:InvalidInput',...
            'The PXA only has six traces. The input trace order is invalid')
        else
          data = [];
          Success = false;
        end
      end
    Description: This function should be used when trying to get trace data from the analyzer while a video trigger is active. The function initiates a trace and waits for it to trigger and take the sweep. If the sweep is not triggered in the time specified by the input, WaitTime, the trace is aborted and the empty set is returned. this is important since when measurements are running autonomously they can not get hung up waiting for a trigger that may never come.

  Method iGenWriteSCPI
    MCode:
      function iGenWriteSCPI(obj,cmd)
      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
      interface=get(obj,'interface');

      fprintf(interface,cmd);
    Description: Write_SCPI sends an SCPI string to the instrument

      Input parameters: SCPI string
      Output parameters: none

  Method InitCaptureData
    MCode:
      function InitCaptureData(obj)
      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
      % Get the interface object
      interface=get(obj,'interface');

      % Tell it the precision
      fprintf(interface,':FORM:DATA REAL,32');

      % Set
      fprintf(interface,':INIT:TCAP');
    Description: Capture Time Data

      Initiates the recording of data while in the Spectrum or Waveform
      measurements. You must have PSA Option 122 or 140 installed and
      have the wideband path selected SENSe:SPECtrum:IFPath WIDE or
      SENSe:WAVeform:IFPath WIDE.
      Example: INIT:TCAP
      Remarks: You must be in the Basic mode to use this command.
      Use INSTrument:SELect to set the mode.
      History: Added with PSA revision A.06.00
      Front Panel
      Access: Meas Control, Capture Setup, Capture

  Method INITSA
    MCode:
      function INITSA(obj)
      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interface = get(obj, 'interface');

      ST = str2double(query(interface, 'SWE:TIME?'));
      set(interface,'Timeout',ST + 2);
      fprintf(interface, 'STAT:OPER:ENAB 8'); %Enable sweeping status flag
      fprintf(interface, 'INIT; *WAI'); % initiate sweep and wait for it to complete
      dummyCmd = query(interface, 'SYST:ERR?');
      set(interface,'Timeout', 10);
    Description: Start a Sweep/Measurement
      Causes instrument to exit the 'idle' state and go to the initiated state.
      Once trigger conditions are met the sweep measurement will start.
      This only works with SA in Spectrum Analyzer mode.

      This may not work when waiting for a trigger due to timeout not being long enough

  Method NumMeasWindows
    Type: InstrumentCommand

  Method qBaseADCRange
    Type: InstrumentCommand

  Method qBaseAVG
    Type: InstrumentCommand

  Method qBaseAvgMode
    Type: InstrumentCommand

  Method qBaseAvgNum
    Type: InstrumentCommand

  Method qBaseAvgType
    Type: InstrumentCommand

  Method qBaseIQStats
    Type: InstrumentCommand

  Method qBaseMeas
    Type: InstrumentCommand

  Method qBasePRBW
    Type: InstrumentCommand

  Method qBasePreFFTfilt
    Type: InstrumentCommand

  Method qBaseRBW
    Type: InstrumentCommand

  Method qDone
    Type: InstrumentCommand

  Method qERR
    Type: InstrumentCommand

  Method qRANGES
    MCode:
      function [MinVal, MaxVal, IncVal] = qRANGES(obj, WhichParm)
      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interface = get(obj, 'interface');
      switch WhichParm
        case 0 % Ref Level
          MinVal = str2double(query(interface, ':DISP:WIND:TRAC:Y:RLEV? MIN'));
          MaxVal = str2double(query(interface, ':DISP:WIND:TRAC:Y:RLEV? MAX'));
          IncVal = 1;
        case 1 % Attenuation
          MinVal = 0;
          MaxVal = 70;
          IncVal = 2;
        case 2 % Y Scale Per Div
          MinVal = str2double(query(interface, ':DISP:WIND:TRAC:Y:PDIV? MIN'));
          MaxVal = str2double(query(interface, ':DISP:WIND:TRAC:Y:PDIV? MAX'));
          IncVal = .1;
        otherwise
          %invalid input
          MinVal = [];
          MaxVal = [];
          IncVal = [];
      end
    Description: Given the current analyzer settings this function queries for the min, max and increment for each of the following parameters (WhichParm)
      WhichParm = 0 --> Reference Level
      WhichParm = 1 --> Attenuation
      WhichParm = 2 --> Y-Axis Scale per division

  Method qRLRANGE
    MCode:
      function out = qRLRANGE(obj)
      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interface = get(obj, 'interface');
      MinRL = str2double(query(interface,':DISP:WIND:TRAC:Y:RLEV? MIN'));
      MaxRL = str2double(query(interface,':DISP:WIND:TRAC:Y:RLEV? MAX'));
      out = [MinRL : MaxRL];
    Description: query available reference level values

  Method qTRIGDELAY
    Type: InstrumentCommand

  Method qTRIGLEVEL
    Type: InstrumentCommand

  Method RCLS
    Type: InstrumentCommand

  Method RCLT
    Type: InstrumentCommand

  Method RL2
    Type: InstrumentCommand

  Method SAInitiate
    MCode:
      function SAInitiate(obj)
      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% Get the interface object
      interface=get(obj,'interface');

      % Tell it the precision
      fprintf(interface,':FORM:DATA REAL,32');

      % Set
      fprintf(interface,':INIT:WAV');

  Method SAMeasCHP
    MCode:
      function SAMeasCHP(obj)
      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
    Description: TO BE USED IN SA MODE

  Method SAMeasOBW
    MCode:
      function SAMeasOBW(obj)
      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
    Description: Sets the Occupied bandwidth in SA mode (only used in SA mode).

  Method SAPeakAcq
    MCode:
      function [freq,amp] = SAPeakAcq(obj)
      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
      % Get the interface object
      interface=get(obj,'interface');

      % Set the analyzer into single sweep mode
      fprintf(interface,':INIT:CONT OFF');

      % Trigger the sweep and wait for it to complete
      fprintf(interface,':INIT:IMM;*WAI');

      % Get the data back
      peaks = str2num(query(interface,':TRAC:MATH:PEAK?'));

      freq = peaks(1:2:end-1)';
      amp = peaks(2:2:end)';

      fprintf(interface,':INIT:CONT ON');
    Description: getPeaks queries the peak list the meets the peak threshold and peak excursion criteria.

      Iutput parameters: none
      Output parameters: two column vectors, the first is the frequency points an the second is the amplitude peak values.

       example: [freq amp] = invoke(mxa_handle, 'SAPeakAcq'')

      FOR USE WITH MXA

  Method SAVES
    Type: InstrumentCommand

  Method SAVET
    Type: InstrumentCommand

  Method SCALEPERDIV2
    Type: InstrumentCommand

  Method SPVAL
    MCode:
      function [MinSpan, MaxSpan] = SPVAL(obj)
      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interface = get(obj, 'interface');
      MinSpan = str2double(query(interface, ':FREQ:SPAN? MIN'));
      MaxSpan = str2double(query(interface, ':FREQ:SPAN? MAX'));
    Description: queries for the min and max allowable spans

  Method SYSMESSAGE
    MCode:
      function SYSMESSAGE(obj, Msg)
      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interface = get(obj, 'interface');
      if strcmpi(Msg, '')
        cmdStr = 'SYST:MESS:OFF';
      else
        cmdStr = ['SYST:MESS "',Msg,'"'];
      end
      fprintf(interface, cmdStr);
    Description: display message on instrument screen

  Method TRIGDELAY
    Type: InstrumentCommand

  Method TRIGLEVEL
    Type: InstrumentCommand

  Method WavDeepCapture
    MCode:
      function iq=WavDeepCapture(obj)
      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
      interface=get(obj,'interface');
      N=query(interface,'TCAP:LREC?');
      N=str2num(N);

      fprintf(interface,':FORM:DATA REAL,32');

      IQData=[];
      tic
      for x = 1:N;
          x;
          fprintf(interface,':READ:WAV0?');
          Record=binblockread(interface,'float');
          fread(interface,1);Ag
          IQData=[IQData;Record];
      end
      toc
      % data is interleaved inphase, quad

      inphase=IQData(1:2:end);
      quad=IQData(2:2:end);

      % final complex vector
      iq=inphase+j*quad;

  Method WavFetchIQData
    MCode:
      function iq=WavFetchIQData(obj)
      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
      % Get the interface object
      interface=get(obj,'interface');

      % Tell it the precision
      fprintf(interface,':FORM:DATA REAL,32');

      fprintf(interface,':FETCH:WAV0?');

      % Get the data back
      data=binblockread(interface,'float');
      fread(interface,1);

      % data is interleaved inphase, quad
      inphase=data(1:2:end);
      quad=data(2:2:end);

      % final complex vector
      iq=inphase+j*quad;
    Description: This command puts selected data from the most recent measurement into the output buffer. Use
      FETCh if you have already made a good measurement and you want to return several types of
      data (different [n] values, e.g. both scalars and trace data) from a single measurement. FETCh
      saves you the time of re-making the measurement. You can only FETCh results from the
      measurement that is currently active, it will not change to a different measurement.
      If you need to get new measurement data, use the READ command, which is equivalent to an
      INITiate followed by a FETCh.
      The scalar measurement results will be returned if the optional [n] value is not included, or is set
      to 1. If the [n] value is set to a value other than 1, the selected trace data results will be returned.
      See each command for details of what types of scalar results or trace data results are available.
      The binary data formats should be used for handling large blocks of data since they are smaller
      and transfer faster then the ASCII format. (FORMat:DATA)
      FETCh may be used to return results other than those specified with the original READ
      or MEASure command that you sent.

  Method WavInitIQData
    MCode:
      function WavInitIQData(obj)
      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
      % Get the interface object
      interface=get(obj,'interface');

      % Tell it the precision
      fprintf(interface,':FORM:DATA REAL,32');

      % Set
      fprintf(interface,':INIT:WAV');
    Description: This command is not available for measurements in all the instrument modes:

      • Initiates a trigger cycle for the specified measurement, but does not output any data. You
      must then use the FETCh<meas> command to return data. If a measurement other than the
      current one is specified, the instrument will switch to that measurement and then initiate it.
      For example, suppose you have previously initiated the ACP measurement, but now you are
      running the channel power measurement. If you send INIT:ACP? it will change from channel
      power to ACP and will initiate an ACP measurement.
      • Does not change any of the measurement settings. For example, if you have previously
      started the ACP measurement and you send INIT:ACP? it will initiate a new ACP
      measurement using the same instrument settings as the last time ACP was run.
      • If your selected measurement is currently active (in the idle state) it triggers the
      measurement, assuming the trigger conditions are met. Then it completes one trigger
      cycle. Depending upon the measurement and the number of averages, there may be
      multiple data acquisitions, with multiple trigger events, for one full trigger cycle. It
      also holds off additional commands on GPIB until the acquisition is complete.

  Method WavMeasIQData
    MCode:
      function iq=WavMeasIQData(obj)
      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
      % Get the interface object
      interface=get(obj,'interface');

      % Change instrument mode to spectrum analyzer
      fprintf(interface,':INST:NSEL 8');

      % Tell it the precision
      fprintf(interface,':FORM:DATA REAL,32');

      % Set the Occupied Bandwidth Meas Mode
      fprintf(interface,':MEAS:WAV?');

      % Get the data back
      data=binblockread(interface,'float');
      fread(interface,1);

      % data is interleaved inphase, quad
      inphase=data(1:2:end);
      quad=data(2:2:end);

      % final complex vector
      iq=inphase+j*quad;
    Description: :MEASure:<measurement>[n]?
      This is a fast single-command way to make a measurement using the factory default
      instrument settings. These are the settings and units that conform to the Mode Setup
      settings (e.g. radio standard) that you have currently selected.

      • Stops the current measurement (if any) and sets up the instrument for the specified
      measurement using the factory defaults
      • Initiates the data acquisition for the measurement
      • Blocks other SCPI communication, waiting until the measurement is complete before
      returning results.
      • If the function does averaging, it is turned on and the number of averages is set to 10.
      • After the data is valid it returns the scalar results, or the trace data, for the specified
      measurement. The type of data returned may be defined by an [n] value that is sent with the
      command.
      The scalar measurement results will be returned if the optional [n] value is not included, or is
      set to 1. If the [n] value is set to a value other than 1, the selected trace data results will be
      returned. See each command for details of what types of scalar results or trace data results
      are available.
      ASCII is the default format for the data output. Older versions of Spectrum Analysis and
      Phase Noise mode measurements only use ASCII.) The binary data formats should be used
      for handling large blocks of data since they are smaller and faster than the ASCII format.
      Refer to the FORMat:DATA command for more information.
      If you need to change some of the measurement parameters from the factory default
      settings you can set up the measurement with the CONFigure command. Use the
      commands in the SENSe:<measurement> and CALCulate:<measurement> subsystems
      to change the settings. Then you can use the READ? command to initiate the
      measurement and query the results. See Figure 1.
      If you need to repeatedly make a given measurement with settings other than the
      factory defaults, you can use the commands in the SENSe:<measurement> and
      CALCulate:<measurement> subsystems to set up the measurement. Then use the
      READ? command to initiate the measurement and query results.
      Measurement settings persist if you initiate a different measurement and then return to
      a previous one. Use READ:<measurement>? if you want to use those persistent settings.
      If you want to go back to the default settings, use MEASure:<measurement>?.

  Method WavReadIQData
    MCode:
      function iq=WavReadIQData(obj)
      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
      % Get the interface object
      interface=get(obj,'interface');

      % Tell it the precision
      fprintf(interface,':FORM:DATA REAL,32');

      fprintf(interface,':READ:WAV0?');

      % Get the data back
      data=binblockread(interface,'float');
      fread(interface,1);

      % data is interleaved inphase, quad
      inphase=data(1:2:end);
      quad=data(2:2:end);

      % final complex vector
      iq=inphase+j*quad;
    Description: For PSA this measures the amplitude of your input signal with respect to the frequency. It provides spectrum analysis capability using FFT(fast Fourier transform) measurement techniques. You must be in the Basic, cdmaOne, cdma2000, 1xEV-DO, W-CDMA, GSM (w/EDGE),
      NADC, or PDC mode to use these commands. Use INSTrument:SELect,
      to select the mode.

      The general functionality of READ are described below. See the SENSe:WAVeform
      commands for more measurement related commands.

      :READ:<measurement>[n]?
      • Does not preset the measurement to the factory default settings. For example, if you have
      previously initiated the ACP measurement and you send READ:ACP? it will initiate a new
      measurement using the same instrument settings.
      • Initiates the measurement and puts valid data into the output buffer. If a measurement other
      than the current one is specified, the instrument will switch to that measurement before it
      initiates the measurement and returns results.
      For example, suppose you have previously initiated the ACP measurement, but now you are
      running the channel power measurement. Then you send READ:ACP? It will change from
      channel power back to ACP and, using the previous ACP settings, will initiate the
      measurement and return results.
      • Blocks other SCPI communication, waiting until the measurement is complete before
      returning the results
      If the optional [n] value is not included, or is set to 1, the scalar measurement results
      will be returned. If the [n] value is set to a value other than 1, the selected trace data
      results will be returned. See each command for details of what types of scalar results
      or trace data results are available. The binary data formats should be used when
      handling large blocks of data since they are smaller and faster then the ASCII
      format. (FORMat:DATA)

  Method XAxisUnits
    Type: InstrumentCommand

  Method YAxisUnits
    Type: InstrumentCommand
