MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\RSMS5G\Drivers\QPT90Rotator.mdd
DriverType: MATLAB interface object
InstrumentType: Rotator
InstrumentManufacturer: QuickSet
InstrumentModel: QPT90
InstrumentVersion: 1.0

CreateInitCode
  Code:
    function init(obj)
    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interface=get(obj,'interface');
    set(interface, 'OutputBufferSize', 256);
    set(interface, 'InputBufferSize', 256);
    set(interface, 'Terminator', 'CR');
    % put the rotator into remote mode
    fopen(interface)
    fprintf(interface, 'FF1');
    fclose(interface);

ConnectInitCode
  Code:
    function init(obj)
    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% put the rotator into remote mode
    interface=get(obj,'interface');
    fprintf(interface, '&FF1');

CleanupCode
  Code:
    function cleanup(obj)
    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interface=get(obj,'interface');
    IFaceStatus = get(interface, 'status');
    if strcmp(IFaceStatus, 'open')
      % take the rotator out of remote mode
      fprintf(interface, '&FF0');
      fclose(interface);
    end

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property iGenAzimuthPos
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      ItWorked = true;
      fprintf(IFace, '$00B03059');
      BufferReady = WaitforBuffer(IFace, 5);
      if BufferReady
        out = fscanf(IFace, '%c');
        RawAzVal = hex2dec(out(9:11));
      else
        ItWorked = false;
      end
      if ItWorked
        [AzOffset, AzScalar] = invoke(obj, 'GetOffSetAndScalar', 0);
        if ~isempty(AzOffset) && ~isempty(AzScalar)
          propertyValue = (RawAzVal - AzOffset)/AzScalar
        else
          propertyValue = [];
        end
      else
        propertyValue = [];
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      ItWorked = true;
      % get the current elevation angle.
      fprintf(IFace, '$00B03059');
      BufferReady = WaitforBuffer(IFace, 5);
      if BufferReady
        out = fscanf(IFace, '%c');
        CurrElevValHex = out(13:15);
      else
        ItWorked = false;
      end
      % convert the input degree value to hex value needed by set command
      if ItWorked
        [AzOffset, AzScalar] = invoke(obj, 'GetOffSetAndScalar', 0);
        RawAZVal = round((propertyValue*AzScalar) + AzOffset);
        AzValHex = dec2hex(RawAZVal);
        % set the position
        CC = ComputeCheckSum(['$00B0210',AzValHex,'0',CurrElevValHex]);
        fprintf(IFace, ['$00B0210',AzValHex,'0',CurrElevValHex,CC]);
        BufferReady = WaitforBuffer(IFace, 5);
        if BufferReady
          out = fscanf(IFace, '%c');
          if strcmp(out(end),'n')
            % Comm Error Nack
          else % wait until it finishes moving
            Stopped = false;
            while ~Stopped
              fprintf(IFace, '$00B03059');
              BufferReady = WaitforBuffer(IFace, 5);
              if BufferReady
                out = fscanf(IFace, '%c');
                Moving = out(8);
                if strcmpi(Moving, 'S')
                  Stopped = true;
                end
              else % break out of loop there is a propblem
                Stopped = true;
              end
            end
          end
        end
      end
    PermissibleType: Double bounded [Max="180.0" Min="-180.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: This functions sets or gets the azimuth position. When setting the position the rotator will move to the set position.

  Property iGenAzimuthPosChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenAzimuthPos')
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      ItWorked = true;
      % get the current elevation angle.
      fprintf(IFace, '$00B03059');
      BufferReady = WaitforBuffer(IFace, 5);
      if BufferReady
        out = fscanf(IFace, '%c');
        CurrElevValHex = out(13:15);
      else
        ItWorked = false;
      end
      % convert the input degree value to hex value needed by set command
      if ItWorked
        [AzOffset, AzScalar] = invoke(obj, 'GetOffSetAndScalar', 0);
        RawAZVal = round((propertyValue*AzScalar) + AzOffset);
        AzValHex = dec2hex(RawAZVal);
        % set the position
        CC = ComputeCheckSum(['$00B0210',AzValHex,'0',CurrElevValHex]);
        fprintf(IFace, ['$00B0210',AzValHex,'0',CurrElevValHex,CC]);
        BufferReady = WaitforBuffer(IFace, 5);
        if BufferReady
          out = fscanf(IFace, '%c');
          if strcmp(out(end),'n')
            % Comm Error Nack
          else % wait until it finishes moving
            Stopped = false;
            while ~Stopped
              fprintf(IFace, '$00B03059');
              BufferReady = WaitforBuffer(IFace, 5);
              if BufferReady
                out = fscanf(IFace, '%c');
                Moving = out(8);
                if strcmpi(Moving, 'S')
                  Stopped = true;
                end
              else % break out of loop there is a propblem
                Stopped = true;
              end
            end
          end
        end
        % Check to make sure the setting was made properly
        SetAz = get(obj, 'iGenAzimuthPos');
        if ~WithinTol(SetAz, propertyValue, .4, true)
          error('Rotator:Property:AzimuthPos:SettingIncorrect',...
              ['The rotator position has not been set as requested. Currently at: ',...
              num2str(SetAz),' Deg azimuth.']);
        end
      end
    PermissibleType: Double bounded [Max="180.0" Min="-180.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: This functions sets or gets the azimuth position. When setting the position the rotator will move to the set position.
      After the position is set this function checks to make sure it was set properly. If is has not been set properly an error is raised.

  Property iGenElevationPos
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      ItWorked = true;
      fprintf(IFace, '$00B03059');
      BufferReady = WaitforBuffer(IFace, 5);
      if BufferReady
        out = fscanf(IFace, '%c');
        RawElVal = hex2dec(out(13:15));
      else
        ItWorked = false;
      end
      if ItWorked
        [ElOffset, ElScalar] = invoke(obj, 'GetOffSetAndScalar', 1);
        if ~isempty(ElOffset) && ~isempty(ElScalar)
          propertyValue = (RawElVal - ElOffset)/ElScalar
        else
          propertyValue = [];
        end
      else
        propertyValue = [];
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      ItWorked = true;
      % get the current elevation angle.
      fprintf(IFace, '$00B03059');
      BufferReady = WaitforBuffer(IFace, 5);
      if BufferReady
        out = fscanf(IFace, '%c');
        CurrAzimValHex = out(9:11);
      else
        ItWorked = false;
      end
      % convert the input degree value to hex value needed by set command
      if ItWorked
        [ElevOffset, ElevScalar] = invoke(obj, 'GetOffSetAndScalar', 1);
        RawElVal = round((propertyValue*ElevScalar) + ElevOffset);
        ElValHex = dec2hex(RawElVal);
        % set the position
        CC = ComputeCheckSum(['$00B0210',CurrAzimValHex,'0',ElValHex]);
        fprintf(IFace, ['$00B0210',CurrAzimValHex,'0',ElValHex,CC]);
        BufferReady = WaitforBuffer(IFace, 5);
        if BufferReady
          out = fscanf(IFace, '%c');
          if strcmp(out(end),'n')
            % Comm Error Nack
          else % wait until it finishes moving
            Stopped = false;
            while ~Stopped
              fprintf(IFace, '$00B03059');
              BufferReady = WaitforBuffer(IFace, 5);
              if BufferReady
                out = fscanf(IFace, '%c');
                Moving = out(12);
                if strcmpi(Moving, 'S')
                  Stopped = true;
                end
              else % break out of loop there is a propblem
                Stopped = true;
              end
            end
          end
        end
      end
    PermissibleType: Double bounded [Max="90.0" Min="-90.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: This functions sets or gets the elevation position. When setting the position the rotator will move to the set position. Normal seek speed will be used.

  Property iGenElevationPosChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenElevationPos');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');
      ItWorked = true;
      % get the current elevation angle.
      fprintf(IFace, '$00B03059');
      BufferReady = WaitforBuffer(IFace, 5);
      if BufferReady
        out = fscanf(IFace, '%c');
        CurrAzimValHex = out(9:11);
      else
        ItWorked = false;
      end
      % convert the input degree value to hex value needed by set command
      if ItWorked
        [ElevOffset, ElevScalar] = invoke(obj, 'GetOffSetAndScalar', 1);
        RawElVal = round((propertyValue*ElevScalar) + ElevOffset);
        ElValHex = dec2hex(RawElVal);
        % set the position
        CC = ComputeCheckSum(['$00B0210',CurrAzimValHex,'0',ElValHex]);
        fprintf(IFace, ['$00B0210',CurrAzimValHex,'0',ElValHex,CC]);
        BufferReady = WaitforBuffer(IFace, 5);
        if BufferReady
          out = fscanf(IFace, '%c');
          if strcmp(out(end),'n')
            % Comm Error Nack
          else % wait until it finishes moving
            Stopped = false;
            while ~Stopped
              fprintf(IFace, '$00B03059');
              BufferReady = WaitforBuffer(IFace, 5);
              if BufferReady
                out = fscanf(IFace, '%c');
                Moving = out(12);
                if strcmpi(Moving, 'S')
                  Stopped = true;
                end
              else % break out of loop there is a propblem
                Stopped = true;
              end
            end
          end
        end
        % Check the setting
        SetEl = get(obj, 'iGenElevationPos');
        if ~WithinTol(SetEl, propertyValue, .4, true)
          error('Rotator:Property:ElevationPos:SettingIncorrect',...
              ['The rotator position has not been set as requested. Currently at: ',...
              num2str(SetEl),' Deg elevation.']);
        end
      end
    PermissibleType: Double bounded [Max="90.0" Min="-90.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: This functions sets or gets the elevation position. When setting the position the rotator will move to the set position. Normal seek speed will be used. 
      After the position is set this function checks to make sure it was set properly. If is has not been set properly an error is raised.

  Property iGenInstDescID
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 'QPT90 Rotator';
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    PermissibleType: Double none
    ReadOnly: never

  Method GetOffSetAndScalar
    MCode:
      function [Offset, Scalar] = GetOffSetAndScalar(obj, AzOrEl)
      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ItWorked = true;
      IFace = get(obj, 'interface');
      if ~AzOrEl %Azimuth
        idxoffset = [-1 9];
      else
        idxoffset = [1 12];
      end
      % read in the offset value from memory. 2 Bytes that need to be converted
      % to single 16 bit value.
      for ii = 1:2
        CC = ComputeCheckSum(['$00B002000',num2str(ii+idxoffset(1))]);
        fprintf(IFace, ['$00B002000',num2str(ii+idxoffset(1)),CC]);
        BufferReady = WaitforBuffer(IFace, 5);
        if BufferReady
          out = fscanf(IFace, '%c');
          temp{ii} = out(8:9);
        else
          ItWorked = false;
        end
      end
      if ItWorked
        Offset = hex2dec([temp{2} temp{1}]);
      else
        Offset = [];
      end
      % read in the scalar value from memory. 2 Bytes that need to be converted
      % to single 16 bit value.
      for ii = 1:2
        CC = ComputeCheckSum(['$00B002000',dec2hex(ii+idxoffset(2))]);
        fprintf(IFace, ['$00B002000',dec2hex(ii+idxoffset(2)),CC]);
        BufferReady = WaitforBuffer(IFace, 5);
        if BufferReady
          out = fscanf(IFace, '%c');
          temp{ii} = out(8:9);
        else
          ItWorked = false;
        end
      end
      if ItWorked
        RawScalar = hex2dec([temp{2} temp{1}]);
        Scalar = floor((RawScalar/16))+(mod(RawScalar,16)/16);
      else
        Scalar = [];
      end
    Description: This function returns the offset and scalar for either the azimuth or elevation specified by AzorEl.
      AzorEl = 0 means Azimuth
      AzorEl = 1 means elevation

  Method iGenGoToHome
    MCode:
      function iGenGoToHome(obj, RaiseError, ChkResult)
      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
      % Create RaiseError and/or ChkREsult variables if they are not input.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      % issue the command to move the rotator to home (0 deg Az, 0 Deg El)
      IFace = get(obj, 'interface');
      fprintf(IFace, '$00B0355E');
      BufferReady = WaitforBuffer(IFace, 10);
      if BufferReady
        out = fscanf(IFace, '%c');
        if strcmpi(out(end),'n')
          % Comm Error Nack
          if RaiseError
            % Comm Error Nack
            error('Rotator:Function:GoToHome:CommErr', 'Serial query returned no acknowledgement');
          end
        else % wait until it finishes moving
          Stopped = false;
          while ~Stopped
            fprintf(IFace, '$00B03059');
            BufferReady = WaitforBuffer(IFace, 5);
            if BufferReady
              out = fscanf(IFace, '%c');
              MovingAz = out(8);
              MovingEl = out(12);
              if strcmpi(MovingAz, 'S') && strcmpi(MovingEl, 'S')
                Stopped = true;
              end
            else % break out of loop there is a propblem
              Stopped = true;
              if RaiseError
                error('Rotator:Function:GoToHome:CommError',...
                  'There was an error reading the state of the rotator.');
              end
            end
          end
        end
        % Check to make sure the position has been set properly
        if ChkResult && RaiseError
          CurrentAzPos = get(obj, 'iGenAzimuthPos');
          CurrentElPos = get(obj, 'iGenElevationPos');
          if ~WithinTol(CurrentAzPos, 0, .4, true) || ~WithinTol(CurrentElPos, 0, .4, true)
            error('Rotator:Function:GoToHome:SettingIncorrect',...
              ['The rotator position has not been set as requested. Currently at: ',...
              num2str(CurrentAzPos),' Deg Az, and ',num2str(CurrentElPos),' Deg El.']);
          end
        end
      else
        if RaiseError
          error('Rotator:Function:GoToHome:TimeOutErr',...
            'There was a time out error. The rotator did not return any information.');
        end
      end
    Description: This functions sends the rotator to 0 deg elevation and 0 degree azimuth.

  Method iGenMoveToPos
    MCode:
      function iGenMoveToPos(obj, AzValDegrees, ElValDegrees, RaiseError, ChkResult)
      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% Create RaiseError and/or ChkREsult variables if they are not input.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      IFace = get(obj, 'interface');
      ItWorked = true;

      % Get the azimuth and elevation scalars and offsets to convert the input
      % degrees to the required ASCII Characters.
      [AzOffset, AzScalar] = invoke(obj, 'GetOffSetAndScalar', 0);
      if ~isempty(AzOffset) && ~isempty(AzScalar)
        RawAZVal = round((AzValDegrees*AzScalar) + AzOffset);
        AzValHex = dec2hex(RawAZVal);
        [ElevOffset, ElevScalar] = invoke(obj, 'GetOffSetAndScalar', 1);
        if ~isempty(ElevOffset) && ~isempty(ElevScalar)
          RawElVal = round((ElValDegrees*ElevScalar) + ElevOffset);
          ElValHex = dec2hex(RawElVal);
        else
          ItWorked = false;
        end
      else
        ItWorked = false;
      end

      % Move the rotator the specified location.
      if ItWorked
        CC = ComputeCheckSum(['$00B0210',AzValHex,'0',ElValHex]);
        fprintf(IFace, ['$00B0210',AzValHex,'0',ElValHex,CC]);
        BufferReady = WaitforBuffer(IFace, 5);
        if BufferReady
          out = fscanf(IFace, '%c');
          if strcmp(out(end),'n')
            if RaiseError
              % Comm Error Nack
              error('Rotator:Function:MoveToPos:CommErr', 'Serial query returned no acknowledgement');
            end
          else % wait until it finishes moving
            Stopped = false;
            while ~Stopped
              fprintf(IFace, '$00B03059');
              BufferReady = WaitforBuffer(IFace, 5);
              if BufferReady
                out = fscanf(IFace, '%c');
                MovingAz = out(8);
                MovingEl = out(12);
                if strcmpi(MovingAz, 'S') && strcmpi(MovingEl, 'S')
                  Stopped = true;
                end
              else % break out of loop there is a propblem
                Stopped = true;
                if RaiseError
                  error('Rotator:Function:MoveToPos:CommError',...
                    'There was an error reading the state of the rotator.');
                end
              end
            end
          end
        else
          if RaiseError
            error('Rotator:Function:GoToHome:TimeOutErr',...
              'There was a time out error. The rotator did not return any information');
          end
        end
        % Check to make sure the position has been set properly
        if ChkResult && RaiseError
          CurrentAzPos = get(obj, 'iGenAzimuthPos');
          CurrentElPos = get(obj, 'iGenElevationPos');
          if ~WithinTol(CurrentAzPos, AzValDegrees, .4, true) || ~WithinTol(CurrentElPos, ElValDegrees, .4, true)
            error('Rotator:Function:MoveToPos:SettingIncorrect',...
              ['The rotator position has not been set as requested. Currently at: ',...
              num2str(CurrentAzPos),' Deg Az, and ',num2str(CurrentElPos),' Deg El.']);
          end
        end
      else
        if RaiseError
          % Error reading offset and scalar values
          error('Rotator:Function:MoveToPos:CommErr', 'Unable to query scalar and offset values');
        end
      end
    Description: This function moves the rotator to a specified azimuth and elevation.
