MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Program Files\MATLAB\R2009b\toolbox\instrument\instrument\drivers\RSMS4G_5To18GHzPresel.mdd
DriverType: MATLAB interface object
InstrumentType: Switch
InstrumentManufacturer: Sixnet
InstrumentModel: EtherTrak
InstrumentVersion: 1.0

CreateInitCode
  Code:
    function init(obj)
    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interface=get(obj,'interface');
    set(interface, 'OutputBufferSize', 256);
    set(interface, 'InputBufferSize', 256);
    set(interface, 'ByteOrder', 'bigEndian');
    set(interface, 'Terminator', {'CR/LF','CR/LF'});
    fclose(interface);

ConnectInitCode
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
CleanupCode
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
Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property iGenAtten
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interfaceObj = get(obj, 'interface');

      % read appropriate bits from Modbus Device
      [AttenBits, Success, ~] = ModbusDigitalRead(interfaceObj, 1, 6, 3);

      if Success
        % Convert returned bits to an attenuation value
        propertyValue = bitflip(uint8(bin2dec(num2str(AttenBits))),3)*10;
      else % there was a problem return empty vector
        propertyValue = [];
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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interfaceObj = get(obj, 'interface');

      % Convert the input attenuation value to a bit vector for the modbus
      % command
      temp = dec2bin(bitflip(uint8(propertyValue/10),3),3);
      for ii = 1:length(temp)
        AttenBits(ii) = str2double(temp(ii));
      end

      % write the Attenuation bits to the modbus device
      ModbusDigitalWrite(interfaceObj, 1, 6, AttenBits);
    PermissibleType: Double enum [0.0, 10.0, 20.0, 30.0, 40.0, 50.0, 60.0, 70.0]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets the attenuation to the value (in dB) specified by user or queries the current attenuation. if an error occurs during a query then the empty set is returned.

  Property iGenAttenChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interfaceObj = get(obj, 'interface');

      % read appropriate bits from Modbus Device
      [AttenBits, Success, ErrMsg] = ModbusDigitalRead(interfaceObj, 1, 6, 3);

      if Success
        % Convert returned bits to an attenuation value
        propertyValue = bitflip(uint8(bin2dec(num2str(AttenBits))),3)*10;
      else % there was a problem return empty vector
        propertyValue = [];
        error('Presel:Property:Atten:ModbusQueryErr', ErrMsg);
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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interfaceObj = get(obj, 'interface');

      % Convert the input attenuation value to a bit vector for the modbus
      % command
      temp = dec2bin(bitflip(uint8(propertyValue/10),3),3);
      for ii = 1:length(temp)
        AttenBits(ii) = str2double(temp(ii));
      end

      % write the Attenuation bits to the modbus device
      [Success, ErrMsg] = ModbusDigitalWrite(interfaceObj, 1, 6, AttenBits);

      if Success
        % check the setting
        SetAtten = get(obj, 'iGenAtten');
        if SetAtten ~= propertyValue
          error('Presel:Property:Atten:SettingIncorrect',...
            'The preselector attenuation is not set as requested');
        end
      else % there was a modbus problem
        error('Presel:Property:Atten:ModbusWriteErr', ErrMsg);
      end
    PermissibleType: Double enum [0.0, 10.0, 20.0, 30.0, 40.0, 50.0, 60.0, 70.0]
    DefaultValue: 0
    ReadOnly: never
    Description: This property sets or queries the attenuation
      If setting the property then it checks to see that it is set properly.
      If it is not then an error is raised
      If an error occurs during a query then an error is raised.

  Property iGenHasNullInput
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 1;
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    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 1
    ReadOnly: always
    Description: Returns whether or not it is possible to set the preselector input port to none.

  Property iGenHighestFreq
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 18e9;
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    PermissibleType: Double bounded [Max="1.8E10" Min="1.8E10"]
    DefaultValue: 18000000000
    ReadOnly: always
    Description: Query the highest possible frequency

  Property iGenInputPort
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interfaceObj = get(obj, 'interface');

      % Read the state of the sixnet outputs corresponding to input ports
      [PortBits, Success, ~] = ModbusDigitalRead(interfaceObj, 1, 1, 5);

      if Success
        if sum(PortBits) == 0
          propertyValue = 0;
        else
          for ii = 1:5
            if PortBits(ii) == 1
              propertyValue = ii;
              break
            end
          end
        end
      else %modbus error occurred
        propertyValue = [];
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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interfaceObj = get(obj, 'interface');

      %if input is string convert to number
      if ischar(propertyValue)
        propertyValue = str2double(propertyValue);
      end

      % set up the input port bits. if zero is input all input port bits will be
      % set to zero.
      PortBits = [0 0 0 0 0];
      if propertyValue ~= 0
        PortBits(propertyValue) = 1;
      end

      % set the modbus outputs
      ModbusDigitalWrite(interfaceObj, 1, 1, PortBits);
    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0, 5.0]
    PermissibleType: String enum [None=0, Ant Port 1=1, Ant Port 2=2, Ant Port 3=3, Ant Port 4=4, Noise Diode=5]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets the desired input port or queries which input port is active.
      A port number of 0 indicates that no port is selected.
      If an error occurs during a query then the empty set [] is returned.

  Property iGenInputPortChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interfaceObj = get(obj, 'interface');

      % Read the state of the sixnet outputs corresponding to input ports
      [PortBits, Success, ErrMsg] = ModbusDigitalRead(interfaceObj, 1, 1, 5);

      if Success
        if sum(PortBits) == 0
          propertyValue = 0;
        else
          for ii = 1:5
            if PortBits(ii) == 1
              propertyValue = ii;
              break
            end
          end
        end
      else % Modbus error occurred
        propertyValue = [];
        error('Presel:Property:InputPort:ModbusQueryErr', ErrMsg);
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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interfaceObj = get(obj, 'interface');

      %if input is string convert to number
      if ischar(propertyValue)
        propertyValue = str2double(propertyValue);
      end

      % set up the input port bits. if zero is input all input port bits will be
      % set to zero.
      PortBits = [0 0 0 0 0];
      if propertyValue ~= 0
        PortBits(propertyValue) = 1;
      end

      % set the modbus outputs
      [Success, ErrMsg] = ModbusDigitalWrite(interfaceObj, 1, 1, PortBits);

      if Success
        % check the setting
        SetPort = get(obj, 'iGenInputPort');
        if SetPort ~= propertyValue
          error('Presel:Property:InputPort:SettingIncorrect',...
            'The preselector input port is not set as requested');
        end
      else % there was a modbus problem
        error('Presel:Property:InputPort:ModbusWriteErr', ErrMsg);
      end
    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0, 5.0]
    PermissibleType: String enum [None=0, Ant Port 1=1, Ant Port 2=2, Ant Port 3=3, Ant Port 4=4, Noise Diode=5]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the antenna port.
      If setting the property then it is checked to make sure it was set properly.
      If it not set properly or a modbus error occurs then an error is raised.
      If an error occurs during a query then the empty set is returned and an error is raised.

  Property iGenInstDescID
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interface = get(obj, 'interface');
      out = get(interface, 'RemoteHost');
      idx = findstr(out, '.');
      propertyValue = ['RSMS4G 0.5-18GHz IP',out(idx(end):end)];
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    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the name of the instrument.
      This is the same name as found in the miscellaneous function
      getInstListAndDrivers.

      For this driver should always return 'RSMS4G 0.5-18GHz IP.<last octet>'

  Property iGenModelName
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 'RSMS4G 0.5-18GHz';
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    PermissibleType: String none
    DefaultValue: RSMS4G 0.5-18GHz
    ReadOnly: always
    Description: Returns the model name of the preseletcor. This is the same as 
      InstDescID without the IP on the end. This model name is used in the
      SetVCFPath fuction in the YIG Tracker driver so the name it returns must match 
      what this function expects.

  Property iGenNumPaths
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 10;
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    PermissibleType: Double none
    DefaultValue: 10
    ReadOnly: always
    Description: Specifies the possible number of paths including no path
      Returns the number of separate paths

  Property Path
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interfaceObj = get(obj, 'interface');

      % read input bits from modbus modules 1 and 2 to be make single vector of
      % length 9 later.
      [IPathBits1, Success1, ~] = ModbusDigitalRead(interfaceObj, 1, 9, 8);
      [IPathBits2, Success2, ~] = ModbusDigitalRead(interfaceObj, 2, 1, 1);

      % read Output path bits
      [OPathBits, Success3, ~] = ModbusDigitalRead(interfaceObj, 2, 2, 9);

      if Success1 && Success2 && Success3
        IPathBits = [IPathBits1 IPathBits2];
        if sum(OPathBits) == 0 && sum(IPathBits) == 0
          propertyValue = 0;
        elseif sum(OPathBits) == 1 && sum(IPathBits) == 1
          % initialize propertyValue variable so it can be checked later.
          propertyValue = -999;
          for ii = 1:length(IPathBits)
            if (OPathBits(ii) + IPathBits(ii)) == 2
              propertyValue = ii;
            end
          end
          if propertyValue == -999 % bits do not correspond to legitimate path
            propertyValue = [];
          end
        else % read back bad data impossible path is selected
          propertyValue = [];
        end
      else % modbus Error Ocurred
        propertyValue = [];
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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interfaceObj = get(obj, 'interface');

      if ischar(propertyValue)
        propertyValue = str2double(propertyValue);
      end

      % initialize input and output path vector of bits
      IPathBits = zeros(1,9);
      OPathBits = zeros(1,9);

      if propertyValue ~= 0
        IPathBits(propertyValue) = 1;
        OPathBits(propertyValue) = 1;
      end

      % write to the modbus devices.
      ModbusDigitalWrite(interfaceObj, 1, 9, IPathBits(1:8));
      ModbusDigitalWrite(interfaceObj, 2, 1, IPathBits(9));
      ModbusDigitalWrite(interfaceObj, 2, 2, OPathBits);
    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0, 5.0, 6.0, 7.0, 8.0, 9.0]
    PermissibleType: String enum [None=0, Straight Through=1, Band Pass 0.5-1 GHz=2, Band Pass 1-2 GHz=3, Band Pass 2-4 GHz=4, Band Pass 4-8 GHz=5, Band Pass 8-12 GHz=6, Band Pass 12-18 GHz=7, TNBL 0.5-2 GHz=8, TNBL 2-18 GHz=9]
    DefaultValue: 0
    ReadOnly: never
    Description: This property sets or queries the path number of the 0.5 - 18 GHz preselector.
      This is primarily used internally by this driver and the instrument GUI for the 0.5-18 GHz Preselector.
      It should not be used in a measurment. Use UniversalSetPath instead.

  Property PathRaiseError
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interfaceObj = get(obj, 'interface');

      % read input bits from modbus modules 1 and 2 to be make single vector of
      % length 9 later.
      [IPathBits1, Success1, ErrMsg1] = ModbusDigitalRead(interfaceObj, 1, 9, 8);
      [IPathBits2, Success2, ErrMsg2] = ModbusDigitalRead(interfaceObj, 2, 1, 1);

      % read Output path bits
      [OPathBits, Success3, ErrMsg3] = ModbusDigitalRead(interfaceObj, 2, 2, 9);

      if Success1 && Success2 && Success3
        IPathBits = [IPathBits1 IPathBits2];
        if sum(OPathBits) == 0 && sum(IPathBits) == 0
          propertyValue = 0;
        elseif sum(OPathBits) == 1 && sum(IPathBits) == 1
          % initialize propertyValue variable so it can be checked later.
          propertyValue = -999;
          for ii = 1:length(IPathBits)
            if (OPathBits(ii) + IPathBits(ii)) == 2
              propertyValue = ii;
            end
          end
          if propertyValue == -999 % bits do not correspond to legitimate path
            propertyValue = [];
          end
        else % read back bad data impossible path is selected
          propertyValue = [];
        end
      else % modbus Error Ocurred
        propertyValue = [];
        if ~Success1
          error('Presel:Property:Path:ModbusQueryErr', ErrMsg1);
        elseif ~Success2
          error('Presel:Property:Path:ModbusQueryErr', ErrMsg2);
        else
          error('Presel:Property:Path:ModbusQueryErr', ErrMsg3);
        end
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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interfaceObj = get(obj, 'interface');

      if ischar(propertyValue)
        propertyValue = str2double(propertyValue);
      end

      % initialize input and output path vector of bits
      IPathBits = zeros(1,9);
      OPathBits = zeros(1,9);

      if propertyValue ~= 0
        IPathBits(propertyValue) = 1;
        OPathBits(propertyValue) = 1;
      end

      % write to the modbus devices.
      [Success1, ErrMsg1] = ModbusDigitalWrite(interfaceObj, 1, 9, IPathBits(1:8));
      [Success2, ErrMsg2] = ModbusDigitalWrite(interfaceObj, 2, 1, IPathBits(9));
      [Success3, ErrMsg3] = ModbusDigitalWrite(interfaceObj, 2, 2, OPathBits);

      if ~Success1
        error('Presel:Property:Path:ModbusWriteErr', ErrMsg1);
      elseif ~Success2
        error('Presel:Property:Path:ModbusWriteErr', ErrMsg2);
      elseif ~Success3
        error('Presel:Property:Path:ModbusWriteErr', ErrMsg3);
      end
    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0, 5.0, 6.0, 7.0, 8.0, 9.0]
    PermissibleType: String enum [None=0, Straight Through=1, Band Pass 0.5-1 GHz=2, Band Pass 1-2 GHz=3, Band Pass 2-4 GHz=4, Band Pass 4-8 GHz=5, Band Pass 8-12 GHz=6, Band Pass 12-18 GHz=7, TNBL 0.5-2 GHz=8, TNBL 2-18 GHz=9]
    DefaultValue: 0
    ReadOnly: never
    Description: This property sets or queries the path number of the 0.5 - 18 GHz preselector.
      This is primarily used internally by this driver and the instrument GUI for the 0.5-18 GHz Preselector.
      It should not be used in a measurment. Use UniversalSetPath instead.
      Unlike Path this property will raise modbus errors if they occur.

  Property SerialNum
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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interface = get(obj, 'interface');
      propertyValue = get(interface, 'RemoteHost')
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    PermissibleType: String none
    ReadOnly: always
    Description: Returns the serial number of the instrument.
      For the case of preselectors this is the IP

  Method iGenAllPathProperties
    MCode:
      function [FilterType, FilterName, PathName, StartFreq, StopFreq, BandWidth, Amplifier, PathGain, NoiseFigure, CompressPt, ThrdOrdInt] = iGenAllPathProperties(obj)
      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
      % No Path
      FilterType{1} = 'NONE';
      FilterName{1} = 'None';
      PathName{1} = 'None';
      StartFreq{1} = 0;
      StopFreq{1} = 0;
      BandWidth{1} = 0;
      Amplifier{1} = 0;
      PathGain{1} = 0;
      NoiseFigure{1} = 0;
      CompressPt{1} = 0;
      ThrdOrdInt{1} = 5;
      % through Path
      FilterType{2} = 'BYP';
      FilterName{2} = 'Bypass';
      PathName{2} = 'Bypass';
      StartFreq{2} = 0;
      StopFreq{2} = 18000e6;
      BandWidth{2} = 18000e6;
      Amplifier{2} = 0;
      PathGain{2} = 0;
      NoiseFigure{2} = 0;
      CompressPt{2} = 30;
      ThrdOrdInt{2} = 5;
      % .5-1 GHz BPF
      FilterType{3} = 'BPF';
      FilterName{3} = 'Band-Pass';
      PathName{3} = 'BP 500-1000 MHz';
      StartFreq{3} = 500e6;
      StopFreq{3} = 1000e6;
      BandWidth{3} = 500e6;
      Amplifier{3} = 1;
      PathGain{3} = 16;
      NoiseFigure{3} = 0.7;
      CompressPt{3} = 10;
      ThrdOrdInt{3} = 5;
      % 1-2 GHz BPF
      FilterType{4} = 'BPF';
      FilterName{4} = 'Band-Pass';
      PathName{4} = 'BP 1-2 GHz';
      StartFreq{4} = 960e6;
      StopFreq{4} = 2000e6;
      BandWidth{4} = 1040e6;
      Amplifier{4} = 1;
      PathGain{4} = 16;
      NoiseFigure{4} = 0.8;
      CompressPt{4} = 10;
      ThrdOrdInt{4} = 5;
      % 2-4 GHz BPF
      FilterType{5} = 'BPF';
      FilterName{5} = 'Band-Pass';
      PathName{5} = 'BP 2-4 GHz';
      StartFreq{5} = 2000e6;
      StopFreq{5} = 4000e6;
      BandWidth{5} = 2000e6;
      Amplifier{5} = 1;
      PathGain{5} = 24;
      NoiseFigure{5} = 0.7;
      CompressPt{5} = 8;
      ThrdOrdInt{5} = 5;
      % 4-8 GHz BPF
      FilterType{6} = 'BPF';
      FilterName{6} = 'Band-Pass';
      PathName{6} = 'BP 4-8 GHz';
      StartFreq{6} = 4000e6;
      StopFreq{6} = 8000e6;
      BandWidth{6} = 4000e6;
      Amplifier{6} = 1;
      PathGain{6} = 20;
      NoiseFigure{6} = 0.9;
      CompressPt{6} = 5;
      ThrdOrdInt{6} = 5;
      % 8-12 GHz BPF
      FilterType{7} = 'BPF';
      FilterName{7} = 'Band-Pass';
      PathName{7} = 'BP 8-12 GHz';
      StartFreq{7} = 8e9;
      StopFreq{7} = 12000e6;
      BandWidth{7} = 4000e6;
      Amplifier{7} = 1;
      PathGain{7} = 25;
      NoiseFigure{7} = 1;
      CompressPt{7} = 10;
      ThrdOrdInt{7} = 5;
      % 12-18 GHz BPF
      FilterType{8} = 'BPF';
      FilterName{8} = 'Band-Pass';
      PathName{8} = 'BP 12-18 GHz';
      StartFreq{8} = 12000e6;
      StopFreq{8} = 18000e6;
      BandWidth{8} = 6000e6;
      Amplifier{8} = 1;
      PathGain{8} = 28;
      NoiseFigure{8} = 1.8;
      CompressPt{8} = 10;
      ThrdOrdInt{8} = 5;
      % .5 - 2 YIG
      FilterType{9} = 'VCF';
      FilterName{9} = 'Voltage Controlled YIG';
      PathName{9} = 'VCF 0.5-2 GHz';
      StartFreq{9} = 500e6;
      StopFreq{9} = 2000e6;
      BandWidth{9} = 1500e6;
      Amplifier{9} = 1;
      PathGain{9} = 16;
      NoiseFigure{9} = 1.5;
      CompressPt{9} = 10;
      ThrdOrdInt{9} = 5;
      %2-18 YIG
      FilterType{10} = 'VCF';
      FilterName{10} = 'Voltage Controlled YIG';
      PathName{10} = 'VCF 2-18 GHz';
      StartFreq{10} = 2000e6;
      StopFreq{10} = 18000e6;
      BandWidth{10} = 16000e6;
      Amplifier{10} = 1;
      PathGain{10} = 28;
      NoiseFigure{10} = 3;
      CompressPt{10} = 13;
      ThrdOrdInt{10} = 5;

  Method iGenGotNoiseDiode
    MCode:
      function [NDPresent, PortNum, ENRValues] = iGenGotNoiseDiode(obj)
      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NDPresent = 1;
      PortNum = 5;

      % get the IP address of the io module in the preselector
      IPAdd = get(obj, 'SerialNum');

      % create ENR Values based on which 0.5 - 18 GHz preselector is currently in
      % use.
      if strcmpi(IPAdd, '192.168.130.91')
        ENRValues(:,1) = [10 100 1000:1000:26000 26500];
        ENRValues(:,2) = [21.07 20.6 20.28 20.2 20.32 20.36 20.16 20.3 20.8 21.49,...
          21.65 21.93 22.17 21.99 22.19 22.55 22.09 21.52 22.15 22.45 22.01 22.01 22.75,...
          22.54 21.67 20.78 20.6 19.45 19.9];
      else % next Gen Preselector
        ENRValues(:,1) = [10 100 1000:1000:18000];
        ENRValues(:,2) = [22.15 21.05 20.53 20.12 19.98 19.84 19.95 19.87 20.28, ...
          20.69 20.74 21.07 21.47 21.54 22.07 21.89 22.24 22.76 22.88 22.45];
      end
    Description: queries the preselector to find out if it has a noise diode built in. If it does this function also returns the port number of the noise diode and a matrix containing the ENR values at stated frequencies. If no nosie diode is present this function returns the empty set for the port number and ENR.
      The ENR value matrix is of the form:
      ENRValues(:,1) = The frequencies
      ENRValues(:,2) = the ENR values at the frequencies in ENRValues(:,1).

  Method iGenInit
    MCode:
      function iGenInit(obj, RaiseError)
      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% set RaiseError to false if not input
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interfaceObj = get(obj, 'interface');

      % set all outputs to zero and raise error is on occurs and RaiseError =
      % true.
      [Success1, ErrMsg1] = ModbusDigitalWrite(interfaceObj, 1, 1, zeros(1,16));
      if Success1
        [Success2, ErrMsg2] = ModbusDigitalWrite(interfaceObj, 2, 1, zeros(1,16));
        if ~Success2 && RaiseError
          error('Presel:Function:Init:ModbusWriteErr', ErrMsg2);
        end
      else
        if RaiseError
          error('Presel:Function:Init:ModbusWriteErr', ErrMsg1);
        end
      end
    Description: This subroutine resets all digital outputs on the IOTech modules, puting the Preselector in an initial
      'inactive state with NO Input Ports, 0dB Attenuation, No Paths, and Noise Diode Power OFF.

      If an error occurs the empty set is returned, and if RaiseError = true then an error is raised.

  Method iGenMaxAttenuation
    MCode:
      function [MaxAtten, AttenInc] = iGenMaxAttenuation(obj)
      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MaxAtten = 70;
      AttenInc = 10;
    Description: This command returns the maximum available attenuation and how the attenuation can be incremented

  Method iGenNoiseDiodeState
    MCode:
      function NDState = iGenNoiseDiodeState(obj, RaiseError)
      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% set RaiseError to false if not input
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interfaceObj = get(obj, 'interface');

      % read the state of the io module output controlling the noise diode power.
      [NDState, Success, ErrMsg] = ModbusDigitalRead(interfaceObj, 2, 11, 1);

      % raise error if one occurrs and requested
      if ~Success && RaiseError
        error('Presel:Function:NoiseDiodeState:ModbusReadErr', ErrMsg);
      end
    Description: Returns the current state of the power to the noise diode, where 0 = noise diode off and
      1 = noise diode on.

      If an error occurs the empty set is returned and if RaiseError = true then an error is raised.

  Method iGenNumInputPorts
    MCode:
      function [NumPorts, PortNames] = iGenNumInputPorts(obj)
      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NumPorts = 6;
      PortNames = {'None', 'Ant Port 1', 'Ant Port 2', 'Ant Port 3', 'Ant Port 4',...
        'Noise Diode'};
    Description: This function returns the number of input ports and their names. The names must be in the same order as they are set in InputPort and be set as valid inputs to the InputPort property. There must be a place holder for no input port. In no zero port is available set name to N/A

  Method iGenProbeTemp
    MCode:
      function degC = iGenProbeTemp(obj, WhichProbe, RaiseError)
      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% set RaiseError to false if not input
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      interfaceObj = get(obj, 'interface');

      % read the analog input
      [TempOut, Success, ErrMsg] = ModbusAnalogRead(interfaceObj, 3, WhichProbe, 1);

      if Success
        degC = TempOut*0.1;
      else
        if RaiseError
          error('Presel:Function:ProbeTemp:ModbusReadErr', ErrMsg);
        end
      end
    Description: ' This function returns the temperature value of the selected probe, WhichProbe.
      ' For the Presel4Gp5_18 Preselector, there are 3 temperature probes (numbered 0 to 2) as follows:
      ' Probe 1:  Enclosure
      ' Probe 2:  YIG 0.5-2.0GHz
      ' Probe 3:  Low Noise Amplifier

      If an error occurs the empty set is returned, and if RaiseError = true then an error is raised.

  Method iGenSetNoiseDiode
    MCode:
      function iGenSetNoiseDiode(obj, On, RaiseError, ChkResult)
      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
      % create RaiseError and ChkResult if they are not input. The default for
      % these inputs is false.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      % get the interface object
      interfaceObj = get(obj, 'interface');

      % set the i/o module output
      if On
        [Success, ErrMsg] = ModbusDigitalWrite(interfaceObj, 2, 11, 1);
      else
        [Success, ErrMsg] = ModbusDigitalWrite(interfaceObj, 2, 11, 0);
      end

      if Success
        if ChkResult % check to make sure noise diode was set as requested
          NDOn = invoke(obj, 'iGenNoiseDiodeState');
          if NDOn ~= On
            if RaiseError
              error('Presel:Function:SetNoiseDiode:SettingIncorrect',...
                'The noise diode is not set as requested.');
            end
          end
        end
      else % there was a Modbus Error
        if RaiseError
          error('Presel:Function:SetNoiseDiode:ModbusWriteErr', ErrMsg);
        end
      end
    Description: Designates, by argument On, whether to turn the power to the noise diode on or off,
      where 0 = off and 1 = on.  

      If RaiseError = true then errors will be raised should they occur.
      If ChkResult = true then the setting is checked and an error is raised if RaiseError = true.
      If ChkResult = true then RaiseError should also be true otherwise there is no way to report
      the error.

  Method iGenTempProbes
    MCode:
      function [NumProbes, ProbeIDs] = iGenTempProbes(obj)
      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NumProbes = 3;
      ProbeIDs = {'Enclosure', '0.5-2 GHz YIG', 'LNA'};
    Description: Specifies the possible temperature probes, returns the number of available probes and their IDS

  Method iGenUniversalGetPath
    MCode:
      function [StartFreq, StopFreq, FilterType, FilterName] = iGenUniversalGetPath(obj, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      % Read the Path number from the preselector
      if RaiseError
        try
          PathNum = get(obj, 'PathRaiseError');
        catch oops
          error('Preselector:Function:UniversalGetPath:ModbusErr',oops.message);
        end
      else
        PathNum = get(obj, 'Path');
      end

      % get the property Values for the returned Path.
      [FilterType, ~, FilterName, StartFreq, StopFreq, ~, ~, ~, ~, ~, ~] = invoke(obj, 'PathPropertiesByPath', PathNum);
    Description: This function returns the set path in the form of minimum and maximum freqeuncies and the filter type for the returned path number.

      If RaiseError = true errors will be raised for modbus errors if it is false and errors occur empty sets will be returned for all the output arguments.

  Method iGenUniversalPathProperties
    MCode:
      function [FiltType, FilterName, PathName, f1, f2, BW, Amp, G, NF, CompPt, ThrdOrd] = iGenUniversalPathProperties(obj, CenterFreq, FilterType, RaiseError)
      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ItWorked = true;
      switch FilterType
        case 'NONE'
          PathNum = 0;
        case 'BYP'
          PathNum = 1;
        case 'BPF'
          if CenterFreq >= 500e6 && CenterFreq <= 1e9
            PathNum = 2;
          elseif CenterFreq >= 1e9 && CenterFreq <= 2e9
            PathNum = 3;
          elseif CenterFreq >= 2e9 && CenterFreq <= 4e9
            PathNum = 4;
          elseif CenterFreq >= 4e9 && CenterFreq <= 8e9
            PathNum = 5;
          elseif CenterFreq >= 8e9 && CenterFreq <= 12e9
            PathNum = 6;
          elseif CenterFreq >= 12e9 && CenterFreq <= 18e9
            PathNum = 7;
          else
            % Freq not in range
            ItWorked = false;
          end
        case 'VCF'
          if CenterFreq >= 0.5e9 && CenterFreq <= 2e9
            PathNum = 8;
          elseif CenterFreq >= 2e9 && CenterFreq <= 18e9
            PathNum = 9;
          else
            ItWorked = false;
          end
        otherwise
          % invalid filter type
          ItWorked = false;
      end
      if ItWorked
        [FiltType, FilterName, PathName, f1, f2, BW, Amp, G, NF, CompPt, ThrdOrd] = invoke(obj, 'PathPropertiesByPath', PathNum);
      else
        FiltType = {};
        filterName = {};
        PathName = {};
        f1 = [];
        f2 = [];
        BW = [];
        Amp = [];
        G = [];
        NF = [];
        CompPt = [];
        ThrdOrd = [];
        if RaiseError
          error('Presel:Function:UniversalPathProperties:InvalidInput',...
            'The input arguments do not correspond to a valid path. This function has not returned any values.');
        end
      end
    Description: queries properties of the chosen path given the center freq and filter type.

      If an invalid path is input enpty sets for all property values are returned if RaiseError = false.
      If RaiseError = true than an error is raised when an invalid path is chosen.

  Method iGenUniversalSetPath
    MCode:
      function iGenUniversalSetPath(obj, FStart, FStop, FilterType, RaiseError, ChkResult)

      % create RaiseError and/or ChkResult variables if they are not input. False
      % is the default for these variables.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      % get interface
      interface = get(obj, 'interface');
      ItWorked = true;
      switch FilterType
        case 'NONE'
          PathNum = 0;
        case 'BYP'
          PathNum = 1;
        case 'BPF'
          if FStart >= 500e6 && FStop <= 1e9
            PathNum = 2;
          elseif FStart >= 960e6 && FStop <= 2e9
            PathNum = 3;
          elseif FStart >= 2e9 && FStop <= 4e9
            PathNum = 4;
          elseif FStart >= 4e9 && FStop <= 8e9
            PathNum = 5;
          elseif FStart >= 8e9 && FStop <= 12e9
            PathNum = 6;
          elseif FStart >= 12e9 && FStop <= 18e9
            PathNum = 7;
          else
            % Warning Frequency is out of range
            ItWorked = false;
          end
        case 'VCF'
          if FStart >= 500e6 && FStop <= 2e9
            PathNum = 8;
          elseif FStart >= 2e9 && FStop <= 18e9
            PathNum = 9;
          else
            % warning freq out of range
            ItWorked = false;
          end
        otherwise
          % warning invalid filter type selected
          ItWorked = false;
      end

      % deal with any error reporting that is asked for.
      if ItWorked
        if RaiseError %set path using property that raises errors.
          try
            set(obj, 'PathRaiseError', PathNum);
          catch oops
            error('Presel:Property:Path:ModbusErr', oops.message);
          end
        else
          set(obj, 'Path', PathNum);
        end
        % Check the set path to make sure it is what was asked for if RaiseError = true.
        if ChkResult && RaiseError
          try
            SetPath = get(obj, 'PathRaiseError');
          catch oops2
            error('Presel:Property:Path:ModbusErr', oops2.message);
          end
          if SetPath ~= PathNum
            error('Presel:Function:UniversalSetPath:SettingIncorrect',...
              ['The path is not set as requested. Set to path ',num2str(SetPath)]);
          end
        end
      else
        if RaiseError
          error('Presel:Function:UniversalSetPath:InvalidInput',...
            'The path has not been changed. The input parameters do not clearly define a valid path');
        end
      end
    Description: Sets the path using start frequency, stop frequency, and filter type.
      This function is present so that measurements can use it to set the path regardless of whether the preselector is set by freq or path.
      The filter Types are as follows:
      "NONE" = No Filter, Open Path
      "BYP" = Straight Through coupled
      "AUX" = Auxillary Path
      "BPF" = Band pass Filter
      "BRF" = Band Reject Filter
      "LPF" = Low Pass Filter
      "HPF" = High Pass Filter
      "TNBL" = Tunable Filter frequency set by preselector
      "GAIN" = Gain Path
      "VCF" = votage controlled filter path control voltage external to preselector.

      If RaiseError = true, errors will be raised for modbus errors or if the setting is not set as requested (as long as ChkResult is also true).
      If ChkResult = true and RaiseError = false the setting will not be checked so if ChkResult = true RaiseError should also be true.

  Method PathPropertiesByPath
    MCode:
      function [FilterType, FilterName, PathName, StartFreq, StopFreq, BandWidth, Amplifier, PathGain, NoiseFigure, CompressPt, ThrdOrdInt] = PathPropertiesByPath(obj, PathNum)
      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switch PathNum
        case 0
          FilterType = 'NONE';
          FilterName = 'None';
          PathName = 'None';
          StartFreq = 0;
          StopFreq = 0;
          BandWidth = 0;
          Amplifier = 0;
          PathGain = 0;
          NoiseFigure = 0;
          CompressPt = 0;
          ThrdOrdInt = 5;
        case 1
          FilterType = 'BYP';
          FilterName = 'Bypass';
          PathName = 'Bypass';
          StartFreq = 0;
          StopFreq = 18000e6;
          BandWidth = 18000e6;
          Amplifier = 0;
          PathGain = 0;
          NoiseFigure = 0;
          CompressPt = 30;
          ThrdOrdInt = 5;
        case 2
          FilterType = 'BPF';
          FilterName = 'Band-Pass';
          PathName = 'BP 500-1000 MHz';
          StartFreq = 500e6;
          StopFreq = 1000e6;
          BandWidth = 500e6;
          Amplifier = 1;
          PathGain = 16;
          NoiseFigure = 0.7;
          CompressPt = 10;
          ThrdOrdInt = 5;
        case 3
          FilterType = 'BPF';
          FilterName = 'Band-Pass';
          PathName = 'BP 1-2 GHz';
          StartFreq = 960e6;
          StopFreq = 2000e6;
          BandWidth = 1040e6;
          Amplifier = 1;
          PathGain = 16;
          NoiseFigure = 0.8;
          CompressPt = 10;
          ThrdOrdInt = 5;
        case 4
          FilterType = 'BPF';
          FilterName = 'Band-Pass';
          PathName = 'BP 2-4 GHz';
          StartFreq = 2000e6;
          StopFreq = 4000e6;
          BandWidth = 2000e6;
          Amplifier = 1;
          PathGain = 24;
          NoiseFigure = 0.7;
          CompressPt = 8;
          ThrdOrdInt = 5;
        case 5
          FilterType = 'BPF';
          FilterName = 'Band-Pass';
          PathName = 'BP 4-8 GHz';
          StartFreq = 4000e6;
          StopFreq = 8000e6;
          BandWidth = 4000e6;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 0.9;
          CompressPt = 5;
          ThrdOrdInt = 5;
        case 6
          FilterType = 'BPF';
          FilterName = 'Band-Pass';
          PathName = 'BP 8-12 GHz';
          StartFreq = 8e9;
          StopFreq = 12000e6;
          BandWidth = 4000e6;
          Amplifier = 1;
          PathGain = 25;
          NoiseFigure = 1;
          CompressPt = 10;
          ThrdOrdInt = 5;
        case 7
          FilterType = 'BPF';
          FilterName = 'Band-Pass';
          PathName = 'BP 12-18 GHz';
          StartFreq = 12000e6;
          StopFreq = 18000e6;
          BandWidth = 6000e6;
          Amplifier = 1;
          PathGain = 28;
          NoiseFigure = 1.8;
          CompressPt = 10;
          ThrdOrdInt = 5;
        case 8
          FilterType = 'VCF';
          FilterName = 'Voltage Controlled YIG';
          PathName = 'VCF 0.5-2 GHz';
          StartFreq = 500e6;
          StopFreq = 2000e6;
          BandWidth = 1500e6;
          Amplifier = 1;
          PathGain = 16;
          NoiseFigure = 1.5;
          CompressPt = 10;
          ThrdOrdInt = 5;
        case 9
          FilterType = 'VCF';
          FilterName = 'Voltage Controlled YIG';
          PathName = 'VCF 2-18 GHz';
          StartFreq = 2000e6;
          StopFreq = 18000e6;
          BandWidth = 16000e6;
          Amplifier = 1;
          PathGain = 28;
          NoiseFigure = 3;
          CompressPt = 13;
          ThrdOrdInt = 5;
        otherwise
          FilterType = {};
          FilterName = {};
          PathName = {};
          StartFreq = [];
          StopFreq = [];
          BandWidth = [];
          Amplifier = [];
          PathGain = [];
          NoiseFigure = [];
          CompressPt = [];
          ThrdOrdInt = [];
          %Throw Warning invalid path number sent
      end
    Description: ' Returns path properties for the specified path indicated by the argument "PathNum".
      '    The arguments returned are as follows:
      '   1)  PathFilterType As String: this is the filter characteristic type.  The following Filter types are supported:
      '         "None" = No Filter, Open Path
      '         "BYP" = Straight Through coupled
      '         "AUX" = Auxillary Path
      '         "BPF" = Band pass Filter
      '         "BRF" = Band Reject Filter
      '         "LPF" = Low Pass Filter
      '         "HPF" = High Pass Filter
      '         "TNBL" = Tunable Filter
      '          "Gain" = Gain Path
      '   2)  StartFreq As Double:  this is the 3dB cutoff frequency (in Hz) for the lower end of a fixed filter's frequency band.
      '                             For tunable filters, this is the Minimum tunable frequency.
      '   3)  StopFreq As Double:  this is the 3dB cutoff frequency (in Hz) for the upper end of a fixed filter's frequency band.
      '                             For tunable filters, this is the Maximum tunable frequency.
      '   4)  Bandwidth As Double:  this is the 3 dB bandwidth (in Hz) of the narrowest filter in the path, be it a fixed
      '         filter or a tunable filter. For a fixed filter the bandwidth is equal to (StopFreq - StartFreq)
      '   5)  Amplifier As Integer:  indicates if an amplifier is included in the path. 0 = No Amplifier, 1 = Amplifier present
      '   6)  PathGain:  this is the average gain (in dB) for the path EXCLUDING the attenuator.
      '   7)  NoiseFigure:  this is the avereage Noise Figure in dBm for the path
      '   8)  ByRef CompressPt As Single: this is the average 1-dB compression point (in dBm) for the path.
      '   9)  ByRef ThrdOrdInt As Single: this is the average third-order intercept point (in dBm)
      '         for the path.
      ' The argument "PathNum" designates the path for which the properties are requested, where the value
      '   can be any value from 0 to (Number of paths).

  Method SetByFreq
    MCode:
      function out = SetByFreq(obj)
      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out = false;
    Description: 'Indicates whether the paths within the preselector are automatically set simply by sending a center
      '  frequency (example HP85685 preselector).  The 3G and 4G preselectors paths are set by designating
      '  a path, as appoosed to a center frequency
      'false = path set by disignating the path
      'true = path is set automatically by sending a center frequency
