MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\RSMS5G\Drivers\VSA.mdd
DriverType: MATLAB interface object
InstrumentType: Vector Analyzer
InstrumentManufacturer: Agilent
InstrumentModel: Model
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
  Code:
    function init(obj)
    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interface=get(obj,'interface');
    set(interface,'InputBufferSize',1e6);
    set(interface,'Timeout',10);
    set(interface,'ByteOrder','bigEndian');
    fclose(interface);

ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property iGenAvgCount
    Type: InstrumentCommand
    ConfigureCommand: AVER:COUN
    QueryCommand: AVER:COUN?
    PermissibleType: Double bounded [Max="99999.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Get or set the number of measurements to use in an average. Valid inputs are integers from 1 to 99,999.

  Property iGenAvgFast
    Type: InstrumentCommand
    ConfigureCommand: AVER:FAST
    QueryCommand: AVER:FAST?
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: On
    ReadOnly: never
    Description: Get or set whether fast averaging is enabled. A string value of  'On' enables fast averaging and 'Off'' disables it.

  Property iGenAvgFastUpdateRate
    Type: InstrumentCommand
    ConfigureCommand: AVER:URAT
    QueryCommand: AVER:URAT?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the number of averages to complete before updating the display. The speed of fast averaging is improved by updating the display less frequently.

  Property iGenAvgRepeat
    Type: InstrumentCommand
    ConfigureCommand: AVER:REP
    QueryCommand: AVER:REP?
    PermissibleType: String enum [On=1, Off=0]
    DefaultValue: On
    ReadOnly: never
    Description: Get or set whether the averaging repeats after completion. Use 'On' for turning on repeated averaging and 'Off' for turning off repeated averaging.

  Property iGenAvgStyle
    Type: InstrumentCommand
    ConfigureCommand: AVER:STYL
    QueryCommand: AVER:STYL?
    PermissibleType: String enum [Off="Off", Rms="Rms", RmsExp="RmsExponential", Time="Time", TimeExp="TimeExponential", ContPeakHold="ContinuousPeakHold", PeakHold="PeakHold"]
    DefaultValue: Off
    ReadOnly: never
    Description: Get or set the type of averaging used. Valid values are "Off", "Rms", "RmsExp", "Time", "TimeExp", "ContPeakHold", "PeakHold".

  Property iGenCal
    Type: InstrumentCommand
    ConfigureCommand: CAL:ALL
    QueryCommand: CAL:ALL?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property iGenCalNeeded
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      MeasStatusBytes = -345;

      tStart = tic;
      ElapsedTime = toc(tStart);
      while MeasStatusBytes < 0 && ElapsedTime < 5
        MeasStatusBytes = str2double(query(IFace, 'MEAS:STAT?'));
        ElapsedTime = toc(tStart);
      end
      if ~isnan(MeasStatusBytes)
        if MeasStatusBytes >= 0
          CalNeededBit = bitand(MeasStatusBytes, 4096);
          propertyValue = CalNeededBit/4096;
        else
          propertyValue = 0;
        end
      else
        propertyValue = 0;
      end
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    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: always
    Description: Returns whether or not a calibration is required.

  Property iGenCenterFreq
    Type: InstrumentCommand
    ConfigureCommand: :FREQ:CENT
    QueryCommand: :FREQ:CENT?
    PermissibleType: Double bounded [Max="6.0E9" Min="3.0E7"]
    DefaultValue: 100e06
    ReadOnly: never
    Description: Set and get the VSA center frequency.

  Property iGenContSweep
    Type: InstrumentCommand
    ConfigureCommand: INIT:CONT
    QueryCommand: INIT:CONT?
    PermissibleType: String enum [ON=1, OFF=0]
    DefaultValue: ON
    ReadOnly: never
    Description: Gets or sets whether the measurement is continuous or single sweep.

  Property iGenDispEnable
    Type: InstrumentCommand
    ConfigureCommand: DISP:ENAB
    QueryCommand: DISP:ENAB?
    PermissibleType: String none
    ReadOnly: never
    Description: Get or set if the main VSA application window is visible

  Property iGenDispTitle
    Type: InstrumentCommand
    ConfigureCommand: DISP:ANN:TITL
    QueryCommand: DISP:ANN:TITL?
    PermissibleType: String none
    ReadOnly: never
    Description: Get or set the text in the title bar in the VSA main display window. Note that the text that is sent must start with and end with double quotes! Similarily, the text returned starts with and ends with double quotes! For example, when using the General Instrument UI to set the display title to MyTitle, in the Set Property Value to: text box put in '"MyTitle"'. Note that the text is sent with single quotes on the outside of double quotes that surround the actual text to be sent.

  Property iGenFileSaved
    Type: InstrumentCommand
    QueryCommand: :INP:REC:FILE:SAV?
    PermissibleType: String none
    ReadOnly: always

  Property iGenFormatTraceData
    Type: InstrumentCommand
    ConfigureCommand: FORM:TRAC:DATA
    QueryCommand: FORM:TRAC:DATA?
    PermissibleType: String enum [ASCII=ASCii, INT32=INT32, REAL64=REAL64]
    DefaultValue: ASCII
    ReadOnly: never
    Description: Get or set the format for data returned from TRACe:DATA? queries. Valid values are ASCii, INT32, or REAL64.

  Property iGenFreqSpan
    Type: InstrumentCommand
    ConfigureCommand: FREQ:SPAN
    QueryCommand: FREQ:SPAN?
    PermissibleType: Double bounded [Max="3.7109375E7" Min="0.276486389"]
    DefaultValue: 0.276486389
    ReadOnly: never
    Description: Gets or sets the frequency span in Hertz.

  Property iGenFreqStart
    Type: InstrumentCommand
    ConfigureCommand: FREQ:STAR
    QueryCommand: FREQ:STAR?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the measurement start frequency in Hertz.

  Property iGenInputCoupling
    Type: InstrumentCommand
    ConfigureCommand: INP:ANAL:COUP
    QueryCommand: INP:ANAL:COUP?
    PermissibleType: String enum DependentProperty=iGenSelZoomBaseband DependentPropertyValue=bb [AC=AC, DC=DC]
    PermissibleType: String enum DependentProperty=iGenSelZoomBaseband DependentPropertyValue=rf [AC=AC]
    DefaultValue: AC
    ReadOnly: never
    Description: Gets or sets the input coupling. For Zoom mode this can only be AC, for Baseband this can be AC or DC.

  Property iGenInputFrom
    Type: InstrumentCommand
    ConfigureCommand: INP:DATA
    QueryCommand: INP:DATA?
    PermissibleType: String enum [Hardware=HW, Recording=REC]
    DefaultValue: Hardware
    ReadOnly: never
    Description: Gets or sets the input source. The input source is either from hardware or from a recording.

  Property iGenInputRange
    Type: InstrumentCommand
    ConfigureCommand: INP:ANAL:RANG:LIST
    QueryCommand: INP:ANAL:RANG:LIST?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Gets or sets the analog input range (in Vpk).

  Property iGenRbw
    Type: InstrumentCommand
    ConfigureCommand: RBW
    QueryCommand: RBW?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the resolution BW in Hertz

  Property iGenRbwArbitrary
    Type: InstrumentCommand
    ConfigureCommand: RBW:ARB
    QueryCommand: RBW:ARB?
    PermissibleType: String enum [Arbitrary=1, Fixed=0]
    DefaultValue: Arbitrary
    ReadOnly: never
    Description: Get or set whether the resolution BW is allowed to be arbitrary or constrained to a 1 - 3 - 10 progression. Select enumerated string values Arbitrary ('1') or Fixed ('0')

  Property iGenRbwCoupling
    Type: InstrumentCommand
    ConfigureCommand: RBW:COUP
    QueryCommand: RBW:COUP?
    PermissibleType: String enum [Auto="Auto", Offset="Offset", Fixed="Fixed"]
    DefaultValue: Auto
    ReadOnly: never
    Description: Get or set how values of RBW are coupled to the frequency Span. Values can be Auto, Offset, or Fixed.

  Property iGenRbwPoints
    Type: InstrumentCommand
    ConfigureCommand: RBW:POIN
    QueryCommand: RBW:POIN?
    PermissibleType: Double bounded [Max="409601.0" Min="51.0"]
    DefaultValue: 51.0
    ReadOnly: never
    Description: Get or set the number of unaliased frequency points to display

  Property iGenRbwPointsAuto
    Type: InstrumentCommand
    ConfigureCommand: RBW:POIN:AUTO
    QueryCommand: RBW:POIN:AUTO?
    PermissibleType: String enum [1=1, 0=0]
    DefaultValue: 1
    ReadOnly: never
    Description: Gets or sets the auto frequency points mode. If Auto mode is selected, the VSA automatically selects the number of frequency points. If Auto mode is NOT selected, the number of frequency points is set manually by the user.

      Allowed inputs:
      1 - Auto mode is selected
      0 - Auto mode is turned off

  Property iGenRecLength
    Type: InstrumentCommand
    ConfigureCommand: INP:REC:LENG
    QueryCommand: INP:REC:LENG?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the length of the next recording

  Property iGenRecLengthExtraSettling
    Type: InstrumentCommand
    ConfigureCommand: INP:REC:LENG:EXTR
    QueryCommand: INP:REC:LENG:EXTR?
    PermissibleType: String none
    ReadOnly: never
    Description: Get or set whether the recording length will include extra data to allow for the filters to settle during playback. Choose True to include this extra data if you want the playback data length to be exactly what was specified. Send the string '1' for True or '0' for False.

  Property iGenRecLengthMax
    Type: InstrumentCommand
    ConfigureCommand: INP:REC:LENG:MAX
    QueryCommand: INP:REC:LENG:MAX?
    PermissibleType: String none
    ReadOnly: never
    Description: Get or set whether the recording length will be the maximum supported by the input channel. Set the string to '1' for True or '0' for False.

  Property iGenRecLengthTime
    Type: InstrumentCommand
    QueryCommand: INP:REC:LENG:TIME?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Read only property. Get the length of the next recording in time.

  Property iGenRecLengthUnit
    Type: InstrumentCommand
    ConfigureCommand: INP:REC:LENG:UNIT
    QueryCommand: INP:REC:LENG:UNIT?
    PermissibleType: String enum [Record="Record", Second="Second", Point="Point"]
    DefaultValue: Record
    ReadOnly: never
    Description: Get or set the units for the length of the next recording

  Property iGenSelZoomBaseband
    Type: InstrumentCommand
    ConfigureCommand: INP:CHAN:CONF
    QueryCommand: INP:CHAN:CONF?
    PermissibleType: String enum [Baseband=BB, Zoom=RF]
    DefaultValue: Baseband
    ReadOnly: never
    Description: Gets or sets wether the VSA is in Baseband or Zoom mode

  Property iGenSystemErr
    Type: InstrumentCommand
    QueryCommand: SYST:ERR?
    PermissibleType: String none
    ReadOnly: always
    Description: Read only property. Get an error message from the VSA if one exists.

  Property iGenTimeLength
    Type: InstrumentCommand
    ConfigureCommand: TIME:LENG
    QueryCommand: TIME:LENG?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the main time length in seconds.

  Property iGenTimeOverlap
    Type: InstrumentCommand
    ConfigureCommand: TIME:OVER
    QueryCommand: TIME:OVER?
    PermissibleType: Double bounded [Max="100.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Get or set the percentage of overlap processing to be used when averaging is off.

  Property iGenTimeOverlapAvg
    Type: InstrumentCommand
    ConfigureCommand: TIME:OVER:AVER
    QueryCommand: TIME:OVER:AVER?
    PermissibleType: Double bounded [Max="100.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Get or set the percentage of overlap processing to use when averaging is ON.

  Property iGenTimePoints
    Type: InstrumentCommand
    ConfigureCommand: TIME:POIN
    QueryCommand: TIME:POIN?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the number of main time points to acquire for each measurement scan. The number of main time points is related to the number of frequency points by Time Points = (Freq. Points -1) * 1.28.

  Property iGenTrigDelay
    Type: InstrumentCommand
    ConfigureCommand: INP:TRIG:DEL
    QueryCommand: INP:TRIG:DEL?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Gets or sets the trigger delay in seconds. Note this can be a negative number for a pre-trigger capture or a positive number for a post-trigger capture.

  Property iGenTrigHoldoff
    Type: InstrumentCommand
    ConfigureCommand: INP:TRIG:DEL
    QueryCommand: INP:TRIG:DEL?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the trigger holdoff in seconds.

  Property iGenTrigHoldoffStyle
    Type: InstrumentCommand
    ConfigureCommand: INP:TRIG:HOLD:STYL
    QueryCommand: INP:TRIG:HOLD:STYL?
    PermissibleType: String enum [BelowLevel="BelowLevel", Conventional="Conventional", AboveLevel="AboveLevel"]
    DefaultValue: BelowLevel
    ReadOnly: never
    Description: Get or set the trigger holdoff style. Valid entry for the VSA  is the string enumeration BelowLevel. This is the only holdoff style that is relevant for the Level and MagnitudeLevel trigger styles. All other VSA trigger styles do not use the trigger holdoff.

  Property iGenTrigLevel
    Type: InstrumentCommand
    ConfigureCommand: INP:TRIG:LEV
    QueryCommand: INP:TRIG:LEV?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the trigger level in volts. This level is only used when the Trigger Style is set to Level. The trigger style Level is only an option when the VSA is in baseband mode.

  Property iGenTrigLevelExt
    Type: InstrumentCommand
    ConfigureCommand: INP:TRIG:LEV:EXT
    QueryCommand: INP:TRIG:LEV:EXT?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the external trigger level in volts.

  Property iGenTrigLevelMag
    Type: InstrumentCommand
    ConfigureCommand: INP:TRIG:LEV:MAGN
    QueryCommand: INP:TRIG:LEV:MAGN?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Get or set the trigger level in volts as the magnitude at the IF.

  Property iGenTrigSlope
    Type: InstrumentCommand
    ConfigureCommand: INP:TRIG:SLOP
    QueryCommand: INP:TRIG:SLOP?
    PermissibleType: String enum [Pos="Positive", Neg="Negative"]
    DefaultValue: Pos
    ReadOnly: never
    Description: Get or set the trigger slope. Values are either a string Pos or Neg.

  Property iGenTrigStyle
    Type: InstrumentCommand
    ConfigureCommand: INP:TRIG:STYL
    QueryCommand: INP:TRIG:STYL?
    PermissibleType: String enum [Auto="Auto", Level="Level", MagLevel="MagnitiudeLevel", External="External", ExternalTTL="ExternalTtl"]
    DefaultValue: Auto
    ReadOnly: never
    Description: Get or set the type of triggering. Values are the following string enumerations: 'Auto', 'Level','MagnitudeLevel', 'External', or 'ExternalTTL'. Note: the trigger style Level is only available when the VSA is in the baseband mode.

  Property iGenWindowType
    Type: InstrumentCommand
    ConfigureCommand: RBW:WIND
    QueryCommand: RBW:WIND?
    PermissibleType: String enum [Uniform="Uniform", Hanning="Hanning", Gauss="Gauss", FlatTop="FlatTop"]
    DefaultValue: Uniform
    ReadOnly: never
    Description: Get or set the type of window applied to the main time data

  Property MessageEnable
    Type: InstrumentCommand
    ConfigureCommand: SYST:VSA:MESS:ENAB
    QueryCommand: SYST:VSA:MESS:ENAB?
    PermissibleType: String enum [0=0, 1=1]
    DefaultValue: 0
    ReadOnly: never

  Method iGenAutoRange
    Type: InstrumentCommand
    Line Command="INP:ANAL:RANG:AUTO" Output="false"
    Description: Performs an autorange function on the input signal to attempt to find the best input range to set the VSA to. This operation includes a Measurement Restart command.

  Method iGenCal
    Type: InstrumentCommand
    Line Command="CAL:ALL?" Format="numeric" Output="true" ReadOutputAs="ASCII"

  Method iGenMarkerDown
    MCode:
      function iGenMarkerDown(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'

      %Get the interface object
      interface=get(obj,'interface');

      %Move the specified marker on the specified trace to the next lower peak.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':DOWN']);
    Description: Set the specified marker on the specified trace to the next lower peak on 
      the trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

  Method iGenMarkerEnableGet
    MCode:
      function MarkerEnable=iGenMarkerEnableGet(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'
      %Output Argument
      %MarkerEnable = Whether the specified marker on the specified trace is
      %enabled or not.

      %Get the interface object
      interface=get(obj,'interface');

      %Get whether the specified marker on the specified trace is
      %enabled or not.
      MarkerEnable=query(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':ENAB?']);
    Description: Get whether the specified marker on the specified trace is
      enabled or not. 

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number. For example, '1'
      Output Argument
      MarkerEnable = Whether the specified marker on the specified trace is
      enabled or not.

  Method iGenMarkerEnableSet
    MCode:
      function iGenMarkerEnableSet(obj, TraceIndex, MarkerNumber, MarkerEnable)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'
      %
      %MarkerEnable = Whether the specified marker on the specified trace is
      %enabled or not. The string '1' will represent a marker to be enabled and a
      %'0' will represent a marker to be disabled.

      %Get the interface object
      interface=get(obj,'interface');

      %Set whether the specified marker on the specified trace is
      %enabled or not.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':ENAB ', MarkerEnable]);
    Description: Set whether the specified marker on the specified trace is
      enabled or not. 

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

      MarkerEnable = Whether the specified marker on the specified trace is
      enabled or not. The string '1' will represent a marker to be enabled and a
      '0' will represent a marker to be disabled.

  Method iGenMarkerLeft
    MCode:
      function iGenMarkerLeft(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'

      %Get the interface object
      interface=get(obj,'interface');

      %Move the specified marker on the specified trace to the next valid peak to
      %the left on the trace.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':LEFT']);
    Description: Set the specified marker on the specified trace to the next valid peak to the left on 
      the trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

  Method iGenMarkerMax
    MCode:
      function iGenMarkerMax(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'

      %Get the interface object
      interface=get(obj,'interface');

      %Move the specified marker on the specified trace to the maximum value on
      %the trace.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':MAX']);
    Description: Set the specified marker on the specified trace to the maximum point on
      the trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

  Method iGenMarkerMin
    MCode:
      function iGenMarkerMin(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'

      %Get the interface object
      interface=get(obj,'interface');

      %Move the specified marker on the specified trace to the minimum value on
      %the trace.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':MIN']);
    Description: Set the specified marker on the specified trace to the minimum point on
      the trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

  Method iGenMarkerRight
    MCode:
      function iGenMarkerRight(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'

      %Get the interface object
      interface=get(obj,'interface');

      %Move the specified marker on the specified trace to the next valid peak to
      %the right on the trace.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':RIGH']);
    Description: Set the specified marker on the specified trace to the next valid peak to the right on 
      the trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

  Method iGenMarkerUp
    MCode:
      function iGenMarkerUp(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'

      %Get the interface object
      interface=get(obj,'interface');

      %Move the specified marker on the specified trace to the next higher peak.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':UP']);
    Description: Set the specified marker on the specified trace to the next higher peak on 
      the trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

  Method iGenMarkerXGet
    MCode:
      function MarkerX=iGenMarkerXGet(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'
      %Output Argument
      %MarkerX = X value of the marker

      %Get the interface object
      interface=get(obj,'interface');

      %Get the X-axis data value of the specified marker on the specified trace.
      MarkerX=query(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':X?']);
    Description: Get the X-axis data value of the specified marker on the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'
      Output Argument
      MarkerX = X value of the marker

  Method iGenMarkerXSet
    MCode:
      function iGenMarkerXSet(obj, TraceIndex, MarkerNumber, MarkerX)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'
      %Output Argument
      %MarkerX = X value of the marker

      %Get the interface object
      interface=get(obj,'interface');

      %Set the X-axis data value of the specified marker on the specified trace.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':X ', MarkerX]);
    Description: Set the X-axis data value of the specified marker on the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

      MarkerX = X value of the marker

  Method iGenMarkerXunits
    MCode:
      function MarkerXunits=iGenMarkerXunits(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'
      %Output Argument
      %MarkerXunits = X axis units of the specified marker on the specified
      %trace.

      %Get the interface object
      interface=get(obj,'interface');

      %Get the X-axis units of the specified marker on the specified trace.
      MarkerXunits=query(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':X:UNIT?']);
    Description: Get the X-axis units of the specified marker on the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'
      Output Argument
      MarkerXunits = X axis units of the specified marker on the specified
      trace.

  Method iGenMarkerYGet
    MCode:
      function MarkerY=iGenMarkerYGet(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'
      %Output Argument
      %MarkerY = Y value of the marker

      %Get the interface object
      interface=get(obj,'interface');

      %Get the Y-axis data value of the specified marker on the specified trace.
      MarkerY=query(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':Y?']);
    Description: Get the Y-axis data value of the specified marker on the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'
      Output Argument
      MarkerY = Y value of the marker

  Method iGenMarkerYSet
    MCode:
      function iGenMarkerYSet(obj, TraceIndex, MarkerNumber, MarkerY)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'
      %Output Argument
      %MarkerY = Y value of the marker

      %Get the interface object
      interface=get(obj,'interface');

      %Set the Y-axis data value of the specified marker on the specified trace.
      fprintf(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':Y ', MarkerYX]);
    Description: Set the Y-axis data value of the specified marker on the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'

      MarkerY = Y value of the marker

  Method iGenMarkerYunits
    MCode:
      function MarkerYunits=iGenMarkerYunits(obj, TraceIndex, MarkerNumber)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %MarkerNumber = String representing the specific marker number.
      %For example, '1'
      %Output Argument
      %MarkerYunits = Y axis units of the specified marker on the specified
      %trace.

      %Get the interface object
      interface=get(obj,'interface');

      %Get the X-axis units of the specified marker on the specified trace.
      MarkerYunits=query(interface,['TRAC', TraceIndex, ':MARK', MarkerNumber, ':Y:UNIT?']);
    Description: Get the Y-axis units of the specified marker on the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      MarkerNumber = String representing the specific marker number.
      For example, '1'
      Output Argument
      MarkerYunits = Y axis units of the specified marker on the specified
      trace.

  Method iGenMeasStatus
    Type: InstrumentCommand
    Line Command="MEAS:STAT?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Returns the value of the bitflags in the Measurement.Status Property in the .NET Interface

  Method iGenPreset
    Type: InstrumentCommand
    Line Command="*RST" Output="false"
    Description: This function presets the VSA.

  Method iGenRecLengthMaxTime
    Type: InstrumentCommand
    Line Command="INP:REC:LENG:MAX:TIME?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Get the maximum recording time supported by the current input channel

  Method iGenRecordAndSave
    MCode:
      function [ItWorked, OV1] = iGenRecordAndSave(obj, VSAPCPath, FileName, FileType, Header, MeasFreq, PlayTime, SaveOV1)
      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IFace = get(obj, 'interface');
      ItWorked = true;
      set(IFace, 'timeout', 1000);
      % start recording
      fprintf(IFace, 'INIT:REC:IMM');

      Done = false;
      tStart = tic;
      tTot = toc(tStart);
      % enter loop and wait for recording to finish
      while ~Done && tTot < 1000
        MeasStatusBytes = str2double(query(IFace, 'MEAS:STAT?'));
        if ~isnan(MeasStatusBytes)
          RecordingBit = bitand(MeasStatusBytes, 128);
        else
          RecordingBit = 128;
        end
        if RecordingBit > 0
          tTot = toc(tStart);
        else
          Done = true;
        end
      end
      if tTot >= 1000
        ItWorked = false;
      end

      %Check for Overload
      Overload = invoke(obj, 'iGenRecOverload');
      if strcmpi(Overload, 'OVERLOADED_OCCUR')
        OV1 = true;
      else
        OV1 = false;
      end

      if SaveOV1 || ~OV1
        PathFileName = [VSAPCPath, FileName];
        % Save the data.
        if ItWorked
          fprintf(IFace,['MMEM:STOR:REC ', '"', PathFileName, '","', FileType, '",', ...
            Header, ',', MeasFreq, ',', PlayTime]);

          % wait until data is saved
          SavedFileName = query(IFace, ':INP:REC:FILE:SAV?');
          Done = false;
          tStart = tic;
          tTot = toc(tStart);
          while ~Done && tTot < 1000
            if isempty(strfind(SavedFileName, FileName))
              tTot = toc(tStart);
            else
              Done = true;
            end
          end
          if tTot >= 1000
            ItWorked = false;
          end
        end
      end
      set(IFace, 'timeout', 10);
    Description: This function starts a recording and then saves the file to the specified path and filename.

      Input Arguments
      Required inputs are
      FileName = Enter as text the filename. For example, 'test.mat' for mat file
      VSAPCPath = text as path name on the VSA computer ex. 'c:\'
      FileType = (must be either 'CSV', 'MAT', 'MAT4', 'MAT7', 'N5110A', 'N5106A', 'SDF', 'SDFX', 'TEXT')
      Header = (String '1' to save the header data and '0' to NOT save the header data)
      MeasFreq = Use string '1' to save recording with the current center freq
         and span settings. Use string '0' to save recording with the center freq.
         and span settings at the time the recording was made.
      PlayTime = Use string '1' to save only the data between the specified
         playback start and stop times. Use string '0' to save the entire length of
         the recording.

      Input Argument example
      'c:\temp\test', 'CSV', '1', '0', '0'

  Method iGenRecordingWait
    Type: InstrumentCommand
    Line Command="INIT:REC:WAIT?" Output="false"
    Description: Wait 10 seconds for the recording to complete.

  Method iGenRecOverload
    MCode:
      function Overload=iGenRecOverload()
      % This function determines whether an overload has occurred in the newest
      % temporary recording that was taken by the VSA.

      %**************************************************************************
      %Important Requirements and First Time Use Setup Only
      %
      %Note: Follow these instructions only if the dll installation on the Remote
      %PC and the shared folder setup on the Local PC have not been done.
      %
      %   Remote PC
      %     (this PC. i.e., the PC that runs Matlab and is used to control the local
      %     PC running the 89600B VSA software)
      %     Windows 7 Operating System 64-bit
      %     64-bit Matlab (R2011b)
      %     Install Microsoft Visual C++ 2010 SP1 Redistributable Package (x64)
      %     http://www.microsoft.com/download/en/details.aspx?displaylang=en&id=13523
      %     Copy the Sdf5x.dll from the RSMS5G CVS repository to the
      %     C:\RSMS5G\MiscFunctions directory on the remote PC (i.e., this PC)

      %     Register the dll

      %     Run the command prompt as Administrator (Start, Programs, Accessories, right click on Command Prompt and select Run as Administrator)

      %     Change directory to the location where you placed the dll (cd C:\RSMS5G\MiscFunctions)

      %     Register the dll by running regsvr32 (C:\RSMS5G\MiscFunctions>regsvr32 Sdf5x.dll)

      %   Local PC
      %     (PC that runs the Agilent 89600B VSA software)
      %     Setup the folder where the temporary recording .sdf file is stored
      %     (C:\Documents and Settings\rsms5g\My Documents\Agilent\89600B VSA) as
      %     a network shared folder. Use the Network Setup Wizard.
      %
      %   Remote PC
      %     Select Start, right-click on Computer.
      %     Select Map Network Drive. Use Drive X: and browse to find the VSA PC to
      %     be used on the network. Select VSA PC name and the 89600B VSA folder.
      %**************************************************************************
      %Input Arguments
      %     None
      %Output Argument
      %Overload = String representing whether an overload has occurred or not.
      %     'OVERLOADED_OCCUR'
      %     'NOT_OVERLOADED'

      %Change the current directory to mapped drive X:. This maps to the
      %C:\Documents and Settings\rsms5g\My Documents\Agilent\89600B VSA directory
      %on the Agilent 89600B VSA PC (Version 14.2).

      CurrDir = cd;
      cd X:;

      %Get all of the VSA temporary recording files that are currently stored in
      %the C:\Documents and Settings\rsms5g\My Documents\Agilent\89600B VSA
      %directory on the Agilent 89600B VSA PC (Version 14.2). Note that this
      %directory should be assigned to a mapped drive X: on this, the local
      %computer that will control the VSA using Matlab.
      VSATempRecFiles=dir('Recording.sdf*');

      NumRecFiles=length(VSATempRecFiles);

      %Initialize the index for the newest temporary recording file
      NewestRec=1;

      %Loop to find the newest temporary recording file

      if NumRecFiles > 1
        for ii=2:NumRecFiles
          %Test to see if the current recording file is newer than the newest
          %file previously identified. If it is, update the index for the newest
          %temporary recording file.
          if VSATempRecFiles(NewestRec).datenum < VSATempRecFiles(ii).datenum
            NewestRec=ii;
          end
        end
      end

      NewestFilename=VSATempRecFiles(NewestRec).name;

      hsdfFile=actxserver('AgtSdf.File');
      hsdfFile.Open(['X:\', NewestFilename],0);
      chanHdr=hsdfFile.SdfChanHdrs.Item(0);
      Overload=chanHdr.Overloaded;
      hsdfFile.Close
      hsdfFile.delete
      clear hsdfFile
      cd(CurrDir);
    Description: This function determines whether an overload has occurred in the newest
      temporary recording that was taken by the VSA.

      **************************************************************************
      Important Requirements and First Time Use Setup Only

      Note: Follow these instructions only if the dll installation on the Remote
      PC and the shared folder setup on the Local PC have not been done.

        Remote PC
          (this PC. i.e., the PC that runs Matlab and is used to control the local
          PC running the 89600B VSA software)
          Windows 7 Operating System 64-bit
          64-bit Matlab (R2011b)
          Install Microsoft Visual C++ 2010 SP1 Redistributable Package (x64)
          http://www.microsoft.com/download/en/details.aspx?displaylang=en&id=13523
          Copy the Sdf5x.dll from the RSMS5G CVS repository to the 
          C:\RSMS5G\MiscFunctions directory on the remote PC (i.e., this PC)

          Register the dll

          Run the command prompt as Administrator (Start, Programs, Accessories, right click on Command Prompt and select Run as Administrator)

          Change directory to the location where you placed the dll (cd C:\RSMS5G\MiscFunctions)

          Register the dll by running regsvr32 (C:\RSMS5G\MiscFunctions>regsvr32 Sdf5x.dll)

        Local PC
          (PC that runs the Agilent 89600B VSA software)
          Setup the folder where the temporary recording .sdf file is stored
          (C:\Documents and Settings\rsms5g\My Documents\Agilent\89600B VSA) as
          a network shared folder. Use the Network Setup Wizard.

        Remote PC
          Select Start, right-click on Computer.
          Select Map Network Drive. Use Drive X: and browse to find the VSA PC to
          be used on the network. Select VSA PC name and the 89600B VSA folder.
      **************************************************************************
      Input Arguments
          None
      Output Argument
      Overload = String representing whether an overload has occurred or not.
          'OVERLOADED_OCCUR'
          'NOT_OVERLOADED'

  Method iGenRecSaveFileName
    Type: InstrumentCommand
    Line Command="INP:REC:FILE:SAV?" Format="text" Output="true" ReadOutputAs="ASCII"
    Description: Get the filename that the current recording was last saved to or recalled from

  Method iGenRecTempFileName
    Type: InstrumentCommand
    Line Command="INP:REC:FILE:CURR?" Format="text" Output="true" ReadOutputAs="ASCII"
    Description: Gets the current temporary filename where the recording is saved

  Method iGenRestartMeas
    Type: InstrumentCommand
    Line Command="INIT:REST" Output="false"
    Description: Causes the measurement to restart. The average count is reset to 0.

  Method iGenResumeMeas
    Type: InstrumentCommand
    Line Command="INIT:RES" Output="false"
    Description: Causes the measurement to transition to the Running state.

  Method iGenSampleRate
    Type: InstrumentCommand
    Line Command="FREQ:INP:SRAT?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Get the sample rate from the VSA

  Method iGenSaveRecording
    MCode:
      function iGenSaveRecording(obj, PathFileName, FileType, Header, MeasFreq, PlayTime)
      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
      %Input Arguments
      %Required inputs are
      %PathFileName = Enter as text path and filename. For example, 'c:\temp\test'
      %FileType = (must be either 'CSV', 'MAT', 'MAT4', 'MAT7', 'N5110A', 'N5106A', 'SDF', 'SDFX', 'TEXT')
      %Header = (String '1' to save the header data and '0' to NOT save the header data)
      %MeasFreq = Use string '1' to save recording with the current center freq
      % and span settings. Use string '0' to save recording with the center freq.
      % and span settings at the time the recording was made.
      %PlayTime = Use string '1' to save only the data between the specified
      % playback start and stop times. Use string '0' to save the entire length of
      % the recording.
      %Get the interface object
      interface=get(obj,'interface');

      %Save the VSA setup to the file and path specificed by PathFileName
      %Note that double quotes around the text as required by the VSA
      %are inserted by the command below and therefore are not required as
      %user input.
      fprintf(interface,['MMEM:STOR:REC ', '"', PathFileName, '","', FileType, '",', ...
        Header, ',', MeasFreq, ',', PlayTime]);
    Description: Allows a user to save a recording to a file.

      Input Arguments
      Required inputs are
      PathFileName = Enter as text path and filename. For example, 'c:\temp\test'
      FileType = (must be either 'CSV', 'MAT', 'MAT4', 'MAT7', 'N5110A', 'N5106A', 'SDF', 'SDFX', 'TEXT')
      Header = (String '1' to save the header data and '0' to NOT save the header data)
      MeasFreq = Use string '1' to save recording with the current center freq
         and span settings. Use string '0' to save recording with the center freq.
         and span settings at the time the recording was made.
      PlayTime = Use string '1' to save only the data between the specified
         playback start and stop times. Use string '0' to save the entire length of
         the recording.

      Input Argument example
      'c:\temp\test', 'CSV', '1', '0', '0'

  Method iGenSaveRecordingInstrCom
    Type: InstrumentCommand
    Line Command="MMEM:STOR:REC <PathFileName>,<FileType>,<Header>,<MeasFreq>,<PlayTime>" Output="false"
    Input: PathFileName
    Input: FileType
    Input: Header
    Input: MeasFreq
    Input: PlayTime
    Description: Same as iGenSaveRecording but uses Instrument Commands Function Style instead of m-code. Allows a user to save a recording to a file.

      Input Arguments
      Required inputs are
      PathFileName = Enter as text path and filename. For example, '"c:\temp\test"'
      FileType = (must be either '"CSV"', '"MAT"', '"MAT4"', '"MAT7"', '"N5110A"', '"N5106A"', '"SDF"', '"SDFX"', '"TEXT"')
      Header = (String '1' to save the header data and '0' to NOT save the header data)
      MeasFreq = Use string '1' to save recording with the current center freq
         and span settings. Use string '0' to save recording with the center freq.
         and span settings at the time the recording was made.
      PlayTime = Use string '1' to save only the data between the specified
         playback start and stop times. Use string '0' to save the entire length of
         the recording.

      Input Argument example '"c:\temp\test"', '"CSV"', '1', '0', '0'

      Note: PathFileName and FileType need inputs to be text surrounded by double quotes and then single quotes on the outside.

  Method iGenSaveSetup
    MCode:
      function iGenSaveSetup(obj, PathFileName)
      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
      %Input Argument
      %PathFileName = a string that represents the path and filename
      %to store the VSA setup. For example 'c:\temp\setup'

      %Get the interface object
      interface=get(obj,'interface');

      %Save the VSA setup to the file and path specificed by PathFileName
      %Note that double quotes around the text as required by the VSA
      %are inserted by the command below and therefore are not required as
      %user input.
      fprintf(interface,['MMEM:STOR:SET ', '"',PathFileName, '"']);
    Description: Saves the current VSA setup to a user specified path and filename. Enter the path and filename as a single text argument, for example 'c:\temp\setup'. Note that double quotes around the text are not needed since they are appended automatically in the code.

  Method iGenSaveSetupInstrCom
    Type: InstrumentCommand
    Line Command="MMEM:STOR:SET <filename>" Output="false"
    Input: filename
    Description: Same as iGenSaveSetup but uses Instrument Commands Function Style instead of m-code. Saves the current VSA setup to a user specified path and filename.
      Note: PathFileName needs inputs to be text surrounded by double quotes and then single quotes on the outside, for example, '"c:\temp\test"'.

  Method iGenSaveTrace
    MCode:
      function iGenSaveTrace(obj, TraceIndex, PathFileName, FileType, Header)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '0' = Trace A
      %    '1' = Trace B
      %    '2'= Trace C, etc.
      %Filename = Enter as text path and filename. For example, 'c:\temp\test'
      %FileType = (must be either 'CSV', 'MAT', 'MAT4', 'MAT7', 'N5110A', 'N5106A', 'SDF', 'TEXT')
      %Header = (String '1' to save the header data and '0' to NOT save the header data)

      %Get the interface object
      interface=get(obj,'interface');

      %Save the VSA setup to the file and path specificed by PathFileName
      %Note that double quotes around the text as required by the VSA
      %are inserted by the command below and therefore are not required as
      %user input.
      fprintf(interface,['MMEM:STOR:TRAC ', TraceIndex, ',"', PathFileName, '","', ...
        FileType, '",', Header]);
    Description: Allows a user to save a trace to a file

      Required inputs are
      TraceIndex = String where 
          '0' = Trace A
          '1' = Trace B
          '2'= Trace C, etc.
      PathFileName = Enter as text path and filename. For example, 'c:\temp\test'
      FileType (must be either 'CSV', 'MAT', 'MAT4', 'MAT7', 'N5110A', 'N5106A', 'SDF', 'TEXT')
      Header (String '1' to save the header data and '0' to NOT save the header data)

  Method iGenSaveTraceInstrCom
    Type: InstrumentCommand
    Line Command="MMEM:STOR:TRAC <TraceIndex>,<PathFileName>,<FileType>,<Header>" Output="false"
    Input: TraceIndex
    Input: PathFileName
    Input: FileType
    Input: Header
    Description: Same as iGenSaveTrace but uses Instrument Commands Function Style instead of m-code. Allows a user to save a trace to a file

      Required inputs are
      TraceIndex = String where 
          '0' = Trace A
          '1' = Trace B
          '2'= Trace C, etc.
      PathFileName = Enter as text path and filename. For example, '"c:\temp\test"'
      FileType (must be either '"CSV"', '"MAT"', '"MAT4"', '"MAT7"', '"N5110A"', '"N5106A"', '"SDF"', '"TEXT"')
      Header (String '1' to save the header data and '0' to NOT save the header data)

      Note: PathFileName and FileType need inputs to be text surrounded by double quotes and then single quotes on the outside.

  Method iGenSCPIQuery
    MCode:
      function res=iGenSCPIQuery(obj,cmd)
      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
      interface=get(obj,'interface');

      res=query(interface,cmd);
    Description: SCPI_Query sends an SCPI string to the instrument and returns its response.

      Input parameters: SCPI string
      Output parameters: response string from the instrument

  Method iGenSCPIWrite
    MCode:
      function iGenSCPIWrite(obj,cmd)
      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
      interface=get(obj,'interface');

      fprintf(interface,cmd);
    Description: SCPI_Write sends an SCPI string to the instrument

      Input parameters: SCPI string
      Output parameters: none

  Method iGenSetCentFreq
    Type: InstrumentCommand
    Line Command="FREQ:CENT " Output="false"
    Input: Freq

  Method iGenStartRecording
    Type: InstrumentCommand
    Line Command="INIT:REC:IMM" Output="false"
    Description: Pauses the current measruement and start recording the input data.

  Method iGenStopMeas
    Type: InstrumentCommand
    Line Command="INIT:ABOR" Output="false"
    Description: Immediately stop the measurement clearing all measurement data.

  Method iGenSysPresetTrace
    Type: InstrumentCommand
    Line Command="SYST:PRES:TRAC" Output="false"
    Description: Resets the trace back to the default

  Method iGenTraceAdd
    Type: InstrumentCommand
    Line Command="TRAC:ADD" Output="false"
    Description: Add a trace to the display

  Method iGenTraceCount
    Type: InstrumentCommand
    Line Command="TRAC:COUN?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Get the number of VSA traces that are currently displayed.

  Method iGenTraceDataNameList
    Type: InstrumentCommand
    Line Command="TRAC:DATA:NAME:LIST?" Format="text" Output="true" ReadOutputAs="ASCII"

  Method iGenTraceDataTypeGet
    MCode:
      function TraceType = iGenTraceDataTypeGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Get the interface object
      interface=get(obj,'interface');

      TraceType = query(interface, ['TRAC', TraceIndex, ':DATA:NAME?']);
    Description: Gets the trace data type (such as Spectrum1 or Main Time1) from the specified Trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.

  Method iGenTraceDataTypeSet
    MCode:
      function iGenTraceDataTypeSet(obj, TraceIndex, TraceType)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %TraceType = Strings as listed below:
      %     '"No Data"'
      %     '"Auto Correl1"'
      %     '"CCDF1"'
      %     '"CDF1"'
      %     '"Correction1"'
      %     '"Gate Time1"'
      %     '"Inst Main Time1"'
      %     '"Inst Spec1"'
      %     '"Main Time1"'
      %     '"PDF1"'
      %     '"PSD1"'
      %     '"Raw Main Time1"'
      %     '"Spectrum1"'
      %     '"Acp Summary TrcA"'
      %     '"Acp Summary TrcB"'
      %     '"Obw Summary TrcA"'
      %     '"Obw Summary TrcB"'
      %

      %Get the interface object
      interface=get(obj,'interface');

      fprintf(interface, ['TRAC', TraceIndex, ':DATA:NAME ', TraceType]);
    Description: Sets the trace data type (such as Spectrum1 or Main Time1) of the specified Trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.

      TraceType = Strings as listed below:
           '"No Data"'
           '"Auto Correl1"'
           '"CCDF1"'
           '"CDF1"'
           '"Correction1"'
           '"Gate Time1"'
           '"Inst Main Time1"'
           '"Inst Spec1"'
           '"Main Time1"'
           '"PDF1"'
           '"PSD1"'
           '"Raw Main Time1"'
           '"Spectrum1"'
           '"Acp Summary TrcA"'
           '"Acp Summary TrcB"'
           '"Obw Summary TrcA"'
           '"Obw Summary TrcB"'

  Method iGenTraceDataValid
    MCode:
      function TraceDataValid=iGenTraceDataValid(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %TraceDataValid = Whether the data from the specified trace is valid or not.

      %Get the interface object
      interface=get(obj,'interface');

      %Get whether the data from the specified trace is valid or not.
      TraceDataValid=query(interface,['TRAC', TraceIndex, ':DATA:VAL?']);
    Description: Get whether the data from the specified trace is valid and contains at 
      least one data value.

  Method iGenTraceDataXGet
    MCode:
      function TraceDataX=iGenTraceDataXGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %TraceDataX = X data values from the specified trace in the format
      %determined by the iGenFormatTraceData Property

      %Get the interface object
      interface=get(obj,'interface');

      %Get the X data from the specified trace  in the format determined by the
      %iGenFormatTraceData Property.
      TraceDataX=query(interface,['TRAC', TraceIndex, ':DATA:X?']);
    Description: Get the X data from the specified trace in the format determined by the iGenFormatTraceData Property.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.

      Output Argument
      TraceDataX = X  data values from the specified trace in the format determined by the iGenFormatTraceData Property

  Method iGenTraceDataXYGet
    MCode:
      function TraceDataXY=iGenTraceDataXYGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %TraceDataXY = X and Y data values from the specified trace in the format
      %determined by the iGenFormatTraceData Property

      %Get the interface object
      interface=get(obj,'interface');

      %Get the XY data from the specified trace.
      TraceDataXY=query(interface,['TRAC', TraceIndex, ':DATA:XY?']);
    Description: Get the XY data from the specified trace in the format determined by the iGenFormatTraceData Property.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.

      Output Argument
      TraceDataXY = X and Y data values from the specified trace in the format determined by the iGenFormatTraceData Property

  Method iGenTraceDataYGet
    MCode:
      function TraceDataY=iGenTraceDataYGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %TraceDataY = Y data values from the specified trace in the format
      %determined by the iGenFormatTraceData Property

      %Get the interface object
      interface=get(obj,'interface');

      %Get the Y data from the specified trace  in the format determined by the
      %iGenFormatTraceData Property.
      TraceDataY=query(interface,['TRAC', TraceIndex, ':DATA:Y?']);
    Description: Get the Y data from the specified trace in the format determined by the iGenFormatTraceData Property.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.

      Output Argument
      TraceDataY = Y  data values from the specified trace in the format determined by the iGenFormatTraceData Property

  Method iGenTraceFormatYGet
    MCode:
      function TraceFormatY=iGenTraceFormatYGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %TraceFormatY = Y data format from the specified trace.

      %Get the interface object
      interface=get(obj,'interface');

      %Get the Y data format from the specified trace.
      TraceFormatY=query(interface,['TRAC', TraceIndex, ':FORM:Y?']);
    Description: Get the Y data format from the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      Output Argument
      TraceFormatY = Y data format from the specified trace.

  Method iGenTraceFormatYSet
    MCode:
      function iGenTraceFormatYSet(obj, TraceIndex, TraceFormatY)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.

      %TraceFormatY = Y data format for the specified trace. The values
      %must be strings from the following list that are comprised of text
      %surrounded by double quotes and then surrounded by single quotes.
      %     '"LogMagnitude"'
      %     '"LinearMagnitude"'
      %     '"Real"'
      %     '"Imaginary"'
      %     '"WrapPhase"'
      %     '"UnwrapPhase"'
      %     '"IQ"'
      %     '"Constellation"'
      %     '"EyeQ"'
      %     '"EyeI"'
      %     '"Trellis"'
      %     '"GroupDelay"'
      %     '"LogMagnitudeLinear"'
      %Get the interface object
      interface=get(obj,'interface');

      %Set the Y data format for the specified trace.
      fprintf(interface,['TRAC', TraceIndex, ':FORM:Y ', TraceFormatY]);
    Description: Set the Y data format for the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.

      TraceFormatY = Y data format for the specified trace. The values
      must be strings from the following list that are comprised of text
      surrounded by double quotes and then surrounded by single quotes.
           '"LogMagnitude"'
           '"LinearMagnitude"'
           '"Real"'
           '"Imaginary"'
           '"WrapPhase"'
           '"UnwrapPhase"'
           '"IQ"'
           '"Constellation"'
           '"EyeQ"'
           '"EyeI"'
           '"Trellis"'
           '"GroupDelay"'
           '"LogMagnitudeLinear"'

  Method iGenTraceLogXaxisGet
    MCode:
      function TraceLogXaxis=iGenTraceLogXaxisGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %TraceLogXscale = Whether the X axis is a linear or log scale.
      %'1' = log scale
      %'0' = linear scale

      %Get the interface object
      interface=get(obj,'interface');

      %Get whether the X axis is a linear or log scale for the specified trace.
      TraceLogXaxis=query(interface,['TRAC', TraceIndex, ':FORM:X:LOG?']);
    Description: Get whether the X axis is a linear or log scale for the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
         	 '1' = Trace A
        	 '2' = Trace B
         	 '3'= Trace C, etc.
      Output Argument
      TraceLogXscale = Whether the X axis is a linear or log scale.
      	'1' = log scale
      	'0' = linear scale

  Method iGenTraceLogXaxisSet
    MCode:
      function iGenTraceLogXaxisSet(obj, TraceIndex, TraceLogXaxis)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %TraceLogXaxis = Whether the X axis is a linear or log scale.
      %     '1' = log scale
      %     '0' = linear scale

      %Get the interface object
      interface=get(obj,'interface');

      %Set the X axis to a linear or log scale for the specified trace.
      fprintf(interface,['TRAC', TraceIndex, ':FORM:X:LOG ', TraceLogXaxis]);
    Description: Set the X axis to a linear or log scale for the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      TraceLogXaxis = Whether the X axis is a linear or log scale.
           '1' = log scale
           '0' = linear scale

  Method iGenTraceRemove
    Type: InstrumentCommand
    Line Command="TRAC:REM" Output="false"
    Description: Remove the last trace on the VSA

  Method iGenTraceSpectrogramStyleGet
    MCode:
      function SpectrogramStyle=iGenTraceSpectrogramStyleGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %SpectrogramStyle = whether or not the spectrogram/ 3D mapping is on and if so, what
      %type of 3D mapping.
      %Get the interface object
      interface=get(obj,'interface');

      %Get whether or not the spectrogram/ 3D mapping is on and if so, what
      %type of 3D mapping.
      SpectrogramStyle=query(interface,['TRAC', TraceIndex, ':SPEC:STYL?']);
    Description: Get whether or not the spectrogram/ 3D mapping is on and if so, what
      type of 3D mapping.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      Output Argument
      SpectrogramStyle = whether or not the spectrogram/ 3D mapping is on and if so, what
      type of 3D mapping.

  Method iGenTraceSpectrogramStyleSet
    MCode:
      function iGenTraceSpectrogramStyleSet(obj, TraceIndex, SpectrogramStyle)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %SpectrogramStyle = whether or not the spectrogram/ 3D mapping is on and if so, what
      %type of 3D mapping for the specified trace. Strings as listed below:
      %    '"Off"'
      %    '"Spectrogram"'
      %    '"TraceSum"'
      %    '"TraceDecay"'
      %
      %Get the interface object
      interface=get(obj,'interface');

      %Set whether or not the spectrogram/ 3D mapping is on and if so, what
      %type of 3D mapping for the specified trace.
      fprintf(interface,['TRAC', TraceIndex, ':SPEC:STYL ', SpectrogramStyle]);
    Description: Set whether or not the spectrogram/ 3D mapping is on and if so, what
      type of 3D mapping for the specified trace.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      SpectrogramStyle = whether or not the spectrogram/ 3D mapping is on and if so, what
      type of 3D mapping for the specified trace. Strings as listed below:
          '"Off"' 
          '"Spectrogram"'
          '"TraceSum"'
          '"TraceDecay"'

  Method iGenTraceSpectrogramThreshGet
    MCode:
      function SpectrogramThresh=iGenTraceSpectrogramThreshGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %SpectrogramThresh = Double between 0 and 100 that affects the minimum
      %amplitude value that will be shown in the Spectrogram/ 3D map

      %Get the interface object
      interface=get(obj,'interface');

      %Get the threshold value for the spectrogram.
      SpectrogramThresh=query(interface,['TRAC', TraceIndex, ':SPEC:THR?']);
    Description: Get the threshold value for the spectrogram.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      Output Argument
      SpectrogramThresh = Double between 0 and 100 that affects the minimum
      amplitude value that will be shown in the Spectrogram/ 3D map

  Method iGenTraceSpectrogramThreshSet
    MCode:
      function iGenTraceSpectrogramThreshGet(obj, TraceIndex, SpectrogramThresh)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %SpectrogramThresh = Double between 0 and 100 that affects the minimum
      %amplitude value that will be shown in the Spectrogram/ 3D map

      %Get the interface object
      interface=get(obj,'interface');

      %Set the threshold value for the spectrogram.
      fprintf(interface,['TRAC', TraceIndex, ':SPEC:THR ', num2str(SpectrogramThresh)]);
    Description: Set the threshold value for the spectrogram.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      SpectrogramThresh = Double between 0 and 100 that affects the minimum
      amplitude value that will be shown in the Spectrogram/ 3D map

  Method iGenTraceYunitsGet
    MCode:
      function Yunits=iGenTraceYunitsGet(obj, TraceIndex)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Output Argument
      %Yunits = Units used to display the amplitude of the data and can be one of
      %the following strings:
      %     '"Auto"'
      %     '"Peak"'
      %     '"Rms"'
      %     '"Power"'
      %     '"MilliRms"'

      %Get the interface object
      interface=get(obj,'interface');

      %Get the units used to display the amplitude of the data.
      Yunits=query(interface,['TRAC', TraceIndex, ':Y:FORM:UNIT?']);
    Description: Get the units used to display the amplitude of the data.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      Output Argument
      Yunits = Units used to display the amplitude of the data and can be one of
      the following strings: 
           '"Auto"'
           "'Peak"'
           '"Rms"'
           '"Power"'
           '"MilliRms"'

  Method iGenTraceYunitsSet
    MCode:
      function iGenTraceYunitsSet(obj, TraceIndex, Yunits)
      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
      %Input Arguments
      %Required inputs are
      %TraceIndex = String where
      %    '1' = Trace A
      %    '2' = Trace B
      %    '3'= Trace C, etc.
      %Yunits = Units used to display the amplitude of the data and can be one of
      %the following strings:
      %     'Auto'
      %     'Peak'
      %     'Rms'
      %     'Power'
      %     'MilliRms'
      % Enter the Yunits as a single text argument, for example 'Power'. Note
      %that double quotes around the text are not needed since they are appended
      %automatically in the code.

      %Get the interface object
      interface=get(obj,'interface');

      %Set the units used to display the amplitude of the data.
      fprintf(interface,['TRAC', TraceIndex, ':Y:FORM:UNIT ', '"', Yunits, '"']);
    Description: Set the units used to display the amplitude of the data.

      Input Arguments
      Required inputs are
      TraceIndex = String where 
          '1' = Trace A
          '2' = Trace B
          '3'= Trace C, etc.
      Yunits = Units used to display the amplitude of the data and can be one of
      the following strings: 
           'Auto'
           'Peak'
           'Rms'
           'Power'
           'MilliRms'

       Enter the Yunits as a single text argument, for example 'Power'. Note that double quotes around the text are not needed since they are appended automatically in the code.
