MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Matlab Instr Control\Stepped\RSMS5GTest\Drivers\tektronixTDS5104.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: Tektronix
InstrumentModel: TDS5104
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST;HEADER OFF;VERBOSE ON
Selftest: *TST?
Error: *ESR?;ALLEv?

CreateInitCode
  Code:
    function init(obj)
    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interface = get(obj, 'Interface');
    fclose(interface);
    set(interface, 'InputBufferSize', 101000);
    set(interface, 'OutputBufferSize', 101000);

ConnectInitCode
  Code:
    function init(obj)
    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interface = get(obj, 'Interface');
    fprintf(interface, 'HEADER OFF');
    fprintf(interface, 'VERBOSE ON');
    query(interface, '*ESR?');

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property ByteOrder
    Type: InstrumentCommand
    ConfigureCommand: WFMOutpre:BYT_Or
    QueryCommand: WFMOutpre:BYT_Or?
    PermissibleType: String enum [bigEndian=MSB, littleEndian=LSB]
    DefaultValue: bigEndian
    ReadOnly: never

  Property Coupling
    Type: InstrumentCommand
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: Never

  Property Precision
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface
      interface = get(obj,'interface');
      propertyValue = '';

      % Set data width
      fprintf(interface,'WFMO:Byt_NR?')
      width = fscanf(interface);

      % Remove the newline character at the end of the string
      % The same is done for encoding
      width(length(width))= '';
      width  = str2num(width);

      % Check the data format and define propertyValue to the appropriate value
      fprintf(interface,'DATA:ENCdg?')
      encoding  = fscanf(interface);
      encoding(length(encoding)) = '';

      % define propertyValue with the right value
      if any(strcmpi(encoding,{'RIBinary','SRIbinary'}))
          propertyValue = ['int' num2str(8*width)];
      elseif any(strcmpi(encoding,{'RPBinary','SRPbinary'}))
           propertyValue = ['uint' num2str(8*width)];
      else propertyValue = 'ascii';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface
      interface = get(obj,'interface');

      % Get the byte order
      fprintf(interface,'WFMOutPre:BYT_Or?')

      % Get the order and remove newline character in string
      order = fscanf(interface);
      order(length(order)) = '';

      % Only an S differenciates the two commands(RIBinary and SRIBinary)
      % for signed integers. The S will be added to the command if the byte
      % order is LSB
      byteOrder ='';
      if strcmpi(order,'LSB') == 1
          byteOrder = 'S';
      end

      % Specify format
      if strcmpi(propertyValue,'ascii')
          fprintf(interface,['DATA:ENCdg ASCIi'])
          %setting data:enc to ASCII reset Byte_Or to MSB, which is unneccssary.
          %this sets it back to what is was previously.
          fprintf(interface,['WFMOutPre:BYT_Or ',order]);
      elseif any(strcmpi(propertyValue,{'int8','int16'}))
          fprintf(interface,['DATA:ENCdg ' byteOrder 'RIBinary'])
      elseif any(strcmpi(propertyValue,{'uint8','uint16','uint32','unit64'}))
        fprintf(interface,['DATA:ENCdg ' byteOrder 'RPBinary'])
      end

      % Set the width
      if any(strcmpi(propertyValue,{'int8','uint8'}))
          fprintf(interface,['WFMO:Byt_NR 1'])
      elseif any(strcmpi(propertyValue,{'int16','uint16'}))
          fprintf(interface,['WFMO:Byt_NR 2'])
      elseif any(strcmpi(propertyValue,{'int32','uint32'}))
          fprintf(interface,['WFMO:Byt_NR 4'])
      elseif any(strcmpi(propertyValue,{'int64','uint64'}))
          fprintf(interface,['WFMO:Byt_NR 8'])
      else
          fprintf(interface,['WFMO:Byt_NR 1']);
         % error('Invalid format. Valid values are: int8,int16, uint8,uint16.')
      end
    PermissibleType: String enum [ascii=ASCIi, int8=int8, int16=int16, uint8=uint8, uint16=uint16, int32=int32, int64=int64, uint32=uint32, uint64=uint64]
    DefaultValue: ascii
    ReadOnly: never

  Method getTrace
    MCode:
      function [x, y, xunit, yunit] = getTrace(obj, source, Scale)
      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
      num1 = 1;
      num2 = 4;
      snum1 = num2str(num1);
      snum2 = num2str(num2);

      if (nargout == 0)
          return;
      end

      scale = true;
      y = [];
      x = [];
      yunit = 'unknown';
      xunit = 'unknown';

      if strcmpi(source(1),'c')
      	type = 'ch';
      elseif strcmpi(source(1),'r')
      	type = 'ref';
      elseif strcmpi(source(1),'m')
      	type = 'math';
      else
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      try
      	pos = str2num(source(length(source)));
      catch
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      if pos<num1 || pos>num2
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      trueSource = [type, num2str(pos)];

      if (nargin > 2)
          try
              scale = logical(Scale);
          catch
              error('SCALE must be a logical.');
          end
      end

      % Get interface
      interface = get(obj, 'interface');

      oldPrecision = get(obj, 'Precision');
      oldByteOrder = get(obj, 'ByteOrder');

      set(obj, 'Precision', 'int16');
      set(obj, 'ByteOrder', 'littleEndian');

      try
          % Specify source
          fprintf(interface,['DATA:SOURCE ' trueSource]);

          % Issue the curve transfer command.
          fprintf(interface, 'CURVE?');

          raw = binblockread(interface, 'int16');

          % Tektronix scopes send and extra terminator after the binblock.
          fread(interface, 1);
      catch
      	%if there is a problem with binblockread, you will not be able to reset
      	% Precision or ByteOrder
          error(lasterr);
      end

      if (isempty(raw))
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error('An error occurred while reading the waveform.');
      end

      if (scale == false)
          y = raw;
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          ptcnt = str2num(query(interface, 'WFMoutPRE:NR_PT?'));
          x = 1:ptcnt;

          if (nargout > 2)
              xunit = query(interface, 'WFMoutPRE:XUnit?');
              xunit(xunit == '"') = [];
              yunit = query(interface, 'WFMoutPRE:YUnit?');
              yunit(yunit == '"') = [];
          end
      else
          yoffs = str2num(query(interface, 'WFMoutPRE:YOFF?'));
          ymult = str2num(query(interface, 'WFMoutPRE:YMULT?'));
          yzero = str2num(query(interface, 'WFMoutPRE:YZERO?'));
          y = ((raw - yoffs) .* ymult) + yzero;
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          xzero = str2num(query(interface, 'WFMoutPRE:XZERO?'));
          xincr = str2num(query(interface, 'WFMoutPRE:XINCR?'));
          ptcnt = str2num(query(interface, 'WFMoutPRE:NR_PT?'));
          x = (((0:(ptcnt-1)) .* xincr) + xzero);

          if (nargout > 2)
              xunit = query(interface, 'WFMoutPRE:XUnit?');
              xunit(xunit == '"') = [];
              yunit = query(interface, 'WFMoutPRE:YUnit?');
              yunit(yunit == '"') = [];
          end
      end
      y = y';

      set(obj, 'Precision', oldPrecision);
      set(obj, 'ByteOrder', oldByteOrder);
    Description: getTrace Transfer waveforms from the oscilloscope to MATLAB.

      Input in General instrument UI for CHANNEL must be in single quotes

      [Y, T] = INVOKE(obj, 'getTrace', CHANNEL) returns a waveform from the instrument,
      using channel string, CHANNEL.  Valid channel values are channel<x>, reference<y>, and
      math, where <x> is a number between 1 and the number of channels on the instrument and <y> is a letter between A and the number of reference channels on the instrument.

      [Y, T] = INVOKE(obj, 'getTrace', CHANNEL, SCALE) returns the data scaled to real units if SCALE is true, or as raw data if SCALE is false.

      To read the waveform data points the interface object associated with the device
      object must have a sufficiently large InputBufferSize property value.  If you receive
      an error about the buffer size being to small, or have difficulty reading a waveform,
      verify that it is large enough.  The size must be greater than two times the number
      of points in the waveform, plus approximately 50 bytes for header information.

      Example:
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');
      	[y, t] = invoke(obj, 'readwaveform', 'referenceA', false);

      Example changing the buffer size:
      	% Note the device object must be closed.
      	interfaceObj = get(deviceObj, 'interface');
      	% Allow for a 10,000 point waveform with a little extra room.
      	set(interfaceObj, 'InputBufferSize', 21000);
      	connect(deviceObj);
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');
