MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\sandbox\matlab\toolbox\instrument\instrument\drivers\tektronix_tds2024.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: Tektronix
InstrumentModel: TDS5104
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST; HEADER OFF; VERBOSE ON
Selftest: *TST?
Error: *ESR?;ALLEv?

CreateInitCode
  Code:
    function init(obj)
    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
    % Extract the interface object.
    interface = get(obj, 'Interface');

    fclose(interface);

    % Configure the buffer size to allow for waveform transfer.
    set(interface, 'InputBufferSize', 101000);
    set(interface, 'OutputBufferSize', 101000);

ConnectInitCode
  Code:
    function init(obj)
    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
    %get the interface
    interface = get(obj, 'interface');

    %If HEADER is not OFF or VERBOSE is not ON then responses retrieved from
    % the device will not match what is expected, and the driver will not
    % function properly.
    fprintf(interface, 'HEADER OFF');
    fprintf(interface, 'VERBOSE ON');

    %Clear the Standard Event Status Register (SESR) to remove possible Power
    % on event, which would otherwise be returned by getError.
    query(interface, '*ESR?');

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property ResponseHeaderState
    Type: InstrumentCommand
    QueryCommand: HEADer?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: off
    ReadOnly: always
    Description: Queries the Response Header Enable State that causes the oscilloscope to either include or omit headers on query responses.

      NOTE: Although the property is not truly read only for the instrument, the value must be 'off' for the driver to operate correctly.  As a result, it is set as read-only for the driver.

  Property VerboseEnabled
    Type: InstrumentCommand
    ConfigureCommand: VERBose
    QueryCommand: VERBose?
    PermissibleType: String enum [off=0, on=1]
    DefaultValue: off
    ReadOnly: always
    Description: Queries the Verbose state that controls the length of keywords on query responses.

      Although this property is configurable on the instrument, the driver requires that it always be on so that we receive predictable responses from the instrument.

  Method autoset
    Type: InstrumentCommand
    Line Command="AUTOSet EXECUTE" Output="false"
    Description: AUTOSET Automatic parameter adjustment.

      INVOKE(OBJ, 'autoset') causes the oscilloscope to adjust its vertical, horizontal, and trigger controls to display a more stable waveform.

  Method drivertest
    MCode:
      function varargout = drivertest(obj)

      % Set the object variable name.
      deviceObj = obj;

      % Wrap entire test in try catch.
      try
      fprintf('Test: midtest for tektronix_tds5104.mdd\n');
      fprintf(['Start time: ' datestr(now) '\n']);

      % Initialize variables.
      varargout              = {};
      noErrorMsg             = '0;0,"No events to report - queue empty"';
      stepWarningOccurred    = false;
      warningOccurred        = false;
      errorOccurred          = false;

      % Test Step 1: 1_Get parent.ResponseHeaderState (Get Property Test Step)

      errorcode = false;
      try
          % Query the property.
          temp = get(deviceObj, 'ResponseHeaderState');

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result '\n']);
          end

      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf(lasterr);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 2: 2_Get parent.VerboseEnabled (Get Property Test Step)

      errorcode = false;
      try
          % Query the property.
          temp = get(deviceObj, 'VerboseEnabled');

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result '\n']);
          end

      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf(lasterr);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 3: 3_Get Acquisition.AcquisitionCount (Get Property Test Step)
      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% This test step generated no code. Most likely because a
      % property or function to test was not selected.
      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% Test Step 4: 4_Set Acquisition.Control (Set Property Test Step)
      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% Overall error status for all settings.
      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% Valid values for the Control property.
      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% Test all supported values.
      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        % Configure the property.
      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        % Check if instrument error occurred.
      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        % Post information about error if one occurred.
      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        % Verify that the configured value matches the expected value.
      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            % Get the current property value.
      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            % Compare to the expected value.
      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            % Post information about test step failure.
      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                % Post actual value.
      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                % Post expected value.
      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        % A MATLAB error occurred.
      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        % Post information about error.
      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% Post message indicating if test step passed.
      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% Test Step 5: 5_Set Acquisition.Delay (Set Property Test Step)
      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% Valid values for the Delay property.
      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% Test Step 6: 6_Set Acquisition.Mode (Set Property Test Step)
      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% Valid values for the Mode property.
      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% Test Step 7: 7_Set Acquisition.NumberOfAverages (Set Property Test Step)
      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% Valid values for the NumberOfAverages property.
      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% Test Step 8: 8_Set Acquisition.State (Set Property Test Step)
      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% Valid values for the State property.
      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% Test Step 9: 9_Set Acquisition.Timebase (Set Property Test Step)
      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% Valid values for the Timebase property.
      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% Test Step 10: 10_Set Acquisition.WindowDelay (Set Property Test Step)
      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% Valid values for the WindowDelay property.
      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% Test Step 11: 13_Set Channel.Bandwidthlimit full (Set Property Test Step)
      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% Test Step 12: 15_Set Channel.Bandwidthlimit 150 (Set Property Test Step)
      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% Test Step 14: 18_Set Channel.Coupling (Set Property Test Step)
      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% Valid values for the Coupling property.
      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% Test Step 15: 19_Set Channel.Impedance (Set Property Test Step)
      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% Valid values for the Impedance property.
      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% Test Step 16: 20_Set Channel.Position (Set Property Test Step)
      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% Valid values for the Position property.
      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% Test Step 17: 21_Set Channel.Scale .001 (Set Property Test Step)
      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% Test Step 21: 25_Set Channel.State (Set Property Test Step)
      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% Test Step 22: 26_Set Channel.State on (Set Property Test Step)
      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% Test Step 23: 27_Set Cursor.CursorType (Set Property Test Step)
      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% Test Step 24: 28_Set Cursor.Enable (Set Property Test Step)
      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% Valid values for the Enable property.
      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% Test Step 25: 29_Get Cursor.HorizontalBarDelta (Get Property Test Step)
      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    % Query the property.
      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% Test Step 26: 30_Set Channel.Position 0 (Set Property Test Step)
      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% Test Step 27: 31_Set Cursor.HorizontalBarPosition1 -40e-3 (Set Property Test Step)
      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% Test Step 29: 33_Get Cursor.HorizontalBarUnits (Get Property Test Step)
      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% Test Step 30: 34_Set Cursor.Source (Set Property Test Step)
      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% Valid values for the Source property.
      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% Test Step 31: 35_Get Cursor.VerticalBarDelta (Get Property Test Step)
      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% Test Step 32: 36_UnconstrainedType Set Cursor.VerticalBarPosition1 -2e-3 (Set Property Test Step)
      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% Test Step 33: 37_Set Acquisition.Timebase 400e-6 (Set Property Test Step)
      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% Test Step 35: 39_Set Cursor.VerticalBarUnits (Set Property Test Step)
      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% Valid values for the VerticalBarUnits property.
      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% Test Step 36: 40_Set Display.Format (Set Property Test Step)
      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% Test Step 37: 41_Set Display.Persistence (Set Property Test Step)
      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% Valid values for the Persistence property.
      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% Test Step 38: 42_Set Display.Style (Set Property Test Step)
      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% Valid values for the Style property.
      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% Test Step 39: 43_UnconstrainedType Set Math.Definition (Set Property Test Step)
      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% Test Step 40: 44_Set Math.Label (Set Property Test Step)
      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% Test Step 41: 45_UnconstrainedType Set Math.LabelXPosition (Set Property Test Step)
      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% Valid values for the LabelXPosition property.
      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% Test Step 42: 46_UnconstrainedType Set Math.LabelYPosition (Set Property Test Step)
      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% Valid values for the LabelYPosition property.
      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% Test Step 43: 47_UnconstrainedType Set Math.Position (Set Property Test Step)
      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% Test Step 44: 48_UnconstrainedType Set Math.Scale (Set Property Test Step)
      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% Valid values for the Scale property.
      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% Test Step 45: 49_Set Math.Definition (Set Property Test Step)
      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% Test Step 46: 50_Set Math.State (Set Property Test Step)
      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% Test Step 47: 51_Set Measurement.MeasurementType (Set Property Test Step)
      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% Test Step 48: 52_Set Measurement.Source (Set Property Test Step)
      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% Test Step 49: 53_Get Measurement.Units (Get Property Test Step)
      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% Test Step 50: 54_Set Trigger.HoldoffTime (Set Property Test Step)
      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% Test Step 51: 55_Set Trigger.HoldoffType (Set Property Test Step)
      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% Valid values for the HoldoffType property.
      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% Test Step 52: 56_Set Trigger.Mode (Set Property Test Step)
      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% Test Step 53: 57_Set Trigger.Source (Set Property Test Step)
      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% Test Step 54: 58_Set Trigger.TriggerType (Set Property Test Step)
      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% Valid values for the TriggerType property.
      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% Test Step 55: 59_Set Trigger.VideoPolarity (Set Property Test Step)
      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% Valid values for the VideoPolarity property.
      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% Test Step 56: 60_Set Trigger.VideoSource (Set Property Test Step)
      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% Valid values for the VideoSource property.
      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% Test Step 57: 61_Set Triggerb.Coupling (Set Property Test Step)
      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% Test Step 58: 62_Set Triggerb.Level 0 (Set Property Test Step)
      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% Test Step 61: 65_Set Triggerb.Slope (Set Property Test Step)
      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% Valid values for the Slope property.
      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% Test Step 62: 66_Set Triggerb.Source (Set Property Test Step)
      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% Test Step 63: 67_Get Triggerb.State (Get Property Test Step)
      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% Test Step 64: 68_Set Waveform.ByteOrder (Set Property Test Step)
      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% Test Step 65: 69_Set Waveform.EndingPoint (Set Property Test Step)
      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% Valid values for the EndingPoint property.
      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% Test Step 66: 70_Set Waveform.FirstPoint (Set Property Test Step)
      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% Valid values for the FirstPoint property.
      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% Test Step 67: 71_Get Waveform.MaxNumberPoint (Get Property Test Step)
      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% Test Step 68: 72_Set Waveform.Precision (Set Property Test Step)
      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% Valid values for the Precision property.
      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% Test Step 69: autoset (Function Test Step)
      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    % Execute the function.
      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% Test Step 70: devicereset (Function Test Step)
      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% Test Step 71: factoryreset (Function Test Step)
      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% Test Step 72: geterror (Function Test Step)
      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% Test Step 73: disablelocalcontrols (Function Test Step)
      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% Test Step 74: enablelocalcontrols (Function Test Step)
      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% Test Step 75: savestate 10 (Function Test Step)
      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% Test Step 76: loadstate 10 (Function Test Step)
      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% Post results.
      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    % An error occurred while running the test.
      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

  Method factoryreset
    Type: InstrumentCommand
    Line Command="FACtory" Output="false"
    Line Command="HEADER OFF" Output="false"
    Description: FACTORYRESET  Resets the oscilloscope to its factory default settings.

      INVOKE(OBJ, 'factoryreset')  resets the oscilloscope to its factory settings.

  Method getTrace
    MCode:
      function [y, x, yunit, xunit] = getTrace(obj, source)
      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
      num1 = 1;
      num2 = 4;
      snum1 = num2str(num1);
      snum2 = num2str(num2);

      if (nargout == 0)
          return;
      end

      scale = true;
      y = [];
      x = [];
      yunit = 'unknown';
      xunit = 'unknown';

      if strcmpi(source(1),'c')
      	type = 'ch';
      elseif strcmpi(source(1),'r')
      	type = 'ref';
      elseif strcmpi(source(1),'m')
      	type = 'math';
      else
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      try
      	pos = str2num(source(length(source)));
      catch
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      if pos<num1 || pos>num2
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      trueSource = [type, num2str(pos)];

      if (nargin > 2)
          try
              scale = logical(varargin{1});
          catch
              error('SCALE must be a logical.');
          end
      end

      % Get interface
      interface = get(get(obj,'parent'),'interface');

      oldPrecision = get(obj, 'Precision');
      oldByteOrder = get(obj, 'ByteOrder');

      set(obj, 'Precision', 'int16');
      set(obj, 'ByteOrder', 'littleEndian');

      try
          % Specify source
          fprintf(interface,['DATA:SOURCE ' trueSource]);

          % Issue the curve transfer command.
          fprintf(interface, 'CURVE?');

      	raw = binblockread(interface, 'int16');

          % Tektronix scopes send and extra terminator after the binblock.
          fread(interface, 1);
      catch
      	%if there is a problem with binblockread, you will not be able to reset
      	% Precision or ByteOrder
          error(lasterr);
      end

      if (isempty(raw))
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error('An error occurred while reading the waveform.');
      end

      if (scale == false)
          y = raw;
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          ptcnt = str2num(query(interface, 'WFMoutPRE:NR_PT?'));
          x = 1:ptcnt;

          if (nargout > 2)
              xunit = query(interface, 'WFMoutPRE:XUnit?');
              xunit(xunit == '"') = [];
              yunit = query(interface, 'WFMoutPRE:YUnit?');
              yunit(yunit == '"') = [];
          end
      else
          yoffs = str2num(query(interface, 'WFMoutPRE:YOFF?'));
          ymult = str2num(query(interface, 'WFMoutPRE:YMULT?'));
          yzero = str2num(query(interface, 'WFMoutPRE:YZERO?'));
          y = ((raw - yoffs) .* ymult) + yzero;
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          xzero = str2num(query(interface, 'WFMoutPRE:XZERO?'));
          xincr = str2num(query(interface, 'WFMoutPRE:XINCR?'));
          ptcnt = str2num(query(interface, 'WFMoutPRE:NR_PT?'));
          x = (((0:(ptcnt-1)) .* xincr) + xzero);

          if (nargout > 2)
              xunit = query(interface, 'WFMoutPRE:XUnit?');
              xunit(xunit == '"') = [];
              yunit = query(interface, 'WFMoutPRE:YUnit?');
              yunit(yunit == '"') = [];
          end
      end
      y = y';

      set(obj, 'Precision', oldPrecision);
      set(obj, 'ByteOrder', oldByteOrder);
    Description: READWAVEFORM Transfer waveforms from the oscilloscope to MATLAB.

      [Y, T] = INVOKE(obj, 'getTrace', CHANNEL) returns a waveform from the instrument,
      using channel string, CHANNEL.  Valid channel values are channel<x>, reference<y>, and
      math, where <x> is a number between 1 and the number of channels on the instrument and <y> is a letter between A and the number of reference channels on the instrument.

      [Y, T] = INVOKE(obj, 'readwaveform', CHANNEL, SCALE) returns the data scaled to real units if SCALE is true, or as raw data if SCALE is false.

      To read the waveform data points the interface object associated with the device
      object must have a sufficiently large InputBufferSize property value.  If you receive
      an error about the buffer size being to small, or have difficulty reading a waveform,
      verify that it is large enough.  The size must be greater than two times the number
      of points in the waveform, plus approximately 50 bytes for header information.

      Example:
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');
      	[y, t] = invoke(obj, 'readwaveform', 'referenceA', false);

      Example changing the buffer size:
      	% Note the device object must be closed.
      	interfaceObj = get(deviceObj, 'interface');
      	% Allow for a 10,000 point waveform with a little extra room.
      	set(interfaceObj, 'InputBufferSize', 21000);
      	connect(deviceObj);
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');

Group acquisition
  Description: The aquisition group define properties and function related to how the waveform is acquired and the timebase.
  Size: 1
  Mappings ChannelMap Command="Acquisition1" Index="1"

  Property AcquisitionCount
    Type: InstrumentCommand
    QueryCommand: ACQuire:NUMACq?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Indicate the number of acquisitions that have taken place since starting oscilloscope acquisition.

  Property Control
    Type: InstrumentCommand
    ConfigureCommand: ACQuire:STOPAfter
    QueryCommand: ACQuire:STOPAfter?
    PermissibleType: String enum [run-stop=RUNSTOP, single=SEQUENCE]
    DefaultValue: run-stop
    ReadOnly: never
    Description: Tells the oscilloscope when to stop taking acquisitions for edge trigger type.  If the property value is 'run-stop' then acquisition is controlled by the run/stop button on the oscilloscope.  If the value 'single' then a single acquisition is performed (note that 'single acquisition may include multiple triggers and wavforms depending on other property settings such as NumberOfAverages.

  Property Delay
    Type: InstrumentCommand
    ConfigureCommand: HORizontal:MAIn:POSition
    QueryCommand: HORizontal:MAIn:POSition?
    PermissibleType: Double bounded [Max="99.999" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the main time base horizontal position.

  Property FastAcquisition
    Type: InstrumentCommand
    ConfigureCommand: FASTAcq:STATE
    QueryCommand: FASTAcq:STATE?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Enables or disables Fast Acquisition.

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: ACQuire:MODe
    QueryCommand: ACQuire:MODe?
    PermissibleType: String enum [sample=SAMPLE, peakDetect=PEAKDETECT, average=AVERAGE, hires=HIRES, envelope=ENVELOPE]
    DefaultValue: Sample
    ReadOnly: never
    Description: Sets or query the oscilloscope acquisition mode.

  Property NumberOfAverages
    Type: InstrumentCommand
    ConfigureCommand: ACQuire:NUMAVg
    QueryCommand: ACQuire:NUMAVg?
    PermissibleType: Double enum [4.0, 16.0, 64.0, 128.0]
    DefaultValue: 4.0
    ReadOnly: never
    Description: Sets the number of oscilloscope waveform acquisitions that make up an averaged waveform.

  Property State
    Type: InstrumentCommand
    ConfigureCommand: ACQ:STATE
    QueryCommand: ACQ:STATE?
    PermissibleType: String enum [stop=0, run=1]
    DefaultValue: stop
    ReadOnly: never
    Description: Starts or stops oscilloscope acquisitions.

  Property Timebase
    Type: InstrumentCommand
    ConfigureCommand: HORizontal:MAIn:SCALe
    QueryCommand: HORizontal:MAIn:SCALe?
    PermissibleType: Double bounded [Max="40.0" Min="2.0E-10"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets the time per divison for the main time base.

  Property WindowDelay
    Type: InstrumentCommand
    ConfigureCommand: HORizontal:DELay:POSition
    QueryCommand: HORizontal:DELay:POSition?
    PermissibleType: Double bounded [Max="99.999" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries The window time base horizontal position.

Group channel
  Size: 4
  Mappings
    ChannelMap Command="CH4" Index="4"
    ChannelMap Command="CH3" Index="3"
    ChannelMap Command="CH2" Index="2"
    ChannelMap Command="CH1" Index="1"

  Property BandwidthLimit
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the devide object
      device = get(obj,'Parent');

      %get the interface
      interface = get(device, 'Interface');

      %get the <ID>, e.g.: CH1, CH2...
      id = get(obj,'HwName');

      %ask for the property value from the device
      %send the commands as a string (%s)
      %return the value as a float (%f)
      bandwidthLimit = query(interface,[ id, ':bandwidth?'],'%s','%f');

      %value is returned in Hertz, convert to MegaHertz
      propertyValue = bandwidthLimit/1000000;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the devide object
      device = get(obj,'Parent');

      %get the interface
      interface = get(device, 'Interface');

      %get the <ID>, e.g.: CH1, CH2...
      id = get(obj,'HwName');

      %find out if propertyValue was passed as a char ('full'), then we can send
      %the command directly to the device
      if ischar(propertyValue)
      	fprintf(interface, [id, ':bandwidth FULL']);

      %otherwise, we have to convert from MHz to Hz
      else
      	bandwidthLimit = propertyValue*1000000;
      	fprintf(interface, [id, ':bandwidth ',num2str(bandwidthLimit)]);

      end%if ischar(propertyValue)
    PermissibleType: Double enum [20.0, 150.0, 1000.0]
    PermissibleType: String enum [full=1000000000]
    DefaultValue: 20.0
    ReadOnly: never
    Description: Sets or queries the bandwidth setting of the specified oscilloscope channel.

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: <ID>:COUP
    QueryCommand: <ID>:COUP?
    PermissibleType: String enum [ac=AC, dc=DC, ground=GND]
    DefaultValue: ac
    ReadOnly: never
    Description: Sets or queries the vertical gain of the specified oscilloscope channel.

  Property Impedance
    Type: InstrumentCommand
    ConfigureCommand: <ID>:TERmination
    QueryCommand: <ID>:TERmination?
    PermissibleType: String enum [fifty=50.0000, onemillion=1.0000E+6]
    DefaultValue: fifty
    ReadOnly: never
    Description: sets or queries the connected/ddisconnected status of the 50 ohm resistor.

  Property Offset
    Type: InstrumentCommand
    ConfigureCommand: <ID>:OFFSET
    QueryCommand: <ID>:OFFSET?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the offset of the select channel in volts.

  Property Position
    Type: InstrumentCommand
    ConfigureCommand: <ID>:POSition
    QueryCommand: <ID>:POSition?
    PermissibleType: Double bounded [Max="8.0" Min="-8.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the vertical position of the specified oscilloscope channel in divisions above the center graticule.

  Property Scale
    Type: InstrumentCommand
    ConfigureCommand: <ID>:SCAle
    QueryCommand: <ID>:SCAle?
    PermissibleType: Double bounded DependentProperty=Impedance DependentPropertyValue=50.0000 [Max="10.0" Min="0.0010"]
    PermissibleType: Double bounded DependentProperty=Impedance DependentPropertyValue=1.0000e+6 [Max="1.0" Min="0.0010"]
    DefaultValue: 0.0020
    ReadOnly: never
    Description: Sets or queries the vertical gain of the specified oscilloscope channel.

  Property State
    Type: InstrumentCommand
    ConfigureCommand: Select:<ID>
    QueryCommand: Select:<ID>?
    PermissibleType: String enum [off=0, on=1]
    DefaultValue: off
    ReadOnly: never
    Description: Enable or disable the display of the waveform on the scope.

Group cursor
  Size: 1
  Mappings ChannelMap Command="Cursor1" Index="1"

  Property CursorType
    Type: InstrumentCommand
    ConfigureCommand: CURSor:FUNCtion
    QueryCommand: CURSor:FUNCtion?
    PermissibleType: String enum [horizontalBars=HBARS, verticalBars=VBARS, paired=PAIRED, split=SPLIT]
    DefaultValue: horizontalBars
    ReadOnly: never
    Description: Selects the cursor type.

  Property Enable
    Type: InstrumentCommand
    ConfigureCommand: CURSor:STATE
    QueryCommand: CURSor:STATE?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never

  Property HorizontalBarDelta
    Type: InstrumentCommand
    QueryCommand: CURSor:HBArs:DELTa?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returs the difference (in verticalunits) between the two horizontal bar cursors in the oscilloscope display.

  Property HorizontalBarPosition1
    Type: InstrumentCommand
    ConfigureCommand: CURSor:HBArs:POSITION1
    QueryCommand: CURSor:HBArs:POSITION1?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first horizontal bar cursor position.

  Property HorizontalBarPosition2
    Type: InstrumentCommand
    ConfigureCommand: CURSor:HBArs:POSITION2
    QueryCommand: CURSor:HBArs:POSITION2?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second horizontal bar cursor position.

  Property HorizontalBarUnits
    Type: InstrumentCommand
    QueryCommand: CURSor:HBARS:UNIts?
    PermissibleType: String enum [volts=VOL, divisions=DIV, decibels=DECIBELS, unknown=UNKNOWN]
    DefaultValue: volts
    ReadOnly: always
    Description: Returns the vertical scale units for the selected cursor source waveform.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: CURSor:SOUrce
    QueryCommand: CURSor:SOUrce?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, reference1=REF1, reference2=REF2, math1=MATH1, channel3=CH3, channel4=CH4, reference3=REF3, reference4=REF4, math2=MATH2, math3=MATH3, math4=MATH4]
    DefaultValue: Channel1
    ReadOnly: never
    Description: Sets or queries the waveform that is the source of the vertical and horizontal scale factors used in determining cursor values.

  Property VerticalBarDelta
    Type: InstrumentCommand
    QueryCommand: CURSor:VBArs:DELTa?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the time or frequency difference between the two vertical bar cursors.

  Property VerticalBarPosition1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %Tell the instrument you want it to tell you the value
      fprintf(interface, 'CURSor:VBArs:POSITION1?');

      %retrieve the value from the instrument, and convert it to a double
      propertyValue = fscanf(interface,'%f');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      mode = 'MAIn';

      %request the TimeBase (or WindowTimeBase) from the instrument
      fprintf(interface,['HORizontal:',mode,':SCALe?']);
      timebase = fscanf(interface,'%f');

      %request the Delay (or WindowDelay) from the instrument
      fprintf(interface,['HORizontal:',mode,':POSition?']);
      delay = fscanf(interface,'%f');

      %reticule has 10 division, timebase is seconds/division
      % range is the seconds across the entire display
      range = 10*timebase;

      %horizontal cursor positions can range from one side of the display to the
      % other, and are measured in seconds
      minimum = -1*range/2-delay;
      maximum = range/2-delay;

      if propertyValue > maximum || propertyValue < minimum

      	error(['Invalid value for VerticalBarPosition1. ',...
      		'Valid values for current Scale and Position settings: ',...
      		'a value between ',num2str(minimum),' and ',num2str(maximum)]);

      end%if propertyValue > maximum || propertyValue < minimum

      %set the property to the specified value
      fprintf(interface, ['CURSor:VBArs:POSITION1 ', num2str(propertyValue)]);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first vertical bar cursor position.

  Property VerticalBarPosition2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %Tell the instrument you want it to tell you the value
      fprintf(interface, 'CURSor:VBArs:POSITION2?');

      %retrieve the value from the instrument, and convert it to a double
      propertyValue = fscanf(interface,'%f');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      mode = 'MAIn';

      %request the TimeBase (or WindowTimeBase) from the instrument
      fprintf(interface,['HORizontal:',mode,':SCALe?']);
      timebase = fscanf(interface,'%f');

      %request the Delay (or WindowDelay) from the instrument
      fprintf(interface,['HORizontal:',mode,':POSition?']);
      delay = fscanf(interface,'%f');

      %reticule has 10 division, timebase is seconds/division
      % range is the seconds across the entire display
      range = 10*timebase;

      %horizontal cursor positions can range from one side of the display to the
      % other, and are measured in seconds
      minimum = -1*range/2-delay;
      maximum = range/2-delay;

      if propertyValue > maximum || propertyValue < minimum

      	error(['Invalid value for VerticalBarPosition1. ',...
      		'Valid values for current Scale and Position settings: ',...
      		'a value between ',num2str(minimum),' and ',num2str(maximum)]);

      end%if propertyValue > maximum || propertyValue < minimum

      %set the property to the specified value
      fprintf(interface, ['CURSor:VBArs:POSITION2 ', num2str(propertyValue)]);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second vertical bar cursor position.

  Property VerticalBarUnits
    Type: InstrumentCommand
    ConfigureCommand: CURSor:VBArs:UNIts
    QueryCommand: CURSor:VBArs:UNIts?
    PermissibleType: String enum [seconds=SECO, hertz=HER]
    DefaultValue: seconds
    ReadOnly: never
    Description: Sets or queries the units for the vertical bar cursors.

Group display
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Format
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:FORMat
    QueryCommand: DISPlay:FORMat?
    PermissibleType: String enum [xy=XY, yt=YT, xyz=XYZ]
    DefaultValue: YT
    ReadOnly: never
    Description: Sets or queries the oscilloscope display format.

  Property Persistence
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get Device Object
      deviceObj = get(obj,'Parent');

      %get Interface
      interface = get(deviceObj,'Interface');

      %get the persistence state
      fprintf(interface,'DISPlay:PERSistence?');
      style = fscanf(interface);

      if strncmpi( style,'OFF',min(3,length('style')) )
      	propertyValue = 0;
      elseif strncmpi( style,'INFPersist',min(10,length(style)) )
      	propertyValue = 99;
      elseif strncmpi( style,'VARPersist',min(10,length(style)) )

      	%get the actual persistence value
      	fprintf(interface, 'DISPlay:VARPersist?');
      	propertyValue = fscanf(interface,'%f');

      else
      	error(['Unexpected value returned for Persistence. Expected:'...
      		' ''OFF'',''INFPersist'', or ''VARPersist''. Received: '...
      		style]);
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get Device Object
      deviceObj = get(obj,'Parent');

      %get Interface
      interface = get(deviceObj,'Interface');

      %0 = off
      if propertyValue == 0
      	fprintf(interface,'DISPlay:PERSistence OFF')
      %%99 = inf
      elseif propertyValue == 99
      	fprintf(interface,'DISPlay:PERSistence INFPersist');
      %%anything else = variable
      else
      	%set the mode
      	fprintf(interface,'DISPlay:PERSistence VARPersist');
      	%set the value
      	fprintf(interface,['DISPlay:VARPersist ',num2str(propertyValue)]);
      end
    PermissibleType: Double bounded [Max="10.0" Min="0.05"]
    PermissibleType: Double enum [0.0, 99.0]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets the length of time that data points are displayed.

  Property Style
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:STYle
    QueryCommand: DISPlay:STYle?
    PermissibleType: String enum [dots=DOTs, vectors=VECtors, intensified=INTENSIFIED]
    DefaultValue: Dots
    ReadOnly: never
    Description: Selects how to display the waveform data.

Group math
  Size: 4
  Mappings
    ChannelMap Command="4" Index="4"
    ChannelMap Command="3" Index="3"
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property Definition
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the Parent Object
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %get the value
      fprintf(interface, [get(obj,'HwName'),':DEFIne?']);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the Parent Object
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %set the value
      %The only reason MCode is used is so that the string can be wrapped in
      %	double quotes before sent, so the user doesn't have to do it.
      fprintf(interface, [get(obj,'HwName'),':DEFIne "',propertyValue,'"']);
    PermissibleType: String enum [ch1 + ch2="CH1 + CH2", ch1 - ch2="CH1 - CH2", ch2 - ch1="CH2 - CH1", ch3 + ch4="CH3 + CH4", ch3 - ch4="CH3 - CH4", ch4 - ch3="CH4 - CH3"]
    PermissibleType: String none
    DefaultValue: ch1 + ch2
    ReadOnly: never
    Description: Define a mathwaveform

  Property Label
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the Parent object
      parent = get(obj,'Parent');

      %get the interface
      interface = get(parent,'Interface');

      %ask for the value
      fprintf(interface, ['MATH',obj.HwName,':LABEL:NAMe?']);

      %return the value
      propertyValue = fscanf(interface);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the Parent object
      parent = get(obj,'Parent');

      %get the interface
      interface = get(parent,'Interface');

      %send the value
      fprintf(interface, ['MATH',obj.HwName,':LABEL:NAMe "',propertyValue,'"']);
    PermissibleType: String none
    ReadOnly: never

  Property LabelXPosition
    Type: InstrumentCommand
    ConfigureCommand: MATH<ID>:LABEL:XPOS
    QueryCommand: MATH<ID>:LABEL:XPOS?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property LabelYPosition
    Type: InstrumentCommand
    ConfigureCommand: MATH<ID>:LABEL:YPOS
    QueryCommand: MATH<ID>:LABEL:YPOS?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Position
    Type: InstrumentCommand
    ConfigureCommand: MATH<ID>:POSition
    QueryCommand: MATH<ID>:POSition?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Scale
    Type: InstrumentCommand
    ConfigureCommand: MATH<ID>:SCAle
    QueryCommand: MATH<ID>:SCAle?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property State
    Type: InstrumentCommand
    ConfigureCommand: SELECT:MATH<ID>
    QueryCommand: SELECT:MATH<ID>?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never

Group measurement
  Size: 9
  Mappings
    ChannelMap Command="IMMED" Index="9"
    ChannelMap Command="MEAS8" Index="8"
    ChannelMap Command="MEAS7" Index="7"
    ChannelMap Command="MEAS6" Index="6"
    ChannelMap Command="MEAS5" Index="5"
    ChannelMap Command="MEAS4" Index="4"
    ChannelMap Command="MEAS3" Index="3"
    ChannelMap Command="MEAS2" Index="2"
    ChannelMap Command="MEAS1" Index="1"

  Property MeasurementType
    Type: InstrumentCommand
    ConfigureCommand: MEASUrement:<ID>:TYPe
    QueryCommand: MEASUrement:<ID>:TYPe?
    PermissibleType: String enum [frequency=FREQ, mean=MEAN, period=PERI, peak2peak=PK2PK, crms=CRM, minimum=MINI, maximum=MAX, positivewidth=PWIDTH, negativewidth=NWIDTH, amplitude=AMP, area=ARE, carea=CAR, burst=BUR, cmean=CME, delay=DEL, fall=FALL, high=HIGH, low=LOW, negativeduty=NDUTY, positiveduty=PDUTY, negativeovershoot=NOVERSHOOT, positiveovershoot=POVERSHOOT, phase=PHA, rise=RIS, rms=RMS, undefined=UNDEFINED]
    DefaultValue: Frequency
    ReadOnly: never
    Description: Sets or query the measurement type.  By default this driver supports the standard measurement types of the oscilloscope, and does not include any measurements supported only by expansion modules.  To add additional measurement types supported by your model, edit the driver using midedit.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: MEASU:<ID>:SOUrce
    QueryCommand: MEASU:<ID>:SOUrce?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, channel3=CH3, channel4=CH4, reference1=REF1, reference2=REF2, reference3=REF3, reference4=REF4, math1=MATH1, math2=MATH2, math3=MATH2, math4=MATH4, histogram=HISTOGRAM]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets or queries the source of the measurement.

  Property Source2
    Type: InstrumentCommand
    ConfigureCommand: MEASU:<ID>:SOUrce2
    QueryCommand: MEASU:<ID>:SOUrce2?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, channel3=CH3, channel4=CH4, reference1=REF1, reference2=REF2, reference3=REF3, reference4=REF4, math1=MATH1, math2=MATH2, math3=MATH2, math4=MATH4]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets or queries the source of the measurement.

  Property Units
    Type: InstrumentCommand
    QueryCommand: MEASU:<ID>:UNIts?
    PermissibleType: String enum [hertz=HZ, volts=VOLTS, seconds=S, hits=HITS, decibells=DB, voltseconds=VS, voltvolts=VV, watts=W, waveforms=WFMS, unknown=?, degrees="\b0"]
    PermissibleType: String none
    DefaultValue: hertz
    ReadOnly: always
    Description: Returns the units for the oscilloscope measurement specified the mesurement type.

  Property Value
    Type: InstrumentCommand
    QueryCommand: MEASU:<ID>:VALue?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the value of a measurement.  If the object is the immediate measurement object (the HwName property is 'IMMED') this property is always valid.  For the standard periodic measurements, it is only a valid valid if the MesesurementType is not 'none'.

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Method disablelocalcontrols
    Type: InstrumentCommand
    Line Command="LOCK ALL" Output="false"
    Description: DISABLELOCALCONTROLS Disable all front-panel buttons and knobs.

      INVOKE(OBJ, 'disablelocalcontrols') 'unlocks' all front-panel keys and knobs.

  Method enablelocalcontrols
    Type: InstrumentCommand
    Line Command="LOCK NONe" Output="false"
    Description: ENABLELOCALCONTROLS Enable all front-panel buttons and knobs.

      INVOKE(OBJ, 'enablelocalcontrols') 'locks' all front-panel keys and knobs.

  Method loadstate
    MCode:
      function loadstate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 10, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif location ~= floor(location)
              error('LOCATION must be a scalar');
          elseif  location >10 || location <1
                  error('LOCATION must be between 1 and 10 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*RCL ' num2str(location)])
    Description: LOADSTATE  Recall a previously stored state.

      INVOKE(OBJ, loadstate, location) restores the state of the oscilloscope from a copy of settings stores in memory.

  Method savestate
    MCode:
      function savestate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 10, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif location ~= floor(location)
              error('LOCATION must be a scalar');
          elseif  location >10 || location <1
                  error('LOCATION must be between 1 and 10 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*SAV ' num2str(location)])
    Description: SAVESTATE  Save the current state of the oscilloscope.

      INVOKE(OBJ,'savestate',location) stores an instrument configuration at the specified memory location, LOCATION.

Group trigger
  Description: Properties and methods for controlling the A Trigger
  Size: 1
  Mappings ChannelMap Command="trigger1" Index="1"

  Property HoldoffTime
    Type: InstrumentCommand
    ConfigureCommand: TRIGger:A:HOLDoff:TIMe
    QueryCommand: TRIGger:A:HOLDoff:TIMe?
    PermissibleType: Double bounded [Max="12.0" Min="2.5E-7"]
    DefaultValue: 2.5E-7
    ReadOnly: never
    Description: sets or queries the selected triggers's holdoff time

  Property HoldoffType
    Type: InstrumentCommand
    ConfigureCommand: Trigger:A:Holdoff:by
    QueryCommand: Trigger:A:Holdoff:by?
    PermissibleType: String enum [time=TIM, default=DEFA]
    DefaultValue: time
    ReadOnly: never
    Description: Sets the selected trigger's holdoff type

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: Trigger:A:Mode
    QueryCommand: Trigger:A:Mode?
    PermissibleType: String enum [auto=AUTO, normal=NORM]
    DefaultValue: normal
    ReadOnly: never
    Description: Sets the trigger mode for the edge trigger type.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: TRIGger:A:EDGE:SOURce
    QueryCommand: TRIGger:A:EDGE:SOURce?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, channel3=CH3, channel4=CH4, auxiliary=AUX, acline=LINE]
    DefaultValue: channel1
    ReadOnly: never

  Property State
    Type: InstrumentCommand
    QueryCommand: TRIGger:STATE?
    PermissibleType: String enum [armed=Armed, ready=Ready, trigger=Trigger, auto=Auto, save=Save, dpo=DPO]
    DefaultValue: Armed
    ReadOnly: always
    Description: Sets or query whether or not the B trigger is part of the triggering sequence

  Property TriggerType
    Type: InstrumentCommand
    ConfigureCommand: Trigger:A:Type
    QueryCommand: Trigger:A:Type?
    PermissibleType: String enum [edge=EDGE, video=VID, pulse=PUL, logic=LOGI]
    DefaultValue: edge
    ReadOnly: never
    Description: Sets the type of oscilloscope trigger.  This is equivalent to setting Type in the Trigger menu.

  Property VideoPolarity
    Type: InstrumentCommand
    ConfigureCommand: Trigger:A:Video:Polarity
    QueryCommand: Trigger:A:Video:Polarity?
    PermissibleType: String enum [normal=NORMAL, inverted=INVERT]
    DefaultValue: normal
    ReadOnly: never
    Description: Sets the video trigger polarity.  This is equivalent to selecting Polarity in the Trigger/Video menu.

  Property VideoSource
    Type: InstrumentCommand
    ConfigureCommand: Trigger:A:Video:Source
    QueryCommand: Trigger:A:Video:Source?
    PermissibleType: String enum [channel1=ch1, channel2=ch2, channel3=CH3, channel4=CH4]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets the source for the main video trigger.  This is equivalent to selecting Source in the Video trigger menu.

  Method trigger
    Type: InstrumentCommand
    Line Command="Trigger force" Output="false"
    Description: TRIGGER Trigger the instrument.

      INVOKE(OBJ,'TRIGGER') performs a Group Execute trigger.

Group triggerb
  Description: Properties and methods for controlling the B Trigger
  Size: 1
  Mappings ChannelMap Command="TriggerB1" Index="1"

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: Trigger:B:Edge:Coupling
    QueryCommand: Trigger:B:Edge:Coupling?
    PermissibleType: String enum [dc=DC, noiseRejection=NOISEREJ, atrigger=ATRIGGER]
    DefaultValue: dc
    ReadOnly: never
    Description: Sets or queries the type of coupling for the B edge trigger.

  Property Level
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get Device Object
      deviceObj = get(obj,'Parent');

      %get Interface
      interface = get(deviceObj,'Interface');

      id = 'B';

      %tell the device you want the value
      fprintf(interface,['TRIGGer:',id,':LEVel?']);

      %get the value
      propertyValue = fscanf(interface,'%f');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get Device Object
      deviceObj = get(obj,'Parent');

      %get Interface
      interface = get(deviceObj,'Interface');

      id = 'B';

      %if is one of the enumerated strings, just pass it right on
      if ischar(propertyValue)
      	%set the value
      	fprintf(interface,['TRIGGer:',id,':LEVel ',num2str(propertyValue)]);
      else
      	%get the source
      	fprintf(interface,['TRIGGer:',id,':EDGE:SOURce?']);
      	source = deblank(fscanf(interface));

      	acceptableSources = {'ch1','ch2','ch3','ch4','auxiliary'};
      	if isempty(strmatch(lower(source),acceptableSources))
      		error(['Unexpected value for source. Expect ch1, ch2, ch3, ch4, or auxiliary. Recevied: ',...
      			source]);
      	end%if isempty(strmatch(lower(source),acceptableSource))

      	%if source is auxiliary, don't check property value
      	if isempty(strmatch(lower(source),{'ch1','ch2','ch3','ch4'}));
      		fprintf(interface,['TRIGGer:',id,':LEVel ',num2str(propertyValue)]);
      	else

      		%get the scale
      		fprintf(interface,[source,':SCAle?']);
      		scale = fscanf(interface,'%f');

      		%when source is zeroed, Trigger Level can go to plus or minus 8 times the scale or the source
      		range = 16*scale;

      		%get the source's position
      		fprintf(interface,[source,':POSition?']);
      		position = fscanf(interface,'%f');

      		%position is in divs, we need it in volts, scale is volts/div
      		position = position*scale;

      		minimum = -1*range/2 - position;
      		maximum = range/2 - position;

      		if (propertyValue > maximum)
      			error(['Invalid value for Level. Valid values: a value from ',...
      				num2str(minimum),' to ',num2str(maximum),' (inclusive).']);
      		end%if propertyValue > maximum
      		if (propertyValue < minimum)
      			error(['Invalid value for Level. Valid values: a value from ',...
      				num2str(minimum),' to ',num2str(maximum),' (inclusive).']);
      		end%if propertyValue < minimum

      		%set the value
      		fprintf(interface,['TRIGGer:',id,':LEVel ',num2str(propertyValue)]);

      	end%if ~isempty(strmatch(lower(source),{'ext','ext5'}));

      end%if ischar(propertyValue)
    PermissibleType: Double none
    PermissibleType: String enum [ecl=ECL, ttl=TTL]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets the oscilloscope B trigger level.

  Property Slope
    Type: InstrumentCommand
    ConfigureCommand: Trigger:B:Edge:Slope
    QueryCommand: Trigger:B:Edge:Slope?
    PermissibleType: String enum [falling=FALL, rising=RISE]
    DefaultValue: rising
    ReadOnly: never
    Description: Selects a rising or falling slope for the B edge trigger.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: Trigger:B:Edge:Source
    QueryCommand: Trigger:B:Edge:Source?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, channel3=CH3, channel4=CH4, auxiliary=AUXILIARY]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets of the source for the B edge trigger.

Group waveform
  Size: 1
  Mappings ChannelMap Command="Waveform1" Index="1"

  Property ByteOrder
    Type: InstrumentCommand
    ConfigureCommand: WFMOutPre:BYT_Or
    QueryCommand: WFMOutpre:BYT_Or?
    PermissibleType: String enum [bigEndian=MSB, littleEndian=LSB]
    DefaultValue: littleEndian
    ReadOnly: never
    Description: Sets or queries which byte of binary waveform data is transmitted first during a waveform transfer.

  Property EndingPoint
    Type: InstrumentCommand
    ConfigureCommand: DATa:STOP
    QueryCommand: DATa:STOP?
    PermissibleType: Double none
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the ending point for waveformm data transfers.

  Property FirstPoint
    Type: InstrumentCommand
    ConfigureCommand: DATa:STARt
    QueryCommand: DATa:STARt?
    PermissibleType: Double none
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the starting point for waveformm data transfers.

  Property MaxNumberPoint
    Type: InstrumentCommand
    QueryCommand: HORizontal:RECordlength?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: The maximum number of acqusition data points.

  Property Precision
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface
      interface = get(get(obj,'parent'),'interface');
      propertyValue = '';

      % Set data width
      fprintf(interface,'WFMO:Byt_NR?')
      width = fscanf(interface);

      % Remove the newline character at the end of the string
      % The same is done for encoding
      width(length(width))= '';
      width  = str2num(width);

      % Check the data format and define propertyValue to the appropriate value
      fprintf(interface,'DATA:ENCdg?')
      encoding  = fscanf(interface);
      encoding(length(encoding)) = '';

      % define propertyValue with the right value
      if any(strcmpi(encoding,{'RIBinary','SRIbinary'}))
          propertyValue = ['int' num2str(8*width)];
      elseif any(strcmpi(encoding,{'RPBinary','SRPbinary'}))
           propertyValue = ['uint' num2str(8*width)];
      else propertyValue = 'ascii';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface
      interface = get(get(obj,'parent'),'interface');

      % Get the byte order
      fprintf(interface,'WFMOutPre:BYT_Or?')

      % Get the order and remove newline character in string
      order = fscanf(interface);
      order(length(order)) = '';

      % Only an S differenciates the two commands(RIBinary and SRIBinary)
      % for signed integers. The S will be added to the command if the byte
      % order is LSB
      byteOrder ='';
      if strcmpi(order,'LSB') == 1
          byteOrder = 'S';
      end

      % Specify format
      if strcmpi(propertyValue,'ascii')
          fprintf(interface,['DATA:ENCdg ASCIi'])
          %setting data:enc to ASCII reset Byte_Or to MSB, which is unneccssary.
          %this sets it back to what is was previously.
          fprintf(interface,['WFMOutPre:BYT_Or ',order]);
      elseif any(strcmpi(propertyValue,{'int8','int16'}))
          fprintf(interface,['DATA:ENCdg ' byteOrder 'RIBinary'])
      elseif any(strcmpi(propertyValue,{'uint8','uint16','uint32','unit64'}))
        fprintf(interface,['DATA:ENCdg ' byteOrder 'RPBinary'])
      end

      % Set the width
      if any(strcmpi(propertyValue,{'int8','uint8'}))
          fprintf(interface,['WFMO:Byt_NR 1'])
      elseif any(strcmpi(propertyValue,{'int16','uint16'}))
          fprintf(interface,['WFMO:Byt_NR 2'])
      elseif any(strcmpi(propertyValue,{'int32','uint32'}))
          fprintf(interface,['WFMO:Byt_NR 4'])
      elseif any(strcmpi(propertyValue,{'int64','uint64'}))
          fprintf(interface,['WFMO:Byt_NR 8'])
      else
          fprintf(interface,['WFMO:Byt_NR 1']);
         % error('Invalid format. Valid values are: int8,int16, uint8,uint16.')
      end
    PermissibleType: String enum [ascii=ASCIi, int8=int8, int16=int16, uint8=uint8, uint16=uint16, int32=int32, int64=int64, uint32=uint32, uint64=uint64]
    DefaultValue: ascii
    ReadOnly: never

  Method readwaveform
    MCode:
      function [y, x, yunit, xunit] = readwaveform(obj, source, varargin)
      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
      num1 = 1;
      num2 = 4;
      snum1 = num2str(num1);
      snum2 = num2str(num2);

      if (nargout == 0)
          return;
      end

      scale = true;
      y = [];
      x = [];
      yunit = 'unknown';
      xunit = 'unknown';

      if strcmpi(source(1),'c')
      	type = 'ch';
      elseif strcmpi(source(1),'r')
      	type = 'ref';
      elseif strcmpi(source(1),'m')
      	type = 'math';
      else
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      try
      	pos = str2num(source(length(source)));
      catch
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      if pos<num1 || pos>num2
      	error('Invalid SOURCE. SOURCE must be one of: channel<x>, reference<x>, or math<x>, where x is an integer from ',snum2,' to ',snum2);
      end

      trueSource = [type, num2str(pos)];

      if (nargin > 2)
          try
              scale = logical(varargin{1});
          catch
              error('SCALE must be a logical.');
          end
      end

      % Get interface
      interface = get(get(obj,'parent'),'interface');

      oldPrecision = get(obj, 'Precision');
      oldByteOrder = get(obj, 'ByteOrder');

      set(obj, 'Precision', 'int16');
      set(obj, 'ByteOrder', 'littleEndian');

      try
          % Specify source
          fprintf(interface,['DATA:SOURCE ' trueSource]);

          % Issue the curve transfer command.
          fprintf(interface, 'CURVE?');

      	raw = binblockread(interface, 'int16');

          % Tektronix scopes send and extra terminator after the binblock.
          fread(interface, 1);
      catch
      	%if there is a problem with binblockread, you will not be able to reset
      	% Precision or ByteOrder
          error(lasterr);
      end

      if (isempty(raw))
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error('An error occurred while reading the waveform.');
      end

      if (scale == false)
          y = raw;
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          ptcnt = str2num(query(interface, 'WFMoutPRE:NR_PT?'));
          x = 1:ptcnt;

          if (nargout > 2)
              xunit = query(interface, 'WFMoutPRE:XUnit?');
              xunit(xunit == '"') = [];
              yunit = query(interface, 'WFMoutPRE:YUnit?');
              yunit(yunit == '"') = [];
          end
      else
          yoffs = str2num(query(interface, 'WFMoutPRE:YOFF?'));
          ymult = str2num(query(interface, 'WFMoutPRE:YMULT?'));
          yzero = str2num(query(interface, 'WFMoutPRE:YZERO?'));
          y = ((raw - yoffs) .* ymult) + yzero;
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          xzero = str2num(query(interface, 'WFMoutPRE:XZERO?'));
          xincr = str2num(query(interface, 'WFMoutPRE:XINCR?'));
          ptcnt = str2num(query(interface, 'WFMoutPRE:NR_PT?'));
          x = (((0:(ptcnt-1)) .* xincr) + xzero);

          if (nargout > 2)
              xunit = query(interface, 'WFMoutPRE:XUnit?');
              xunit(xunit == '"') = [];
              yunit = query(interface, 'WFMoutPRE:YUnit?');
              yunit(yunit == '"') = [];
          end
      end
      y = y';

      set(obj, 'Precision', oldPrecision);
      set(obj, 'ByteOrder', oldByteOrder);
    Description: READWAVEFORM Transfer waveforms from the oscilloscope to MATLAB.

      [Y, T] = INVOKE(obj, 'readwaveform', CHANNEL) returns a waveform from the instrument,
      using channel string, CHANNEL.  Valid channel values are channel<x>, reference<y>, and
      math, where <x> is a number between 1 and the number of channels on the instrument and <y> is a letter between A and the number of reference channels on the instrument.

      [Y, T] = INVOKE(obj, 'readwaveform', CHANNEL, SCALE) returns the data scaled to real units if SCALE is true, or as raw data if SCALE is false.

      To read the waveform data points the interface object associated with the device
      object must have a sufficiently large InputBufferSize property value.  If you receive
      an error about the buffer size being to small, or have difficulty reading a waveform,
      verify that it is large enough.  The size must be greater than two times the number
      of points in the waveform, plus approximately 50 bytes for header information.

      Example:
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');
      	[y, t] = invoke(obj, 'readwaveform', 'referenceA', false);

      Example changing the buffer size:
      	% Note the device object must be closed.
      	interfaceObj = get(deviceObj, 'interface');
      	% Allow for a 10,000 point waveform with a little extra room.
      	set(interfaceObj, 'InputBufferSize', 21000);
      	connect(deviceObj);
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');

  Method storewaveform
    MCode:
      function storewaveform(obj, channel, location)
      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
      num1 = 1;
      num2 = 4;
      snum1 = num2str(num1);
      snum2 = num2str(num2);

      if strncmpi(channel,'channel',length('channel'))
      	try
      		pos = str2num(channel(length(channel)));
      	catch
      		error(['Invalid CHANNEL. CHANNEL must be channel<x>, where x is an integer from ',snum1,' to ',snum2]);
      	end
      	if pos<num1 || pos>num2
      		error(['Invalid CHANNEL. CHANNEL must be channel<x>, where x is an integer from ',snum1,' to ',snum2]);
      	end
      	source = ['ch',num2str(pos)];
      else
      	error(['Invalid CHANNEL. CHANNEL must be channel<x>, where x is an integer from ',snum1,' to ',snum2]);
      end

      if strncmpi(location,'reference',length('reference'))
      	try
      		pos = str2num(location(length(location)));
      	catch
      		error(['Invalid LOCATION. LOCATION must be reference<x>, where x is an integer from ',snum1,' to ',snum2]);
      	end
      	if pos<num1 || pos>num2
      		error(['Invalid LOCATION. LOCATION must be reference<x>, where x is an integer from ',snum1,' to ',snum2]);
      	end
      	dest = ['ref',num2str(pos)];
      else
      	error(['Invalid LOCATION. LOCATION must be reference<x>, where x is an integer from ',snum1,' to ',snum2]);
      end

      % Get interface
      interface = get(get(obj,'parent'),'interface');

      fprintf(interface, ['SAVe:WAVEform ' source ',MAIn,' dest]);
    Description: STOREWAVEFORM Save a waveform to oscilloscope memory.

      INVOKE(OBJ, 'storewaveform', CHANNEL, LOCATION) saves the waveform from CHANNEL to memory location, LOCATION.

  Method writewaveform
    MCode:
      function writewaveform(obj, datapoints, destination)

      num1 = 1;
      num2 = 4;
      snum1 = num2str(num1);
      snum2 = num2str(num2);

      % Validate destination
      if strncmpi(destination,'reference',length('reference'))
      	try
      		pos = str2num(destination(length(destination)));
      	catch
      		error(['Invalid LOCATION. LOCATION must be reference<x>, where x is an integer from ',snum1,' to ',snum2]);
      	end
      	if pos<num1 || pos>num2
      		error(['Invalid LOCATION. LOCATION must be reference<x>, where x is an integer from ',snum1,' to ',snum2]);
      	end
      	dest = ['ref',num2str(pos)];
      else
      	error(['Invalid LOCATION. LOCATION must be reference<x>, where x is an integer from ',snum1,' to ',snum2]);
      end

      % Check that the array contains only numeric data
      if ~isnumeric(datapoints) || length(size(datapoints)) > 2 || min(size(datapoints)) > 1
          error('DATA must be a 1 x n numeric array');
      end

      oldPrecision = get(obj, 'Precision');
      oldByteOrder = get(obj, 'ByteOrder');

      set(obj, 'Precision', 'int16');
      set(obj, 'ByteOrder', 'littleEndian');

      %Get interface
      interface = get(get(obj,'parent'),'interface');

      try
          fprintf(inteface,['DATA:DESTination ', dest]);
          fprintf(interface,['CURVe ' datapoints]);
          binblockwrite(interface, datapoints, 'int16');
      catch
      end

      set(obj, 'Precision', oldPrecision);
      set(obj, 'ByteOrder', oldByteOrder);
    Description: writeWAVEFORM Transfer waveforms in the oscilloscope.

      INVOKE(OBJ, 'writewaveform', POINTS) downloads the numeric data POINTS to the oscilloscope. 

      Warning: This operation can be very slow on TDS-200 series oscillscopes.
