MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Program Files\MATLAB\R2009a\toolbox\instrument\instrument\drivers\33250A.mdd
DriverType: MATLAB interface object
InstrumentType: Function Generator
InstrumentManufacturer: Agilent
InstrumentModel: 33250A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
  Code:
    function init(obj)
    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interface=get(obj,'interface');
    set(interface,'InputBufferSize',12800000);
    set(interface,'OutputBufferSize',12800000);
    set(interface,'Timeout',10);
    fclose(interface);

ConnectInitCode
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
CleanupCode
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
Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property AM_Depth
    Type: InstrumentCommand
    ConfigureCommand: AM:DEPT
    QueryCommand: AM:DEPT?
    PermissibleType: Double bounded [Max="120.0" Min="0.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 50
    ReadOnly: never
    Description: This property sets or gets the amplitude modulation depth in percent

  Property AM_Source
    Type: InstrumentCommand
    ConfigureCommand: AM:SOUR
    QueryCommand: AM:SOUR?
    PermissibleType: String enum [Internal=INT, External=EXT]
    DefaultValue: Internal
    ReadOnly: never
    Description: this property sets or gets the source of the amplitude modulator

  Property AM_State
    Type: InstrumentCommand
    ConfigureCommand: AM:STAT
    QueryCommand: AM:STAT?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [Off=OFF, On=ON]
    DefaultValue: On
    ReadOnly: never
    Description: This property gets or sets the state of the amplitude modulator

  Property Beeper_State
    Type: InstrumentCommand
    ConfigureCommand: SYST:BEEP:STAT
    QueryCommand: SYST:BEEP:STAT?
    PermissibleType: Double enum [1.0, 0.0]
    PermissibleType: String enum [Off=OFF, On=ON]
    DefaultValue: 1.0
    ReadOnly: never

  Property Built_in_Arb_Function
    Type: InstrumentCommand
    ConfigureCommand: FUNC:USER
    QueryCommand: FUNC:USER?
    PermissibleType: String enum [Volatile=VOLATILE, Exponential_Rise=EXP_RISE, Exponential_Fall=EXP_FALL, Negative_Ramp=NEG_RAMP, Sinc=SINC, Cardiac=CARDIAC]
    PermissibleType: String none
    DefaultValue: Volatile
    ReadOnly: never

  Property Burst_Mode
    Type: InstrumentCommand
    ConfigureCommand: BURS:MODE
    QueryCommand: BURS:MODE?
    PermissibleType: String enum [Triggered=TRIG, Gated=GAT]
    DefaultValue: Triggered
    ReadOnly: never

  Property Burst_NCycles
    Type: InstrumentCommand
    ConfigureCommand: BURS:NCYC
    QueryCommand: BURS:NCYC?
    PermissibleType: Double bounded [Max="1000000.0" Min="1.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX, Infinite=INF]
    DefaultValue: 1.0
    ReadOnly: never

  Property Burst_Phase
    Type: InstrumentCommand
    ConfigureCommand: BURS:PHAS
    QueryCommand: BURS:PHAS?
    PermissibleType: Double bounded [Max="360.0" Min="-360.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: -360.0
    ReadOnly: never

  Property Burst_State
    Type: InstrumentCommand
    ConfigureCommand: BURS:STAT
    QueryCommand: BURS:STAT?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 0
    ReadOnly: never

  Property Byte_Order
    Type: InstrumentCommand
    ConfigureCommand: FORM:BORD
    QueryCommand: FORM:BORD?
    PermissibleType: String enum [Normal=NORM, Swapped=SWAP]
    DefaultValue: Normal
    ReadOnly: never

  Property Display
    Type: InstrumentCommand
    ConfigureCommand: DISP
    QueryCommand: DISP?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Turns display on or off

  Property Duty_Cycle
    Type: InstrumentCommand
    ConfigureCommand: FUNC:SQU:DCYC
    QueryCommand: FUNC:SQU:DCYC?
    PermissibleType: Double bounded [Max="80.0" Min="20.0"]
    PermissibleType: String enum [Maximum=MAX, Minimum=MIN]
    DefaultValue: 50
    ReadOnly: never
    Description: This property sets or gets the square wave duty cycle

  Property External_Burst_Gate_Polarity
    Type: InstrumentCommand
    ConfigureCommand: BURS:GATE:POL
    QueryCommand: BURS:GATE:POL?
    PermissibleType: String enum [Normal=NORM, Inverted=INV]
    DefaultValue: Normal
    ReadOnly: never

  Property FM_Deviation
    Type: InstrumentCommand
    ConfigureCommand: FM:DEV
    QueryCommand: FM:DEV?
    PermissibleType: Double bounded [Max="4.005E7" Min="5.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 5.0
    ReadOnly: never

  Property FM_Source
    Type: InstrumentCommand
    ConfigureCommand: FM:SOUR
    QueryCommand: FM:SOUR?
    PermissibleType: String enum [Internal=INT, External=EXT]
    DefaultValue: Internal
    ReadOnly: never

  Property FM_State
    Type: InstrumentCommand
    ConfigureCommand: FM:STAT
    QueryCommand: FM:STAT?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 0.0
    ReadOnly: never

  Property Frequency
    Type: InstrumentCommand
    ConfigureCommand: FREQ
    QueryCommand: FREQ?
    PermissibleType: Double bounded [Max="8.0E7" Min="1.0E-6"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 5000
    ReadOnly: never
    Description: This property sets the frequency of the 33250 waveform

  Property FSK_Frequency
    Type: InstrumentCommand
    ConfigureCommand: FSK:FREQ
    QueryCommand: FSK:FREQ?
    PermissibleType: Double bounded [Max="8.0E7" Min="1.0E-6"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 10000
    ReadOnly: never

  Property FSK_Source
    Type: InstrumentCommand
    ConfigureCommand: FSK:SOUR
    QueryCommand: FSK:SOUR?
    PermissibleType: String enum [Internal=INT, External=EXT]
    DefaultValue: Internal
    ReadOnly: never

  Property FSK_State
    Type: InstrumentCommand
    ConfigureCommand: FSK:STAT
    QueryCommand: FSK:STAT?
    PermissibleType: Double enum [1.0, 0.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 1.0
    ReadOnly: never

  Property Function
    Type: InstrumentCommand
    ConfigureCommand: FUNC
    QueryCommand: FUNC?
    PermissibleType: String enum [Sine=SIN, Square=SQU, Ramp=RAMP, Pulse=PULS, Noise=NOIS, Arb=USER, DC=DC]
    DefaultValue: Sine
    ReadOnly: never
    Description: This Property sets the function of the 33250

  Property Input_Trigger_Slope
    Type: InstrumentCommand
    ConfigureCommand: TRIG:SLOP
    QueryCommand: TRIG:SLOP?
    PermissibleType: String enum [Positive=POS, Negative=NEG]
    DefaultValue: Positive
    ReadOnly: never

  Property Internal_AM_Frequency
    Type: InstrumentCommand
    ConfigureCommand: AM:INT:FREQ
    QueryCommand: AM:INT:FREQ?
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    PermissibleType: Double bounded [Max="20000.0" Min="0.0020"]
    DefaultValue: Minimum
    ReadOnly: never
    Description: This property sets or gets the internal amplitude modulation frequency

  Property Internal_AM_Function
    Type: InstrumentCommand
    ConfigureCommand: AM:INT:FUNC
    QueryCommand: AM:INT:FUNC?
    PermissibleType: String enum [Sinusoid=SIN, Square=SQU, Ramp=RAMP, NRamp=NRAM, Triangle=TRI, Noise=NOIS, Arb=USER]
    DefaultValue: Sinusoid
    ReadOnly: never
    Description: This property sets or gets the internal amplitude modulation function

  Property Internal_Burst_Period
    Type: InstrumentCommand
    ConfigureCommand: BURS:INT:PER
    QueryCommand: BURS:INT:PER?
    PermissibleType: Double bounded [Max="500.0" Min="1.0E-6"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 1.0E-6
    ReadOnly: never

  Property Internal_FM_Frequency
    Type: InstrumentCommand
    ConfigureCommand: FM:INT:FREQ
    QueryCommand: FM:INT:FREQ?
    PermissibleType: Double bounded [Max="20000.0" Min="0.0020"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 0.0020
    ReadOnly: never

  Property Internal_FM_Function
    Type: InstrumentCommand
    ConfigureCommand: FM:INT:FUNC
    QueryCommand: FM:INT:FUNC?
    PermissibleType: String enum [Sinusoid=SIN, Square=SQU, Ramp=RAMP, NRamp=NRAM, Triangle=TRI, Noise=NOIS, Arb=USER]
    DefaultValue: Sinusoid
    ReadOnly: never

  Property Internal_FSK_Rate
    Type: InstrumentCommand
    ConfigureCommand: FSK:INT:RATE
    QueryCommand: FSK:INT:RATE?
    PermissibleType: Double bounded [Max="100000.0" Min="0.0020"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 0.0020
    ReadOnly: never

  Property Marker
    Type: InstrumentCommand
    ConfigureCommand: MARK
    QueryCommand: MARK?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 0.0
    ReadOnly: never

  Property Marker_Frequency
    Type: InstrumentCommand
    ConfigureCommand: MARK:FREQ
    QueryCommand: MARK:FREQ?
    PermissibleType: Double bounded [Max="8.0E7" Min="1.0E-6"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 1.0E-6
    ReadOnly: never

  Property Memory_State_Recall_Auto
    Type: InstrumentCommand
    ConfigureCommand: MEM:STATE:REC:AUTO
    QueryCommand: MEM:STATE:REC:AUTO?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Disable or enable the automatic recall of the power-down state from
      storage location “0” when power is turned on. Select “ON” to automatically
      recall the power-down state when power is turned on. Select “OFF”
      (default) to issue a reset (*RST command) when power is turned on
      (state “0” is not automatically recalled). The :AUTO? query returns
      “0” (OFF) or “1” (ON).

  Property Output
    Type: InstrumentCommand
    ConfigureCommand: OUTP
    QueryCommand: OUTP?
    PermissibleType: Double enum [1.0, 0.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: Off
    ReadOnly: never
    Description: This property queries the output state ir turns it on or off

  Property Output_Load
    Type: InstrumentCommand
    ConfigureCommand: OUTP:LOAD
    QueryCommand: OUTP:LOAD?
    PermissibleType: Double bounded [Max="10000.0" Min="1.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 1.0
    ReadOnly: never
    Description: This property gets or sets the output load value on the 33250

  Property Output_Polarity
    Type: InstrumentCommand
    ConfigureCommand: OUTP:POL
    QueryCommand: OUTP:POL?
    PermissibleType: String enum [Normal=NORM, Inverted=INV]
    DefaultValue: Normal
    ReadOnly: never
    Description: This property sets or gets the output polarity

  Property Output_Sync
    Type: InstrumentCommand
    ConfigureCommand: OUTP:SYNC
    QueryCommand: OUTP:SYNC?
    PermissibleType: String enum [On=ON, Off=OFF]
    PermissibleType: Double enum [1.0, 0.0]
    DefaultValue: Off
    ReadOnly: never
    Description: This property sets the output sync

  Property Output_Trigger_Slope
    Type: InstrumentCommand
    ConfigureCommand: OUTP:TRIG:SLOP
    QueryCommand: OUTP:TRIG:SLOP?
    PermissibleType: String enum [Positive=POS, Negative=NEG]
    DefaultValue: Positive
    ReadOnly: never

  Property Output_Trigger_State
    Type: InstrumentCommand
    ConfigureCommand: OUTP:TRIG
    QueryCommand: OUTP:TRIG?
    PermissibleType: Double enum [1.0, 0.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 1.0
    ReadOnly: never

  Property Phase
    Type: InstrumentCommand
    ConfigureCommand: PHAS
    QueryCommand: PHAS?
    PermissibleType: Double bounded [Max="360.0" Min="-360.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: -360.0
    ReadOnly: never
    Description: Adjust the phase offset of the output waveform in degrees or radians as
      specified by the previous UNIT:ANGL command (not available for pulse
      and noise). Select from -360 degrees to +360 degrees or -2π to +2π radians.
      The default is 0 degrees (0 radians). MIN = -360 degrees (-2π radians).
      MAX = +360 degrees (+2π radians). The PHAS? query returns the phase
      offset in degrees or radians.

  Property Phase_Lock_Error_Flag
    Type: InstrumentCommand
    ConfigureCommand: PHAS:UNL:ERR:STAT
    QueryCommand: PHAS:UNL:ERR:STAT?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Disable or enable the function generator from generating an error if
      the phase-lock is ever lost. The default is OFF. If the phase-lock is lost
      and the error is enabled, a “Reference phase-locked loop is unlocked”
      error is generated. The unlock error setting is stored in non-volatile
      memory. The :STAT? query returns “0” (OFF) or “1” (ON).

  Property Pulse_Period
    Type: InstrumentCommand
    ConfigureCommand: PULS:PER
    QueryCommand: PULS:PER?
    PermissibleType: Double bounded [Max="2000.0" Min="2.0E-8"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 2.0E-8
    ReadOnly: never

  Property Pulse_Transistion
    Type: InstrumentCommand
    ConfigureCommand: PULS:TRAN
    QueryCommand: PULS:TRAN?
    PermissibleType: Double bounded [Max="0.0010" Min="5.0E-9"]
    PermissibleType: String enum [Maximum=MAX, Minimum=]
    DefaultValue: 5.0E-9
    ReadOnly: never

  Property Pulse_Width
    Type: InstrumentCommand
    ConfigureCommand: PULS:WIDT
    QueryCommand: PULS:WIDT?
    PermissibleType: Double bounded [Max="2000.0" Min="8.0E-9"]
    PermissibleType: String enum [Minimum=, Maximum=MAX]
    DefaultValue: 8.0E-9
    ReadOnly: never

  Property Ramp_Symmetry
    Type: InstrumentCommand
    ConfigureCommand: FUNC:RAMP:SYMM
    QueryCommand: FUNC:RAMP:SYMM?
    PermissibleType: Double bounded [Max="100.0" Min="0.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 100
    ReadOnly: never
    Description: This property sets or gets the ramp symmetry of the 33250

  Property Sweep_Center_Frequency
    Type: InstrumentCommand
    ConfigureCommand: FREQ:CENT
    QueryCommand: FREQ:CENT?
    PermissibleType: Double bounded [Max="7.999955E7" Min="450.000001"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 450.000001
    ReadOnly: never

  Property Sweep_Spacing
    Type: InstrumentCommand
    ConfigureCommand: SWE:SPAC
    QueryCommand: SWE:SPAC?
    PermissibleType: String enum [Linear=LIN, Logarithmic=LOG]
    DefaultValue: Linear
    ReadOnly: never

  Property Sweep_Span
    Type: InstrumentCommand
    ConfigureCommand: FREQ:SPAN
    QueryCommand: FREQ:SPAN?
    PermissibleType: Double bounded [Max="1099.999998" Min="-1099.999998"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: -1099.999998
    ReadOnly: never

  Property Sweep_Start_Frequency
    Type: InstrumentCommand
    ConfigureCommand: FREQ:STAR
    QueryCommand: FREQ:STAR?
    PermissibleType: Double bounded [Max="8.0E7" Min="1.0E-6"]
    PermissibleType: String enum [Maximum=MAX, Minimum=MIN]
    DefaultValue: 1.0E-6
    ReadOnly: never

  Property Sweep_State
    Type: InstrumentCommand
    ConfigureCommand: SWE:STAT
    QueryCommand: SWE:STAT?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 0.0
    ReadOnly: never

  Property Sweep_Stop_Frequency
    Type: InstrumentCommand
    ConfigureCommand: FREQ:STOP
    QueryCommand: FREQ:STOP?
    PermissibleType: Double bounded [Max="8.0E7" Min="1.0E-6"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 1.0E-6
    ReadOnly: never

  Property Sweep_Time
    Type: InstrumentCommand
    ConfigureCommand: SWE:TIME
    QueryCommand: SWE:TIME?
    PermissibleType: Double bounded [Max="500.0" Min="0.0010"]
    PermissibleType: String enum [Maximum=MAX, Minimum=MIN]
    DefaultValue: 0.0010
    ReadOnly: never

  Property Trigger_Delay
    Type: InstrumentCommand
    ConfigureCommand: TRIG:DEL
    QueryCommand: TRIG:DEL?
    PermissibleType: Double bounded [Max="85.0" Min="0.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Trigger_Source
    Type: InstrumentCommand
    ConfigureCommand: TRIG:SOUR
    QueryCommand: TRIG:SOUR?
    PermissibleType: String enum [Immediate=IMM, External=EXT, Bus=BUS]
    DefaultValue: Immediate
    ReadOnly: never

  Property Unit_Angle
    Type: InstrumentCommand
    ConfigureCommand: UNIT:ANGL
    QueryCommand: UNIT:ANGL?
    PermissibleType: String enum [Degree=DEG, Radian=RAD]
    DefaultValue: Degree
    ReadOnly: never

  Property Voltage
    Type: InstrumentCommand
    ConfigureCommand: VOLT
    QueryCommand: VOLT?
    PermissibleType: Double bounded [Max="10.0" Min="0.0010"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: 0.0010
    ReadOnly: never
    Description: This Property sets or gets the voltage of the 33250

  Property Voltage_High
    Type: InstrumentCommand
    ConfigureCommand: VOLT:HIGH
    QueryCommand: VOLT:HIGH?
    PermissibleType: Double bounded [Max="5.0" Min="-4.999"]
    PermissibleType: String enum [Maximum=MAX, Minimum=MIN]
    DefaultValue: 5
    ReadOnly: never

  Property Voltage_Low
    Type: InstrumentCommand
    ConfigureCommand: VOLT:LOW
    QueryCommand: VOLT:LOW?
    PermissibleType: Double bounded [Max="4.999" Min="-5.0"]
    PermissibleType: String enum [Minimum=MIN, Maximum=MAX]
    DefaultValue: -5
    ReadOnly: never

  Property Voltage_Offset
    Type: InstrumentCommand
    ConfigureCommand: VOLT:OFFS
    QueryCommand: VOLT:OFFS?
    PermissibleType: Double bounded [Max="4.9995" Min="-4.9995"]
    PermissibleType: String enum [Maximum=MAX, Minimum=MIN]
    DefaultValue: 0
    ReadOnly: never
    Description: This Property Sets the Voltage Offset

  Property Voltage_Range_Auto
    Type: InstrumentCommand
    ConfigureCommand: VOLT:RANG:AUTO
    QueryCommand: VOLT:RANG:AUTO?
    PermissibleType: String enum [On=ON, Off=OFF, Once=ONCE]
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: Off
    ReadOnly: never

  Property Votage_Units
    Type: InstrumentCommand
    ConfigureCommand: VOLT:UNIT
    QueryCommand: VOLT:UNIT?
    PermissibleType: String enum [Vpp=VPP, Vrms=VRMS, dBm=DBM]
    DefaultValue: Vpp
    ReadOnly: never
    Description: This property sets or gets the units of the 33250

  Method Apply_Arb
    MCode:
      function Apply_Arb(obj, Freq, Amplitude, Offset)
      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interfaceobj=get(obj,'interface');
      CommandStr = ['APPL:USER ', num2str(Freq), 'HZ, ',...
          num2str(Amplitude), 'VPP, ', num2str(Offset)];
      fprintf(interfaceobj, CommandStr);

  Method Apply_DC
    MCode:
      function Apply_DC(obj, Amplitude, Offset)
      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interfaceobj=get(obj,'interface');
      CommandStr = ['APPL:DC DEF, ',...
          num2str(Amplitude), ', ', num2str(Offset)];
      fprintf(interfaceobj, CommandStr);

  Method Apply_Noise
    MCode:
      function Apply_Noise(obj, Amplitude, Offset)
      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interfaceobj=get(obj,'interface');
      CommandStr = ['APPL:NOIS DEF, ',...
          num2str(Amplitude), 'VPP, ', num2str(Offset)];
      fprintf(interfaceobj, CommandStr);

  Method Apply_Pulse
    MCode:
      function Apply_Pulse(obj, Freq, Amplitude, Offset)
      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interfaceobj=get(obj,'interface');
      CommandStr = ['APPL:PULS ', num2str(Freq), 'HZ, ', num2str(Amplitude), 'VPP, ', num2str(Offset)];
      fprintf(interfaceobj, CommandStr);

  Method Apply_Ramp
    MCode:
      function Apply_Ramp(obj, Freq, Amplitude, Offset)
      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interfaceobj=get(obj,'interface');
      CommandStr = ['APPL:RAMP ', num2str(Freq), 'HZ, ', num2str(Amplitude), 'VPP, ', num2str(Offset)];
      fprintf(interfaceobj, CommandStr);

  Method Apply_Sine
    MCode:
      function Apply_Sine(obj, Freq, Amplitude, Offset)
      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interfaceobj=get(obj,'interface');
      CommandStr = ['APPL:SIN ', num2str(Freq), 'HZ, ', num2str(Amplitude), 'VPP, ', num2str(Offset)];
      fprintf(interfaceobj, CommandStr);

  Method Apply_Square
    MCode:
      function Apply_Square(obj, Freq, Amplitude, Offset)
      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interfaceobj=get(obj,'interface');
      CommandStr = ['APPL:SQU ', num2str(Freq), 'HZ, ', num2str(Amplitude), 'VPP, ', num2str(Offset)];
      fprintf(interfaceobj, CommandStr);

  Method Beep
    MCode:
      function Beep(obj)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, 'SYST:BEEP');
    Description: Makes the instrument beep

  Method Calibrate
    Type: InstrumentCommand
    Line Command="CAL?" Output="false"
    Description: Perform a calibration of the instrument using the specified calibration
      value (CAL:VAL command). Before you can calibrate the function
      generator, you must unsecure it by entering the correct security code.
      Returns “0” (PASS) or “1” (FAIL).

  Method Calibration_Secure_State
    MCode:
      function Calibration_Secure_State(obj, OnorOff, code)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, ['CAL:SEC:STAT ', OnorOff,', ', code]);
    Description: Unsecure or secure the instrument for calibration. The calibration code
      may contain up to 12 characters.

  Method Calibration_Setup
    Type: InstrumentCommand
    Line Command="CAL:SET" Output="false"
    Input: SetupNum
    Description: Configure the function generator’s internal state for each of the
      calibration steps to be performed. SetupNum must be between 0 and 115.

  Method Calibration_Value
    Type: InstrumentCommand
    Line Command="CAL:VAL" Output="false"
    Input: CalValue
    Description: Specify the value of the known calibration signal as outlined in the
      calibration procedures in the Agilent 33250A Service Guide. Use the
      CAL:SET command to configure the function generator’s internal state
      for each of the calibration steps to be performed.

  Method Clear_Event_Registers
    Type: InstrumentCommand
    Line Command="*CLS" Output="false"
    Description: Clear the event register in all register groups. This command also clears
      the error queue and cancels a *OPC operation.

  Method Clear_PowerOnStatus
    Type: InstrumentCommand
    Line Command="*PSC" Output="false"
    Input: Status
    Description: Power-On Status Clear. Clear the Standard Event enable register and
      Status Byte condition register at power on (*PSC 1). When *PSC 0 is
      in effect, these two registers are not cleared at power on. The default is
      *PSC 1.

  Method Clear_QuestionableData_Registers
    Type: InstrumentCommand
    Line Command="STAT:PRES" Output="false"
    Description: Clear all bits in the Questionable Data enable register and the Standard
      Operation enable register.

  Method Clear_Text
    Type: InstrumentCommand
    Line Command="DISP:TEXT:CLE" Output="false"

  Method Copy_To_Nonvolatile_Memory
    MCode:
      function Copy_To_Nonvolatile_Memory(obj, WaveformName)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, ['DATA:COPY ', WaveformName]);
    Description: Copy the waveform from volatile memory to the specified name in
      non-volatile memory. The source for the copy is always “volatile”.
      You cannot copy from any other source and you cannot copy to “volatile”.

      The arb name may contain up to 12 characters. The first character
      must be a letter (A-Z), but the remaining characters can be numbers
      (0-9) or the underscore character (“ _ ”). Blank spaces are not allowed.
      If you specify a name with more than 12 characters, a “Program
      mnemonic too long” error is generated.

      The function generator does not distinguish between upper- and
      lower-case letters. Therefore, ARB_1 and arb_1 are the same name.
      All characters are converted to upper case.

  Method Define_Binary_DAC_Waveform_Data
    MCode:
      function Define_Binary_DAC_Waveform_Data(obj, data)
      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% data can be either a list of values or a binary block (see help)
      interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, ['DATA:DAC VOLATILE, ', data]);
    Description: Download binary or decimal integer values from -2047 to +2047 into
      volatile memory. You can download from 1 to 65,536 (64K) points per
      waveform in IEEE-488.2 binary block format or as a list of values.

  Method Define_Waveform_Data
    MCode:
      function Define_Waveform_Data(obj, data)
      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interfaceobj=get(obj,'interface');
      NormData = data./max(abs(data));
      StringData = num2str(NormData, '%f, ');
      StringData = StringData(1:end-1);
      fprintf(interfaceobj, ['DATA VOLATILE, ', data]);
    Description: Download floating-point values from -1 to +1 into volatile memory.
      You can download from 1 to 65,536 (64K) points per waveform.
      Data must be a comma delimited string.

  Method Delete_All_Waveform
    MCode:
      function Delete_All_Waveform(obj)
      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interfaceobj=get(obj,'interface');
      NumFreeMemPos = fprintf(interfaceobj, 'DATA:DEL:ALL');
    Description: Deletes all user define waveforms.

  Method Delete_Stored_State
    Type: InstrumentCommand
    Line Command="MEM:STAT:DEL" Output="false"
    Input: Location
    Description: Delete the contents of the specified storage location. If you have assigned
      a user-defined name to a location (MEM:STAT:NAME command), this
      command also removes the name that you assigned and restores the
      default name (“AUTO_RECALL”, “STATE_1”, “STATE_2”, etc.). Note that
      you cannot recall the instrument state from a storage location that is
      empty. An error is generated if you attempt to recall a deleted state.

  Method Delete_Waveform
    MCode:
      function Delete_Waveform(obj, Arb_Name)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, ['DATA:DEL ', Arb_Name]);
    Description: Deletes a single user define waveform.

  Method Display_Text
    MCode:
      function Display_Text(obj, TextString)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, ['DISP:TEXT "', TextString, '"']);
    Description: Display a text message on the function generator’s front-panel display.
      Sending a text message to the display overrides the display state as set
      by the DISP command.

  Method Enable_QuestionableData_EnableRegister
    Type: InstrumentCommand
    Line Command="STAT:QUES:ENAB" Output="false"
    Input: EnableBits
    Description: Enable bits in the enable register in this register group. The selected bits
      are then reported to the Status Byte. A *CLS (clear status) will not clear
      the enable register but it does clear all bits in the event register.
      The STATus:PRESet command clears all bits in the enable register.
      To enable bits in the enable register, you must write a decimal value
      which corresponds to the binary-weighted sum of the bits you wish to
      enable in the register.

  Method Enable_StandardEvent_RegisterEnabledBits
    Type: InstrumentCommand
    Line Command="ESE" Output="false"
    Input: Enablebits
    Description: Enable bits in the Standard Event Status Register to be reported in the
      Status Byte. The selected bits are summarized in the “Standard Event” bit
      (bit 5) of the Status Byte Register.

  Method Enable_Status_Register
    Type: InstrumentCommand
    Line Command="*SRE" Output="false"
    Input: EnableBits
    Description: Enable bits in the Status Byte to generate a Service Request. To enable
      specific bits, you must write a decimal value which corresponds to the
      binary-weighted sum of the bits in the register. The selected bits are
      summarized in the “Master Summary” bit (bit 6) of the Status Byte
      Register. If any of the selected bits change from “0” to “1”, a Service
      Request signal is generated.

  Method Get_Operation_Complete_Bit
    Type: InstrumentCommand
    Line Command="*OPC?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Return “1” to the output buffer after the previous commands have been
      executed. Other commands cannot be executed until this command
      completes. Used in the triggered sweep and triggered burst modes only.

  Method LoadState
    MCode:
      function LoadState(obj)
      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[filename,path] = uigetfile('*.mat');
      load(fullfile(path,filename));

      interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, State);
    Description: load a saved state from a mat file. The file must be saved using SaveState, or it must contain a struct named State with all the necessary properties.

  Method Local
    Type: InstrumentCommand
    Line Command="SYST:LOC" Output="false"
    Description: Place the function generator in the local mode for RS-232 operation.
      All keys on the front panel are fully functional while in the local mode.

  Method Local_Lockout
    Type: InstrumentCommand
    Line Command="SYST:RWL" Output="false"
    Description: Place the function generator in the remote mode for RS-232 operation
      and disable all front-panel keys.

  Method New_Cal_SecurityCode
    Type: InstrumentCommand
    Line Command="CAL:SEC:CODE" Output="false"
    Input: NewCode
    Description: Enter a new security code. To change the security code, you must first
      unsecure the function generator using the old security code, and then
      enter a new code. The security code is stored in non-volatile memory.
      • The calibration code may contain up to 12 characters. The first
      character must be a letter (A-Z), but the remaining characters can
      be letters, numbers (0-9), or the underscore character (“ _ ”). You do
      not have to use all 12 characters, but the first character must always
      be a letter.

  Method Number_Of_Cals
    Type: InstrumentCommand
    Line Command="CAL:COUN?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Query the instrument to determine the number of times it has been
      calibrated. Note that your instrument was calibrated before it left the
      factory. When you receive your instrument from the factory, be sure to
      read the count to determine its initial value.
      • The calibration count is stored in non-volatile memory. The count
      increments up to a maximum of “65,535” after which it rolls over
      to “0”. Since the value increments by one for each calibration point,
      a complete calibration may increase the value by many counts.

  Method Phase_Reference
    Type: InstrumentCommand
    Line Command="PHAS:REF" Output="false"
    Description: Immediately set the zero-phase reference point without changing the
      output of the function generator. This command does not change the
      phase offset as set with the PHAS command – it only changes the phase
      reference. This command does not have a query form.

  Method Query_Cal_Message
    Type: InstrumentCommand
    Line Command="CAL:STR?" Format="text" Output="true" ReadOutputAs="ASCII"
    Description: The :STR?
      query reads the calibration message and returns a quoted string.

  Method Query_Calibration_Secure_State
    Type: InstrumentCommand
    Line Command="CAL:SEC:STAT?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: The :STAT? query returns “0” (OFF) or
      “1” (ON).

  Method Query_Calibration_Setup
    Type: InstrumentCommand
    Line Command="CAL:SET?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: The :SET? query reads the calibration
      setup number and returns a value from “0” to “115”.

  Method Query_Calibration_Value
    Type: InstrumentCommand
    Line Command="CAL:VAL?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: The :VAL? query
      returns a number in the form “+1.0000000000000E+01”.

  Method Query_Data_Catalog
    MCode:
      function OutputString = Query_Data_Catalog(obj, Prop)
      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interfaceobj=get(obj,'interface');
      switch Prop
          case 'Catalog' %returns all saved arbitrary waveforms in both volatile and nonvolatile memory
              OutputString = query(interfaceobj, 'DATA:CAT?');
          case 'Nonvolatile_Catalog' %returns all saved arbitrary waveforms in nonvolatile memory
              OutputString = query(interfaceobj, 'DATA:NVOL:CAT?');
          otherwise
              OutputString = [];
      end
    Description: This function queries what arbitrary waveforms are loaded into nonvolatile memory or nonvolatile and volatile memory

  Method Query_Free_Nonvolatile_Memory
    MCode:
      function NumFreeMemPos = Query_Free_Nonvolatile_Memory(obj)
      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interfaceobj=get(obj,'interface');
      NumFreeMemPos = query(interfaceobj, 'DATA:NVOL:FREE?');
    Description: This function queries the number of free memory positions for user defined arbitrary waveforms in nonvolatile memory.

  Method Query_Learn_String
    Type: InstrumentCommand
    Line Command="*LRN?" Format="text" Output="true" ReadOutputAs="ASCII"

  Method Query_Memory_Location_Name
    Type: InstrumentCommand
    Line Command="MEM:STAT:NAME?" Format="text" Output="true" ReadOutputAs="ASCII"
    Input: Location
    Description: The :NAME? query returns a quoted
      string containing the name currently assigned to the specified storage
      location. If you have not assigned a user-defined name to the specified
      location, the default name is returned (“AUTO_RECALL”, “STATE_1”,
      “STATE_2”, “STATE_3”, or “STATE_4”).

  Method Query_Number_Available_States
    Type: InstrumentCommand
    Line Command="MEM:NST?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Query the total number of memory locations available for state storage.
      Always returns “5” (memory location “0” is included).

  Method Query_PowerOnStatus
    Type: InstrumentCommand
    Line Command="*PSC?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: The *PSC? query returns the power-on status clear setting.
      Returns “0” (do not clear at power on) or “1” (clear at power on).

  Method Query_QuestionableData_EnableRegister
    Type: InstrumentCommand
    Line Command="STAT:QUES:ENAB?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: The :ENAB? query returns a decimal value which corresponds to the
      binary-weighted sum of all bits enabled by the STAT:QUES:ENAB
      command.

  Method Query_QuestionableData_EventRegister
    Type: InstrumentCommand
    Line Command="STAT:QUES:EVEN?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Query the event register in this register group. This is a read-only register.
      Once a bit is set, it remains set until cleared by this command or *CLS
      (clear status) command. A query of this register returns a decimal value
      which corresponds to the binary-weighted sum of all bits set in the register.

  Method Query_QuestionableData_Register
    Type: InstrumentCommand
    Line Command="STAT:QUES:COND?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Query the condition register in this group. This is a read-only register
      and bits are not cleared when you read the register. A query of this
      register returns a decimal value which corresponds to the binaryweighted
      sum of all bits set in the register.

  Method Query_StandardEvent_Register
    Type: InstrumentCommand
    Line Command="*ESR?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: Query the Standard Event Status Register. Once a bit is set, it remains
      set until cleared by a *CLS (clear status) command or queried by this
      command. A query of this register returns a decimal value which
      corresponds to the binary-weighted sum of all bits set in the register.

  Method Query_StandardEvent_RegisterEnabledBits
    Type: InstrumentCommand
    Line Command="*ESE?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: The *ESE? query returns a decimal
      value which corresponds to the binary-weighted sum of all bits enabled
      by the *ESE command.

  Method Query_Status_Register
    Type: InstrumentCommand
    Line Command="*SRE?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: The *SRE? query returns a decimal value
      which corresponds to the binary-weighted sum of all bits enabled by the
      *SRE command.

  Method Query_Stored_State_Present
    MCode:
      function StateValid = Query_Stored_State_Present(obj, Location)
      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interfaceobj=get(obj,'interface');
      StateValid = query(interfaceobj, ['MEM:STAT:VAL? ', num2str(Location)]);
    Description: Query the specified storage location to determine if a valid state is
      currently stored in that location. You can use this command before
      sending the *RCL command to determine if a state has been previously
      stored in this location. Returns “0” if no state has been stored or if it has
      been deleted. Returns “1” if a valid state is stored in the specified location.

  Method Query_System_Version
    Type: InstrumentCommand
    Line Command="SYST:VERS?" Format="text" Output="true" ReadOutputAs="ASCII"
    Description: Queries the system version number

  Method Query_Text
    Type: InstrumentCommand
    Line Command="DISP:TEXT?" Format="text" Output="true" ReadOutputAs="ASCII"

  Method Query_Waveform_Attribute
    MCode:
      function AttributeValue = Query_Waveform_Attribute(obj, Attribute)
      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switch Attribute
          case 'Average' %Queries the arithmetic average of the points in the waverform
              AttributeValue = query(interfaceobj, 'DATA:ATTR:AVER?');
          case 'Crest_Factor' %queries the crest factor
              AttributeValue = query(interfaceobj, 'DATA:ATTR:CFAC?');
          case 'Num_Points' %queries the number of points in the waveform
              AttributeValue = query(interfaceobj, 'DATA:ATTR:POIN?');
          case 'Peak_To_Peak' %queries the peak to peak value of the waveform
              AttributeValue = query(interfaceobj, 'DATA:ATTR:PTP?');
          otherwise
              AttributeValue = [];
      end
    Description: Thsi function queries various attributes of arbitrary waveforms

  Method QueryMinorMax
    MCode:
      function PropMinOrMax = QueryMinOrMax(obj, Prop, MinOrMax)
      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interfaceobj=get(obj,'interface');
      switch Prop
          case 'Frequency'
              PropMinOrMax = query(interfaceobj, ['FREQ? ', MinOrMax]);
          case 'Voltage'
              PropMinOrMax = query(interfaceobj, ['VOLT? ', MinOrMax]);
          case 'Voltage_Offset'
              PropMinOrMax = query(interfaceobj, ['VOLT:OFFS? ', MinOrMax]);
          case 'Voltage_High'
              PropMinOrMax = query(interfaceobj, ['VOLT:HIGH? ', MinOrMax]);
          case 'Voltage_Low'
              PropMinOrMax = query(interfaceobj, ['VOLT:LOW? ', MinOrMax]);
          case 'Duty_Cycle'
              PropMinOrMax = query(interfaceobj, ['FUNC:SQU:DCYC? ', MinOrMax]);
          case 'Ramp_Symmetry'
              PropMinOrMax = query(interfaceobj, ['FUNC:RAMP:SYMM? ', MinOrMax]);
          case 'Output_Load'
              PropMinOrMax = query(interfaceobj, ['OUTP:LOAD? ', MinOrMax]);
          case 'Pulse_Period'
              PropMinOrMax = query(interfaceobj, ['PULS:PER? ', MinOrMax]);
          case 'Pulse_Transistion'
              PropMinOrMax = query(interfaceobj, ['PULS:TRAN? ', MinOrMax]);
          case 'Pulse_Width'
              PropMinOrMax = query(interfaceobj, ['PULS:WIDT? ', MinOrMax]);
          case 'Internal_FM_Frequency'
              PropMinOrMax = query(interfaceobj, ['FM:INT:FREQ? ', MinOrMax]);
          case 'FM_Deviation'
              PropMinOrMax = query(interfaceobj, ['FM:DEV? ', MinOrMax]);
          case 'FSK_Frequency'
              PropMinOrMax = query(interfaceobj, ['FSK:FREQ? ', MinOrMax]);
          case 'Internal_FSK_Rate'
              PropMinOrMax = query(interfaceobj, ['FSK:INT:RATE? ', MinOrMax]);
          case 'Sweep_Start_Frequency'
              PropMinOrMax = query(interfaceobj, ['FREQ:STAR? ', MinOrMax]);
          case 'Sweep_Stop_Frequency'
              PropMinOrMax = query(interfaceobj, ['FREQ:STOP? ', MinOrMax]);
          case 'Sweep_Center_Frequency'
              PropMinOrMax = query(interfaceobj, ['FREQ:CENT? ', MinOrMax]);
          case 'Sweep_Span'
              PropMinOrMax = query(interfaceobj, ['FREQ:SPAN? ', MinOrMax]);
          case 'Sweep_Time'
              PropMinOrMax = query(interfaceobj, ['SWE:TIME? ', MinOrMax]);
          case 'Marker_Frequency'
              PropMinOrMax = query(interfaceobj, ['MARK:FREQ? ', MinOrMax]);
          case 'Burst_NCycles'
              PropMinOrMax = query(interfaceobj, ['BURS:NCYC? ', MinOrMax]);
          case 'Internal_Burst_Period'
              PropMinOrMax = query(interfaceobj, ['BURS:INT:PER? ', MinOrMax]);
          case 'Burst_Phase'
              PropMinOrMax = query(interfaceobj, ['BURS:PHAS? ', MinOrMax]);
          case 'Trigger_Delay'
              PropMinOrMax = query(interfaceobj, ['TRIG:DEL? ', MinOrMax]);
          case 'Phase'
              PropMinOrMax = query(interfaceobj, ['PHAS? ', MinOrMax]);
          otherwise
              PropMinOrMax = [];
      end
    Description: This function queries the max or min possible value for the properties 
      allow these values to be queried. The input arguments are:
      Prop = Property name as a string that is the same as the driver property names
      MinOrMax = MIN or MAX depending on which is desired
      If the chosen property does not support a min or max query then an empty matrix is returned.

  Method QueryModState
    MCode:
      function ModIsOn = QueryModState(obj)
      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interfaceobj=get(obj,'interface');
      ModIsOn = 0;
      CommandStr = {'AM:STAT?' 'FM:STAT?' 'FSK:STAT?'};
      for ii = 1:length(CommandStr)
          ModIsOn = str2double(query(interfaceobj, CommandStr{ii}));
          if ModIsOn == 1
              ModIsOn = ii;
              break;
          end
      end
    Description: This Function queries the modulator state. If a modulator is on the function returns an integer indicating which modulator.
      1 = AM
      2 = FM
      3 = FSK
      A zero indicates that no modulators are on.

  Method Recall_State
    Type: InstrumentCommand
    Line Command="*RCL" Output="false"
    Input: Location
    Description: Recall the instrument state stored in the specified non-volatile storage
      location. You cannot recall the instrument state from a storage location
      that is empty.

  Method SaveState
    MCode:
      function SaveState(obj)
      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
      interfaceobj=get(obj,'interface');
      State = query(interfaceobj, '*LRN?');

      [filename,path] = uiputfile('*.mat');
      save([path,filename],'State')

  Method Set_Memory_Location_Name
    MCode:
      function Set_Memory_Location_Name(obj, Location, LocationName)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, ['MEM:STAT:NAME ', num2str(Location), ', ', LocationName]);
    Description: Assign a custom name to the specified storage location. You can name a
      location from the front panel or over the remote interface, but you can
      only recall a state by name from the front panel (the *RCL command
      requires a numeric parameter).

  Method Set_Operation_Complete_Bit
    Type: InstrumentCommand
    Line Command="*OPC" Output="false"
    Description: Set the “Operation Complete” bit (bit 0) in the Standard Event register
      after the previous commands have been executed. Other commands may
      be executed before the bit is set. This command is used in the triggered
      sweep or triggered burst modes to provide a way to poll or interrupt the
      computer when the sweep or burst is complete.

  Method Store_Cal_Message
    MCode:
      function Store_Cal_Message(obj, MessageStr)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, ['CAL:STR "', MessageStr, '"']);
    Description: Store a message in non-volatile calibration memory. Storing a message
      will overwrite any message previously stored in memory.

  Method Store_State
    Type: InstrumentCommand
    Line Command="*SAV" Output="false"
    Input: Location
    Description: Store (save) the current instrument state in the specified non-volatile
      storage location. Any state previously stored in the same location will be
      overwritten (and no error will be generated).

  Method System_Interface
    MCode:
      function System_Interface(obj, GPIBorRS232)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, ['SYST:INT ',GPIBorRS232]);
    Description: Select the remote interface. Only one interface can be enabled at a time.
      The GPIB interface is selected when the function generator is shipped
      from the factory. The command does not have a query form.

  Method Trigger
    MCode:
      function Trigger(obj)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, 'TRIG');
    Description: Trigger a sweep or burst from the remote interface. This command can
      be used with any of the available trigger sources (TRIG:SOUR command).
      For example, you can use the TRIG command to issue an immediate
      trigger while waiting for an external trigger.

  Method Trigger_Bus
    MCode:
      function Trigger_Bus(obj)
      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interfaceobj=get(obj,'interface');
      fprintf(interfaceobj, '*TRG');
    Description: Trigger a sweep or burst from the remote interface only if the bus
      (software) trigger source is currently selected (TRIG:SOUR BUS command).

  Method Wait
    Type: InstrumentCommand
    Line Command="*WAI" Output="false"
    Description: Wait for all pending operations to complete before executing any additional
      commands over the interface. Used in the triggered sweep and triggered
      burst modes only.
