MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Program Files\MATLAB\R2009b\toolbox\instrument\instrument\drivers\RSMS4G_5To18GHzPresel.mdd
DriverType: MATLAB interface object
InstrumentType: Switch
InstrumentManufacturer: Hewlett-Packard
InstrumentModel: HP85685A
InstrumentVersion: 1.0
Identify: ID
Reset: IP
Error: ERROR

CreateInitCode
  Code:
    function init(obj)
    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interface=get(obj,'interface');
    set(interface, 'OutputBufferSize', 512);
    set(interface, 'InputBufferSize', 512);
    set(interface, 'ByteOrder', 'littleEndian');
    set(interface, 'TimeOut', 10);
    fclose(interface);

ConnectInitCode
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
CleanupCode
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
Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Bypass
    Type: InstrumentCommand
    ConfigureCommand: BYPASS
    QueryCommand: BYPASS?
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: 0.0
    ReadOnly: never
    Description: This property sets the bypass to on or off. Only the second port can be used when in bypass mode.

  Property CF
    Type: InstrumentCommand
    ConfigureCommand: CF
    QueryCommand: CF?
    PermissibleType: Double bounded [Max="2.00995008E9" Min="20.0"]
    DefaultValue: 20.0
    ReadOnly: never

  Property iGenAtten
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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iface = get(obj, 'interface');
      propertyValue = str2double(query(iface, 'AT?'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iface = get(obj, 'interface');
      fprintf(iface, ['AT ',num2str(propertyValue)])
    PermissibleType: Double enum [0.0, 3.0, 10.0, 13.0, 20.0, 23.0, 30.0, 33.0, 40.0, 43.0, 50.0, 53.0]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets the attenuation to the value (in dB) specified by user or queries the current attenuation

  Property iGenAttenChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenAtten');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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iface = get(obj, 'interface');
      fprintf(iface, ['AT ',num2str(propertyValue)])

      % check the setting
      SetAtten = get(obj, 'iGenAtten');
      if SetAtten ~= propertyValue
        error('Presel:Property:Atten:SettingIncorrect',...
          'The preselector attenuation is not set as requested');
      end
    PermissibleType: Double enum [0.0, 3.0, 10.0, 13.0, 20.0, 23.0, 30.0, 33.0, 40.0, 43.0, 50.0, 53.0]
    DefaultValue: 20
    ReadOnly: never
    Description: This property sets or queries the attenuation
      If setting the property then it checks to see that it is set properly.
      If it is not then an error is raised
      If an error occurs during a query then an error is raised.

  Property iGenHasNullInput
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 0;
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    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: always
    Description: returns whether or not it is possible to set the preselector to no input port.

  Property iGenHighestFreq
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 2009950080;
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    PermissibleType: Double bounded [Max="2.00995008E9" Min="2.00995008E9"]
    DefaultValue: 2.00995008E9
    ReadOnly: always
    Description: Query the highest possible frequency

  Property iGenInputPort
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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IFace = get(obj, 'interface');
      temp = str2double(query(IFace, 'I?'));
      propertyValue = temp-1;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');

      fprintf(IFace, ['I ',num2str(propertyValue+1)]);
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [Ant Port 1=0, Ant Port 2=1]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets the desired input port or queries which input port is active.
      0 indicates no port. Before Query ot this function user must make sure the CF is set as desired. If it is not this property may return an incorrect value.

  Property iGenInputPortChkResult
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'iGenInputPort');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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IFace = get(obj, 'interface');

      % convert to double if input is a string
      if ischar(propertyValue)
        propertyValue = str2double(propertyValue);
      end

      fprintf(IFace, ['I ',num2str(propertyValue+1)]);
      % check the setting

      SetPort = get(obj, 'iGenInputPort');
      if SetPort ~= propertyValue
        error('Presel:Property:InputPort:SettingIncorrect',...
          'The preselector input port is not set as requested');
      end
    PermissibleType: Double enum [0.0, 1.0]
    PermissibleType: String enum [Ant Port 1=0, Ant Port 2=1]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets or queries the antenna port.
      If setting the property then it is checked to make sure it was set properly.
      If it not set properly or a modbus error occurs then an error is raised.
      If an error occurs during a query then the empty set is returned and an error is raised.

  Property iGenInstDescID
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 'HP85685A GPIB';
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    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the name of the instrument.
      This is the same name as found in the miscellaneous function
      getInstListAndDrivers.

  Property iGenModelName
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 'HP85685A';
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    PermissibleType: String none
    ReadOnly: always
    Description: Returns the model name of the preseletcor. This is the same as 
      InstDescID without the IP on the end. This model name is used in the
      SetVCFPath fuction in the YIG Tracker driver so the name it returns must match 
      what this function expects.

  Property iGenNumPaths
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 17;
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    PermissibleType: Double none
    DefaultValue: 17
    ReadOnly: always
    Description: Specifies the possible number of paths including no path
      Returns the number of separate paths

  Property Path
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = [];
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    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0, 5.0, 6.0, 7.0, 8.0, 9.0]
    PermissibleType: String enum [None=0, Straight Through=1, Band Pass 0.5-1 GHz=2, Band Pass 1-2 GHz=3, Band Pass 2-4 GHz=4, Band Pass 4-8 GHz=5, Band Pass 8-12 GHz=6, Band Pass 12-18 GHz=7, TNBL 0.5-2 GHz=8, TNBL 2-18 GHz=9]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets the RF preselector path as specified by the argument "PathVal", where the value
      can be any value from 0 to (Number of paths).  A value of 0 designates that no RF Path is selected.

  Property SerialNum
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = 1234567;
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    PermissibleType: Double none
    DefaultValue: 1234567
    ReadOnly: always

  Property Span
    Type: InstrumentCommand
    ConfigureCommand: SP
    QueryCommand: SP?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method iGenAllPathProperties
    MCode:
      function [FilterType, FilterName, PathName, StartFreq, StopFreq, BandWidth, Amplifier, PathGain, NoiseFigure, CompressPt, ThrdOrdInt] = iGenAllPathProperties(obj)
      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
      FilterType{1} = 'BYP';
      FilterName{1} = 'Bypass';
      PathName{1} = 'Bypass (Ant Port 2 Only)';
      StartFreq{1} = 0;
      StopFreq{1} = 2.2e9;
      BandWidth{1} = 2.2e9;
      Amplifier{1} = 0;
      PathGain{1} = 0;
      NoiseFigure{1} = 0;
      CompressPt{1} = 0;
      ThrdOrdInt{1} = 0;

      FilterType{2} = 'BPF';
      FilterName{2} = 'Band-pass';
      PathName{2} = 'BP 20-10,099Hz';
      StartFreq{2} = 20;
      StopFreq{2} = 10099;
      BandWidth{2} = 10079;
      Amplifier{2} = 1;
      PathGain{2} = 20;
      NoiseFigure{2} = 15;
      CompressPt{2} = 0;
      ThrdOrdInt{2} = 0;

      FilterType{3} = 'BPF';
      FilterName{3} = 'Band-pass';
      PathName{3} = 'BP 10.1-74 kHz';
      StartFreq{3} = 10100;
      StopFreq{3} = 73999;
      BandWidth{3} = 63899;
      Amplifier{3} = 1;
      PathGain{3} = 20;
      NoiseFigure{3} = 15;
      CompressPt{3} = 0;
      ThrdOrdInt{3} = 0;

      FilterType{4} = 'BPF';
      FilterName{4} = 'Band-pass';
      PathName{4} = 'BP 74-123,500 kHz';
      StartFreq{4} = 74000;
      StopFreq{4} = 197499;
      BandWidth{4} = 123499;
      Amplifier{4} = 1;
      PathGain{4} = 20;
      NoiseFigure{4} = 15;
      CompressPt{4} = 0;
      ThrdOrdInt{4} = 0;

      FilterType{5} = 'BPF';
      FilterName{5} = 'Band-pass';
      PathName{5} = 'BP 197.5-525 kHz';
      StartFreq{5} = 197500;
      StopFreq{5} = 524999;
      BandWidth{5} = 327499;
      Amplifier{5} = 1;
      PathGain{5} = 20;
      NoiseFigure{5} = 15;
      CompressPt{5} = 0;
      ThrdOrdInt{5} = 0;

      FilterType{6} = 'BPF';
      FilterName{6} = 'Band-pass';
      PathName{6} = 'BP 525-1025 kHz';
      StartFreq{6} = 525000;
      StopFreq{6} = 1024998;
      BandWidth{6} = 499998;
      Amplifier{6} = 1;
      PathGain{6} = 20;
      NoiseFigure{6} = 15;
      CompressPt{6} = 0;
      ThrdOrdInt{6} = 0;

      FilterType{7} = 'BPF';
      FilterName{7} = 'Band-pass';
      PathName{7} = 'BP 1.025-1.96 MHz';
      StartFreq{7} = 1024999;
      StopFreq{7} = 1959997;
      BandWidth{7} = 934998;
      Amplifier{7} = 1;
      PathGain{7} = 20;
      NoiseFigure{7} = 15;
      CompressPt{7} = 0;
      ThrdOrdInt{7} = 0;

      FilterType{8} = 'TNBL';
      FilterName{8} = 'Tunable YIG';
      PathName{8} = 'TN 1.96-5.83 MHz';
      StartFreq{8} = 1959998;
      StopFreq{8} = 5829997;
      BandWidth{8} = 661300;
      Amplifier{8} = 1;
      PathGain{8} = 20;
      NoiseFigure{8} = 15;
      CompressPt{8} = 0;
      ThrdOrdInt{8} = 0;

      FilterType{9} = 'TNBL';
      FilterName{9} = 'Tunable YIG';
      PathName{9} = 'TN 5.83-17.33 MHz';
      StartFreq{9} = 5829998;
      StopFreq{9} = 17329990;
      BandWidth{9} = StopFreq{9} - StartFreq{9};
      Amplifier{9} = 1;
      PathGain{9} = 20;
      NoiseFigure{9} = 15;
      CompressPt{9} = 0;
      ThrdOrdInt{9} = 0;

      FilterType{10} = 'TNBL';
      FilterName{10} = 'Tunable YIG';
      PathName{10} = 'TN 17.33-28.73 MHz';
      StartFreq{10} = 17329991;
      StopFreq{10} = 28729990;
      BandWidth{10} = StopFreq{10} - StartFreq{10};
      Amplifier{10} = 1;
      PathGain{10} = 20;
      NoiseFigure{10} = 15;
      CompressPt{10} = 0;
      ThrdOrdInt{10} = 0;

      FilterType{11} = 'TNBL';
      FilterName{11} = 'Tunable YIG';
      PathName{11} = 'TN 28.73-51.73 MHz';
      StartFreq{11} = 28729991;
      StopFreq{11} = 51729981;
      BandWidth{11} = StopFreq{11} - StartFreq{11};
      Amplifier{11} = 1;
      PathGain{11} = 20;
      NoiseFigure{11} = 15;
      CompressPt{11} = 0;
      ThrdOrdInt{11} = 0;

      FilterType{12} = 'TNBL';
      FilterName{12} = 'Tunable YIG';
      PathName{12} = 'TN 51.73-97.83 MHz';
      StartFreq{12} = 51729982;
      StopFreq{12} = 97829995;
      BandWidth{12} = StopFreq{12} - StartFreq{12};
      Amplifier{12} = 1;
      PathGain{12} = 20;
      NoiseFigure{12} = 15;
      CompressPt{12} = 0;
      ThrdOrdInt{12} = 0;

      FilterType{13} = 'TNBL';
      FilterName{13} = 'Tunable YIG';
      PathName{13} = 'TN 97.83-152.33 MHz';
      StartFreq{13} = 97829996;
      StopFreq{13} = 152329991;
      BandWidth{13} = StopFreq{13} - StartFreq{13};
      Amplifier{13} = 1;
      PathGain{13} = 20;
      NoiseFigure{13} = 15;
      CompressPt{13} = 0;
      ThrdOrdInt{13} = 0;

      FilterType{14} = 'TNBL';
      FilterName{14} = 'Tunable YIG';
      PathName{14} = 'TN 152.33-216.33 MHz';
      StartFreq{14} = 152329992;
      StopFreq{14} = 216329927;
      BandWidth{14} = StopFreq{14} - StartFreq{14};
      Amplifier{14} = 1;
      PathGain{14} = 20;
      NoiseFigure{14} = 15;
      CompressPt{14} = 0;
      ThrdOrdInt{14} = 0;

      FilterType{15} = 'TNBL';
      FilterName{15} = 'Tunable YIG';
      PathName{15} = 'TN 216.33-332.23 MHz';
      StartFreq{15} = 216329928;
      StopFreq{15} = 332229967;
      BandWidth{15} = StopFreq{15} - StartFreq{15};
      Amplifier{15} = 1;
      PathGain{15} = 20;
      NoiseFigure{15} = 15;
      CompressPt{15} = 0;
      ThrdOrdInt{15} = 0;

      FilterType{16} = 'TNBL';
      FilterName{16} = 'Tunable YIG';
      PathName{16} = 'TN 332.23-500 MHz';
      StartFreq{16} = 332229968;
      StopFreq{16} = 499999899;
      BandWidth{16} = StopFreq{16} - StartFreq{16};
      Amplifier{16} = 1;
      PathGain{16} = 20;
      NoiseFigure{16} = 15;
      CompressPt{16} = 0;
      ThrdOrdInt{16} = 0;

      FilterType{17} = 'TNBL';
      FilterName{17} = 'Tunable YIG';
      PathName{17} = 'TN 0.5-2 GHz';
      StartFreq{17} = 499999900;
      StopFreq{17} = 2009950080;
      BandWidth{17} = StopFreq{17} - StartFreq{17};
      Amplifier{17} = 1;
      PathGain{17} = 20;
      NoiseFigure{17} = 15;
      CompressPt{17} = 0;
      ThrdOrdInt{17} = 0;

  Method iGenGotNoiseDiode
    MCode:
      function [NDPresent, PortNum, AvgENR] = iGenGotNoiseDiode(obj)
      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NDPresent = 0;
      PortNum = [];
      AvgENR = [];
    Description: queries the preselector to find out if it has a noise diode built in. If it does this function also returns the port number of the noise diode and the average ENR. If no nosie diode is present this function returns the empty set for the port number and ENR.

  Method iGenInit
    MCode:
      function iGenInit(obj, RaiseError)
      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interface = get(obj, 'interface');

      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      fprintf(interface, 'IP');
    Description: This function forces an instrument preset. 
      The HP85685 starts up with the following parameters
      CF = 190MHz
      Span = 70MHz
      Atten = 20
      Port = 2
      Bypass = off

  Method iGenMaxAttenuation
    MCode:
      function [MaxAtten, AttenInc] = iGenMaxAttenuation(obj)
      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MaxAtten = 50;
      AttenInc = 10;
    Description: This command returns the maximum available attenuation and how the attenuation can be incremented

  Method iGenNoiseDiodeState
    MCode:
      function NDState = iGenNoiseDiodeState(obj, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      NDState = false;

      if RaiseError
        error('Presel:Function:NoiseDiodeState:OptionAbsent',...
          'The HP85685 does not have an internal noise diode');
      end
    Description: Returns the current state of the power to the noise diode, where 0 = noise diode off and
      1 = noise diode on, -1 indicates an error because no noise diode is present.

  Method iGenNumInputPorts
    MCode:
      function [NumPorts, PortNames] = iGenNumInputPorts(obj)
      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NumPorts = 2;
      PortNames = {'Ant Port 1', 'Ant Port 2'};
    Description: This function returns the number of input ports and their names. The names must be in the same order as they are set in InputPort and be set as valid inputs to the InputPort property.

  Method iGenProbeTemp
    MCode:
      function degC = iGenProbeTemp(obj, WhichProbe, RaiseError)
      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% warning this preselector does not have temp probes
      degC = [];

      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      if RaiseError
        error('Presel:Function:ProbeTemp:OptionAbsent',...
          'The HP85685 does not have temperature probes');
      end
    Description: ' This function returns the temperature value of the selected probe, WhichProbe.
      ' For the Presel4Gp5_18 Preselector, there are 3 temperature probes (numbered 0 to 2) as follows:
      ' Probe 0:  Enclosure
      ' Probe 1:  YIG 0.5-2.0GHz
      ' Probe 2:  Low Noise Amplifier

  Method iGenSetNoiseDiode
    MCode:
      function iGenSetNoiseDiode(obj, On, RaiseError, ChkResult)
      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% warning this preselector does not have noise diode.

      % create RaiseError and ChkResult if they are not input. The default for
      % these inputs is false.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      if RaiseError
        error('Presel:Function:NoiseDiodeState:OptionAbsent',...
          'The HP85685 does not have an internal noise diode');
      end
    Description: Designates, by argument SetState, whether to turn the power to the noise diode on or off,
      where 0 = off and 1 = on.  If this subroutine is called when there is no noise diode present
      and error is passed via the object of type clsCallBack.
      If a terminated path is hardwired into the preselector, this subroutine will automatically execute
      the proper switching to put the terminator into the path when the noise diode is turned off
      by calling this subroutine with the argument "SetState" set to 0.

  Method iGenTempProbes
    MCode:
      function [NumProbes, ProbeIDs] = iGenTempProbes(obj)
      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NumProbes = 0;
      ProbeIDs = [];
    Description: Specifies the possible temperature probes, returns the number of available probes and their IDS

  Method iGenUniversalGetPath
    MCode:
      function [StartFreq, StopFreq, FilterType, FilterName] = iGenUniversalGetPath(obj, RaiseError)
      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if ~exist('RaiseError', 'var')
        RaiseError = false;
      end

      IFace = get(obj, 'interface');

      StartFreq = str2double(query(IFace, 'FA?'));
      StopFreq = str2double(query(IFace, 'FB?'));

      BypassOn = str2double(query(IFace, 'BYPASS?'));
      if ~BypassOn
        if StopFreq <= 1959998
          FilterType = 'BPF';
          FilterName = 'Band-pass';
        else
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
        end
      else
        FilterType = 'BYP';
        FilterName = 'Bypass';
      end
    Description: This function returns the set path in the form of minimum and maximum freqeuncies and the filter type for the returned path number.

      If RaiseError = true errors will be raised for modbus errors if it is false and errors occur empty sets will be returned for all the output arguments.

  Method iGenUniversalPathProperties
    MCode:
      function [FiltType, FilterName, PathName, f1, f2, BW, Amp, G, NF, CompPt, ThrdOrd] = iGenUniversalPathProperties(obj, CenterFreq, FilterType, RaiseError)
      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ItWorked = true;
      CenterFreq = round(CenterFreq)
      switch FilterType
        case 'BYP'
          PathNum = 0;
        case 'BPF'
          if CenterFreq >= 20 && CenterFreq <= 10099
            PathNum = 1;
          elseif CenterFreq >= 10100 && CenterFreq <= 73999
            PathNum = 2;
          elseif CenterFreq >= 74000 && CenterFreq <= 197499
            PathNum = 3;
          elseif CenterFreq >= 197500 && CenterFreq <= 524999
            PathNum = 4;
          elseif CenterFreq >= 525000 && CenterFreq <= 1024998
            PathNum = 5;
          elseif CenterFreq >= 1024999 && CenterFreq <= 1959998
            PathNum = 6;
          else
            % Freq not in range
            ItWorked = false;
          end
        case 'TNBL'
          if CenterFreq >= 1959999 && CenterFreq <= 5829997
            PathNum = 7;
          elseif CenterFreq >= 5829998 && CenterFreq <= 17329990
            PathNum = 8;
          elseif CenterFreq >= 17329991 && CenterFreq <= 28729990
            PathNum = 9;
          elseif CenterFreq >= 28729991 && CenterFreq <= 51729981
            PathNum = 10;
          elseif CenterFreq >= 51729981 && CenterFreq <= 97829995
            PathNum = 11;
          elseif CenterFreq >= 97829996 && CenterFreq <= 152329991
            PathNum = 12;
          elseif CenterFreq >= 152329992 && CenterFreq <= 216329927
            PathNum = 13;
          elseif CenterFreq >= 216329928 && CenterFreq <= 332229967
            PathNum = 14;
          elseif CenterFreq >= 332229968 && CenterFreq <= 499999899
            PathNum = 15;
          elseif CenterFreq >= 499999900 && CenterFreq <= 2009950080
            PathNum = 16;
          else
            ItWOrked = false;
          end
        otherwise
          % invalid filter type
          ItWorked = false;
      end
      if ItWorked
        [FiltType, FilterName, PathName, f1, f2, BW, Amp, G, NF, CompPt, ThrdOrd] = invoke(obj, 'PathPropertiesByPath', PathNum);
      else
        FiltType = [];
        FilterName = [];
        PathName = [];
        f1 = [];
        f2 = [];
        BW = [];
        Amp = [];
        G = [];
        NF = [];
        CompPt = [];
        ThrdOrd = [];
        if RaiseError
          error('Presel:Function:UniversalPathProperties:InvalidInput',...
            'The input arguments do not correspond to a valid path. This function has not returned any values.');
        end
      end
    Description: queries properties of the chosen path given the center freq and filter type

  Method iGenUniversalSetPath
    MCode:
      function iGenUniversalSetPath(obj, FStart, FStop, FilterType, RaiseError, ChkResult)
      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interface = get(obj, 'interface');
      % create RaiseError and/or ChkResult variables if they are not input. False
      % is the default for these variables.
      if ~exist('RaiseError', 'var')
        RaiseError = false;
      end
      if ~exist('ChkResult', 'var')
        ChkResult = false;
      end

      if ~exist('FilterType', 'var')
        FilterType = 'Not Needed';
      end

      ItWorked = true;
      if strcmpi(FilterType, 'BYP') %bypass path
        set(obj, 'Bypass', 1)
        set(obj, 'IGenInputPort', 1)
        if RaiseError && ChkResult
          check = get(obj, 'Bypass');
          check2 = get(obj, 'iGenInputPort');
          if check ~= 1 || check2 ~= 1
            error('Presel:Function:UniversalSetPath:SettingIncorrect',...
              'The preselector path has not been set as requested');
          end
        end
      else % not Bypass path
        set(obj, 'Bypass', 0)
        if FStart <= FStop && FStart >= 20 && FStop <= 2.2e9
          fprintf(interface, ['FA ',num2str(FStart),'Hz']);
          fprintf(interface, ['FB ',num2str(FStop),'Hz']);
          if RaiseError && ChkResult
            checkStart = str2double(query(interface, 'FA?'));
            checkStop = str2double(query(interface, 'FB?'));
            if ~WithinTol(FStart, checkStart, 100, true) || ~WithinTol(FStop, checkStop, 100, true)
             error('Presel:Function:UniversalSetPath:SettingIncorrect',...
               'The preselector path has not been set as requested');
                      %[num2str(FStart),' ',num2str(checkStart),' ',num2str(FStop),' ',num2str(checkStop),' ']);
            end
          end
        else % freqeuncy is not in range
          if RaiseError
            error('Presel:Function:UniversalSetPath:InvalidInput',...
              'The input parameters do not define a valid path. The path has not changed');
          end
        end
      end
    Description: Sets the path using either the path number or center frequency.
      This function is present so that measurements can use it to set the path by either freq or number with a single command.

  Method PathPropertiesByPath
    MCode:
      function [FilterType, FilterName, PathName, StartFreq, StopFreq, BandWidth, Amplifier, PathGain, NoiseFigure, CompressPt, ThrdOrdInt] = PathPropertiesByPath(obj, PathNum)
      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switch PathNum
        case 0
          FilterType = 'BYP';
          FilterName = 'Bypass';
          PathName = 'Bypass (Ant Port 2 Only)';
          StartFreq = 0;
          StopFreq = 2.2e9;
          BandWidth = 2.2e9;
          Amplifier = 0;
          PathGain = 0;
          NoiseFigure = 0;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 1
          FilterType = 'BPF';
          FilterName = 'Band-pass';
          PathName = 'BP 20-10,099Hz';
          StartFreq = 20;
          StopFreq = 10099;
          BandWidth = 10079;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 2
          FilterType = 'BPF';
          FilterName = 'Band-pass';
          PathName = 'BP 10.1-74 kHz';
          StartFreq = 10100;
          StopFreq = 73999;
          BandWidth = 63899;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 3
          FilterType = 'BPF';
          FilterName = 'Band-pass';
          PathName = 'BP 74-123,500 kHz';
          StartFreq = 74000;
          StopFreq = 197499;
          BandWidth = 123499;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 4
          FilterType = 'BPF';
          FilterName = 'Band-pass';
          PathName = 'BP 197.5-525 kHz';
          StartFreq = 197500;
          StopFreq = 524999;
          BandWidth = 327499;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 5
          FilterType = 'BPF';
          FilterName = 'Band-pass';
          PathName = 'BP 525-1025 kHz';
          StartFreq = 525000;
          StopFreq = 1024998;
          BandWidth = 499998;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 6
          FilterType = 'BPF';
          FilterName = 'Band-pass';
          PathName = 'BP 1.025-1.96 MHz';
          StartFreq = 1024999;
          StopFreq = 1959997;
          BandWidth = 934998;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 7
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 1.96-5.83 MHz';
          StartFreq = 1959998;
          StopFreq = 5829997;
          BandWidth = 661300;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 8
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 5.83-17.33 MHz';
          StartFreq = 5829998;
          StopFreq = 17329990;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 9
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 17.33-28.73 MHz';
          StartFreq = 17329991;
          StopFreq = 28729990;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 10
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 28.73-51.73 MHz';
          StartFreq = 28729991;
          StopFreq = 51729981;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 11
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 51.73-97.83 MHz';
          StartFreq = 51729982;
          StopFreq = 97829995;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 12
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 97.83-152.33 MHz';
          StartFreq = 97829996;
          StopFreq = 152329991;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 13
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 152.33-216.33 MHz';
          StartFreq = 152329992;
          StopFreq = 216329927;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 14
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 216.33-332.23 MHz';
          StartFreq = 216329928;
          StopFreq = 332229967;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 15
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 332.23-500 MHz';
          StartFreq = 332229968;
          StopFreq = 499999899;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        case 16
          FilterType = 'TNBL';
          FilterName = 'Tunable YIG';
          PathName = 'TN 0.5-2 GHz';
          StartFreq = 499999900;
          StopFreq = 2009950080;
          BandWidth = StopFreq - StartFreq;
          Amplifier = 1;
          PathGain = 20;
          NoiseFigure = 15;
          CompressPt = 0;
          ThrdOrdInt = 0;
        otherwise
          FilterType = [];
          FilterName = [];
          PathName = [];
          StartFreq = [];
          StopFreq = [];
          BandWidth = [];
          Amplifier = [];
          PathGain = [];
          NoiseFigure = [];
          CompressPt = [];
          ThrdOrdInt = [];
          %Throw Warning invalid path number sent
      end
    Description: ' Returns path properties for the specified path indicated by the argument "PathNum".
      '    The arguments returned are as follows:
      '   1)  PathFilterType As String: this is the filter characteristic type.  The following Filter types are supported:
      '         "None" = No Filter, Open Path
      '         "BYP" = Straight Through coupled
      '         "AUX" = Auxillary Path
      '         "BPF" = Band pass Filter
      '         "BRF" = Band Reject Filter
      '         "LPF" = Low Pass Filter
      '         "HPF" = High Pass Filter
      '         "TNBL" = Tunable Filter
      '   2)  StartFreq As Double:  this is the 3dB cutoff frequency (in Hz) for the lower end of a fixed filter's frequency band.
      '                             For tunable filters, this is the Minimum tunable frequency.
      '   3)  StopFreq As Double:  this is the 3dB cutoff frequency (in Hz) for the upper end of a fixed filter's frequency band.
      '                             For tunable filters, this is the Maximum tunable frequency.
      '   4)  Bandwidth As Double:  this is the 3 dB bandwidth (in Hz) of the narrowest filter in the path, be it a fixed
      '         filter or a tunable filter. For a fixed filter the bandwidth is equal to (StopFreq - StartFreq)
      '   5)  Amplifier As Integer:  indicates if an amplifier is included in the path. 0 = No Amplifier, 1 = Amplifier present
      '   6)  PathGain:  this is the average gain (in dB) for the path EXCLUDING the attenuator.
      '   7)  NoiseFigure:  this is the avereage Noise Figure in dBm for the path
      '   8)  ByRef CompressPt As Single: this is the average 1-dB compression point (in dBm) for the path.
      '   9)  ByRef ThrdOrdInt As Single: this is the average third-order intercept point (in dBm)
      '         for the path.
      ' The argument "PathNum" designates the path for which the properties are requested, where the value
      '   can be any value from 0 to (Number of paths).

  Method SetByFreq
    MCode:
      function out = SetByFreq(obj)
      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out = true;
    Description: 'Indicates whether the paths within the preselector are automatically set simply by sending a center
      '  frequency (example HP85685 preselector).  The 3G and 4G preselectors paths are set by designating
      '  a path, as appoosed to a center frequency
      'false = path set by disignating the path
      'true = path is set automatically by sending a center frequency
